MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\agilent_34401a.mdd
DriverType: MATLAB interface object
InstrumentType: Digital Multimeter
InstrumentManufacturer: Agilent
InstrumentModel: 34401A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property ApertureTime
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface
      interface = get(obj,'interface');

      % Initialize PROPERTYVALUE to an empty string.
      propertyValue ='';

      % Get current function
      fprintf(interface,'SENse:FUNCtion?');
      measurementType = fscanf(interface);

      % Remove extra character at the end of string (after the ending single quote)
      measurementType(length(measurementType))= '';

      % Check if the current function is supported.
      if ~ any(strcmpi(measurementType,{'"FREQ"','"PER"','"VOLT"','"CURR"','"RES"','"FRES"'}))
              error('The function you specified is not supported. Use MEASUREMENTTYPE property to choose a function that is supported.');
              return
      end

      % Remove double quotes in string
      measurementType = strrep(measurementType,'"','');

      % Get the aperrture for dc current/voltage and resistance
      if any(strcmpi(measurementType,{'CURR','VOLT','FRES','RES'}))
          fprintf(interface,[measurementType ':NPLCycles?'])
      else

      % Get the aperture for frequency and period measurement
      fprintf(interface,[measurementType ':APERture?'])
      end

      % return it
      propertyValue = eval(fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface
      interface = get(obj,'interface');

      % Get current function
      fprintf(interface,'SENse:FUNCtion?');
      measurementType = fscanf(interface);

      % Remove extra character at the end of string (after the ending single quote)
      measurementType(length(measurementType))= '';

      % Check if the current function is supported.
      if ~ any(strcmpi(measurementType,{'"FREQ"','"PER"','"VOLT"','"CURR"','"RES"','"FRES"'}))
              error('The function you specified is not supported. Use MEASUREMENTTYPE property to choose a function that is supported.');
              return
      end

      % Remove double quotes in string
      measurementType = strrep(measurementType,'"','');

      % Convert PropertyValue into string, if it is not.
      if isnumeric(propertyValue)
          propertyValue = num2str(propertyValue);
      end

      % Get the aperrture for dc current/voltage and resistance
      if any(strcmpi(measurementType,{'CURR','VOLT','RES','FRES'}))
          fprintf(interface,[measurementType ':NPLCycles ' propertyValue])
      else
      % set the cycle
      fprintf(interface,[measurementType ':APERture ' propertyValue])
      end
    PermissibleType: String enum [min=MIN, max=MAX]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="freq" [0.01, 0.1, 1.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="per" [0.01, 0.1, 1.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="volt" [0.02, 0.2, 1.0, 10.0, 100.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="curr" [0.02, 0.2, 1.0, 10.0, 100.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="res" [0.02, 0.2, 1.0, 10.0, 100.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="fres" [0.02, 0.2, 1.0, 10.0, 100.0]
    DefaultValue: 0.1
    ReadOnly: never
    Description: APERTURETIME      

      Sets or queries the integration time based on the millimeter’s present configuration.

      Integration time is the period during which the multimeter’s analog-to-digital (A/D) converter samples the input signal for a measurement. Integration time affects the measurement resolution (for better resolution, use longer integration time), and measurement speed (for faster measurements, use shorter integration time).

      Note: Applies to all measurement functions, except ac voltage, ac current, frequency and period. The integration time for the math operations is the same as the integration time for the measurement function in use.

      The integration time is specified in the number of power line cycles (NPLCs).
      The choices are 0.02, 1, 10, or 100 power line cycles. The default is 10 PLCs.

  Property AutoImpedance
    Type: InstrumentCommand
    ConfigureCommand: INP:IMPedance:AUTO
    QueryCommand: INP:IMPedance:AUTO?
    PermissibleType: String enum [off=0, on=1]
    DefaultValue: off
    ReadOnly: never
    Description: Sets or queries whether the multimeter automatically select the input resistance.

      The multimeter's input resistance is fixed at 10 M ohm for all dc voltage range to minimize noise pickup. To reduce the effect of measurement loading error, you can set the input resistance to greater then 1o G ohm for the 100 mVdc, 1 Vdc, and 10 Vdc ranges.

  Property AutoRange
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get interface
      interface = get(obj,'Interface');

      %ask for the MeasurementType
      fprintf(interface,'FUNCtion?');

      %read the MeasurementType
      measurementType = fscanf(interface);

      %delete empty quotes from ends of string
      measurementType = strrep(measurementType,'"','');

      %ask for the state of AutoRange
      fprintf(interface,[measurementType, ':RANGe:AUTO?']);

      %read the value
      propertyValue = eval(fscanf(interface));

      %the possible values
      values = {'off','on'};

      %1 = on, 0 = off
      propertyValue = char(values(propertyValue+1));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get interface
      interface = get(obj,'Interface');

      %ask for the MeasurementType
      fprintf(interface,'FUNCtion?');

      %read the MeasurementType
      measurementType = fscanf(interface);

      %delete empty quotes from ends of string
      measurementType = strrep(measurementType,'"','');

      %set the state of AutoRange
      fprintf(interface,[measurementType, ':RANGe:AUTO ', propertyValue]);
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: on
    ReadOnly: never

  Property AutoZero
    Type: InstrumentCommand
    ConfigureCommand: Zero:Auto
    QueryCommand: Zero:Auto?
    PermissibleType: String enum [on=1, off=0, once=ONCE]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the auto-zero mode.

      When autozero is enabled (default), the multimeter internally disconnects the input signal following each measurement, and takes a zero reading. It then subtracts the zero reading from the previous readings.

      When the autozero is disabled, the multimeter takes one zero reading and subtracts it from all subsequent measurements. It take a new zero reading each time you change the function, range, and integration time.

  Property Bandwidth
    Type: InstrumentCommand
    ConfigureCommand: DETector:BANDwidth
    QueryCommand: DETector:BANDwidth?
    PermissibleType: Double enum [3.0, 20.0, 200.0]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 20
    ReadOnly: never
    Description: Sets or queries minimum and maximum frequency components of the input signal for AC measurements.

  Property DataPointsAvailable
    Type: InstrumentCommand
    QueryCommand: DATA:POINTs?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the number of points stored in the multimeter's internal memory.

  Property InputTerminal
    Type: InstrumentCommand
    QueryCommand: ROUTe:TERMinals?
    PermissibleType: String enum [front=FRON, rear=REAR]
    DefaultValue: front
    ReadOnly: always
    Description: Returns whether the front or rear input terminals are expected.

  Property MeasurementType
    Type: InstrumentCommand
    ConfigureCommand: Sense:Function
    QueryCommand: Sense:Function?
    PermissibleType: String enum [dcvolts="volt", acvolts="volt:ac", dccurrent="curr", accurrent="curr:ac", frequency="freq", period="per", resistance="res", fresistance="fres", diode="diod", continuity="cont"]
    DefaultValue: dcvolts
    ReadOnly: never
    Description: Sets or queries the manual measurement type.

  Property PowerLineFrequency
    Type: InstrumentCommand
    QueryCommand: SYST:LFR?
    PermissibleType: Double none
    DefaultValue: 10
    ReadOnly: always

  Property Range
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface
      interface = get(obj,'interface');

      % Get current function
      fprintf(interface,'SENse:FUNCtion?');
      measurementType = fscanf(interface);

      % The string returned (seems to) have a carriage return at the end of it.
      % Replacing with the null string before using it.
      measurementType(length(measurementType))= '';

      % Check if the current function is supported.
      if ~ any(strcmpi(measurementType,{'"CURR:AC"','"CURR"','"VOLT:AC"','"VOLT"','"FRES"','"RES"','"FREQ"','"PER"'}))
               %error('The function you specified is not supported. Use MEASUREMENTTYPE property to choose a function that is supported.');
               propertyValue = '[]'
              return
      end

      % Remove double quotes in string
      measurementType = strrep(measurementType,'"','');

      % 'VOLT:' needs to be appended to the string
      % when the current function is RES or FREQ
      if (any(strcmpi(measurementType,{'FREQ','PER'})))
          measurementType = [measurementType ':VOLT']
      end

      % get the range
      fprintf(interface,[measurementType ':RANGe?'])

      % return it
      propertyValue = eval(fscanf(interface));
    SetMCode:
      function  set(obj, propertyName, propertyValue)
      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
      % Get the interface
      interface = get(obj,'interface');

      % Get current function
      fprintf(interface,'SENse:FUNCtion?');
      measurementType = fscanf(interface);

      % Remove extra character at the end of string (after the ending single quote)
      measurementType(length(measurementType))= '';

      % Check if the current function is supported.
      if ~ any(strcmpi(measurementType,{'"CURR:AC"','"CURR"','"VOLT:AC"','"VOLT"','"FRES"','"RES"','"FREQ"','"PER"','"RES"','"FRES"'}))
              error('The function you specified is not supported. Use MEASUREMENTTYPE property to choose a function that is supported.');
              return
      end

      % Remove double quotes in string
      measurementType = strrep(measurementType,'"','');

      % 'VOLT:' needs to be appended to the string
      % when the current function is RES or FREQ
      if (any(strcmpi(measurementType,{'FREQ','PER'})))
          measurementType = [measurementType ':VOLT']
      end

      % Convert PropertyValue into string, if it is not.
      if isnumeric(propertyValue)
          propertyValue = num2str(propertyValue);
      end

      % set the range
      if strcmpi(propertyValue, 'auto')
      	%if auto is desired, it must be turned on.
      	fprintf(interface,[measurementType, ':RANGe:AUTO ON']);
      else
      	fprintf(interface,[measurementType, ':RANGE:AUTO OFF']);
      	fprintf(interface,[measurementType ':RANGe ' propertyValue]);
      end
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="volt" [0.1, 1.0, 10.0, 100.0, 1000.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="volt:ac" [0.1, 1.0, 10.0, 100.0, 1000.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="curr" [0.01, 0.1, 1.0, 3.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="curr:ac" [1.0, 3.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="freq" [0.1, 1.0, 10.0, 100.0, 1000.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="per" [0.1, 1.0, 10.0, 100.0, 1000.0]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="res" [100.0, 1000.0, 10000.0, 100000.0, 1000000.0, 1.0E7, 1.0E8]
    PermissibleType: Double enum DependentProperty=MeasurementType DependentPropertyValue="fres" [100.0, 1000.0, 10000.0, 100000.0, 1000000.0, 1.0E7, 1.0E8]
    PermissibleType: String enum [min=MIN, max=MAX, auto=AUTO]
    DefaultValue: 0.1
    ReadOnly: never
    Description: Sets or queries the manual measurement range of the instrument.

  Property Resolution
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface
      interface = get(obj,'interface');

      % Initialize PROPERTYVALUE to an empty string.
      propertyValue ='';

      % Get current function
      fprintf(interface,'SENse:FUNCtion?');
      measurementType = fscanf(interface);

      % The string returned (seems to) have a carriage return at the end of it.
      % Replacing with the null string before using it.
      measurementType(length(measurementType))= '';

      % Check if the current function is supported.
      if ~ any(strcmpi(measurementType,{'"CURR:AC"','"CURR"','"VOLT:AC"','"VOLT"','"FRES"','"RES"'}))
             propertyValue = '[]'
              return
      end

      % Remove double quotes in string
      measurementType = strrep(measurementType,'"','');

      % get the range
      fprintf(interface,[measurementType ':RESolution?'])

      % return it
      propertyValue = eval(fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface
      interface = get(obj,'interface');

      % Get current function
      fprintf(interface,'SENse:FUNCtion?');
      measurementType = fscanf(interface);

      % Remove extra character at the end of string (after the ending single quote)
      measurementType(length(measurementType))= '';

      % Check if the current function is supported.
      if ~ any(strcmpi(measurementType,{'"CURR:AC"','"CURR"','"VOLT:AC"','"VOLT"','"RES"','"FRES"'}))
              error('The function you specified is not supported. Use MEASUREMENTTYPE property to choose a function that is supported.');
              return
      end

      % Remove double quotes in string
      measurementType = strrep(measurementType,'"','');

      %get the current Range value
      range = get(obj,'Range');

      %get the current MeasurementType value
      mt = get(obj,'MeasurementType');

      %all the possible values for MeasurementType that could make it this far
      mts = {'dcvolts','acvolts','dccurrent','accurrent','resistance',...
      	'fresistance'};

      %all possible values for range
      ranges = [.01,.1,1,3,10,100,1000,1e4,1e5,1e6,1e7,1e8];

      %type index, index into 'mts' of current MeasurementType value
      tindex = -1;

      %range index, index into 'ranges' of current Range value
      rindex = -1;

      %find where in 'mts' the current type is
      for i = 1:length(mts);
      	bool = strcmp(mts{i},mt);
      	if bool
      		tindex = i;
      		break
      	end
      end

      %find where in 'ranges' the current range is
      for i = 1:length(ranges)

      	if ranges(i) == range;
      		rindex = i;
      		break
      	end
      end

      %if it didn't find it, that's bad
      if (rindex == -1 || tindex == -1)
      	error('Either MeasurementType or Range properties set to unrecognized values');
      end

      %Construct a cell array whos rows correspond to 'ranges' and whose columns
      % correspond to 'mts'. The contents of each cell is an array of doubles
      % which are allowable values of resolution for that pair of Range and
      % MesurementType values

      %"RESolutionS"
      ress = cell(12,6);

      %dcvolts
      ress(2,1) = {[3e-8,1e-7,3e-7,1e-6,1e-5]};	%.1
      ress(3,1) = {[3e-7,1e-6,3e-6,1e-5,1e-4]};	%1
      ress(5,1) = {[3e-6,1e-5,3e-5,1e-4,1e-3]};	%10
      ress(6,1) = {[3e-5,1e-4,3e-4,1e-3,1e-2]};	%100
      ress(7,1) = {[3e-4,1e-3,3e-3,1e-2,1e-1]};	%1000

      %acvolts
      ress(2,2) = {[1e-7,1e-6,1e-5]};	%.1
      ress(3,2) = {[1e-6,1e-5,1e-4]};	%1
      ress(5,2) = {[1e-5,1e-4,1e-3]};	%10
      ress(6,2) = {[1e-4,1e-3,1e-2]};	%100
      ress(7,2) = {[1e-3,1e-2,1e-1]};	%1000

      %dccurrent
      ress(1,3) = {[3e-9,1e-8,3e-8,1e-7,1e-6]};	%.01
      ress(2,3) = {[3e-8,1e-7,3e-7,1e-6,1e-5]};	%.1
      ress(3,3) = {[3e-7,1e-6,3e-6,1e-5,1e-4]};	%1
      ress(4,3) = {[9e-7,1e-6,3e-6,1e-5,3e-4]};	%3

      %accurrent
      ress(3,4) = {[1e-6,1e-5,1e-4]};	%1
      ress(4,4) = {[3e-6,3e-5,3e-4]};	%3

      %resistance
      ress(6,5) = {[3e-5,1e-4,3e-4,1e-3,.01]};	%100
      ress(7,5) = {[3e-4,1e-3,3e-3,1e-2,.1]};	%1000
      ress(8,5) = {[3e-3,1e-2,3e-2,1e-1,1]};		%1e4
      ress(9,5) = {[3e-2,1e-1,3e-1,1e0,10]};	%1e5
      ress(10,5) = {[3e-1,1e0,3e0,1e1,100]};	%1e6
      ress(11,5) = {[3e-0,1e1,3e1,1e2,1000]};	%1e7
      ress(12,5) = {[3e1,1e2,3e2,1e3,10000]}; %1e8

      %fresistance (same as resistance)
      ress(:,6) = ress(:,5);

      %If attempting to set to a double, check to see if it's within the
      % allowable range, and convert into string.
      if isnumeric(propertyValue)

      	%get the cell which gives the enumerations for the appropriate
      	% combination of Range and MeasurementType values
      	enums = cell2mat(ress(rindex,tindex));

      	%<Array> == <Scalar> returns an array the same size as <Array> with
      	% ones at the indices of <Array> whose values equal <Scalar>, and zeros
      	% elsewhere.
      	location = (enums == propertyValue);

      	% If propertyValue is in the array, location will be an array with a
      	% single 1 and the rest 0's.
      	if ~sum(location)
      		error('Invalid Resolution value for current MeasurementType and Range properties');
      	end

      	%convert to string
          propertyValue = num2str(propertyValue);

      end

      % set the range
      fprintf(interface,[measurementType ':RESolution ' propertyValue])
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: min
    ReadOnly: never
    Description: Select the resolution for the specified function. This property is not valid for frequency, period or ratio.

      Acceptable values for Resolution depend on current values for Range and MeasurementType properties.
      NOTE: If AutoRange is on, the Range value may not be what is expected, and therefore the allowed values may be different than expected. To check the Range property, use 
      	get(obj,'Range')
      where obj is the device object. To turn AutoRange off, use
      	set(obj,'AutoRange','off')
      Be aware that the device is capable of turning on AutoRange without your permission. To check the status of AutoRange, use
      	get(obj,'AutoRange')
      or look for the word "MAN" on the LED display of the device. If the word is present, AutoRange is OFF.


      allowed values					Range
      --------------					-----

      (dcvolts)
      [3e-8,1e-7,3e-7,1e-6,1e-5]		.1
      [3e-7,1e-6,3e-6,1e-5,1e-4]		1
      [3e-6,1e-5,3e-5,1e-4,1e-3]		10
      [3e-5,1e-4,3e-4,1e-3,1e-2]		100
      [3e-4,1e-3,3e-3,1e-2,1e-1]		1000

      (acvolts)
      [1e-7,1e-6,1e-5]				.1
      [1e-6,1e-5,1e-4]				1
      [1e-5,1e-4,1e-3]				10
      [1e-4,1e-3,1e-2]				100
      [1e-3,1e-2,1e-1]				1000

      (dccurrent)
      [3e-9,1e-8,3e-8,1e-7,1e-6]		.01
      [3e-8,1e-7,3e-7,1e-6,1e-5]		.1
      [3e-7,1e-6,3e-6,1e-5,1e-4]		1
      [9e-7,1e-6,3e-6,1e-5,3e-4]		3

      (accurrent)
      [1e-6,1e-5,1e-4]				1
      [3e-6,3e-5,3e-4]				3

      (resistance)
      [3e-5,1e-4,3e-4,1e-3,.01]		100
      [3e-4,1e-3,3e-3,1e-2,.1]		1000
      [3e-3,1e-2,3e-2,1e-1,1]			1e4
      [3e-2,1e-1,3e-1,1e0,10]			1e5
      [3e-1,1e0,3e0,1e1,100]			1e6
      [3e-0,1e1,3e1,1e2,1000]			1e7
      [3e1,1e2,3e2,1e3,10000] 		1e8

      (fresistance)
      [3e-5,1e-4,3e-4,1e-3,.01]		100
      [3e-4,1e-3,3e-3,1e-2,.1]		1000
      [3e-3,1e-2,3e-2,1e-1,1]			1e4
      [3e-2,1e-1,3e-1,1e0,10]			1e5
      [3e-1,1e0,3e0,1e1,100]			1e6
      [3e-0,1e1,3e1,1e2,1000]			1e7
      [3e1,1e2,3e2,1e3,10000] 		1e8

  Property SampleCount
    Type: InstrumentCommand
    ConfigureCommand: Sample:Count
    QueryCommand: Sample:Count?
    PermissibleType: String enum [max=MAX, min=MIN]
    PermissibleType: Double bounded [Max="50000.0" Min="1.0"]
    DefaultValue: max
    ReadOnly: never
    Description: Sets or queries the number of readings per trigger.

  Method drivertest
    MCode:
      function varargout = drivertest(obj)
      %   AGILENT_34401A_MIDTEST01 Code for testing a MATLAB instrument driver.
      %
      %   This is the machine generated code that tests a MATLAB instrument driver,
      %
      %   The test consists of multiple test steps that can test the MATLAB instrument
      %   drivers functions and properties.
      %
      %   The test code was generated with the MIDTEST GUI. For more information
      %   on MIDTEST, type 'instrhelp midtest' at the MATLAB command prompt.
      %
      %   See also ICDEVICE, MIDTEST.
      %

      %   Creation time: 17-Feb-2004 15:18:57

      % Wrap entire test in try catch.
      try
      fprintf('Test: agilent_34401a\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      noErrorMsg             = '+0,"No error"';
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;
      deviceObj              = obj;

      % Test Step 1: reset (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          devicereset(deviceObj);

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf(result);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.');
          fprintf(lasterr);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 2: set MeasurementType dcvolts (Set Property Test Step)

      % This test step generated no code. Most likely because a
      % property or function to test was not selected.
      fprintf('Test step status: PASSED\n');

      % Test Step 3: (dcvolts) ApertureTime all (Set Property Test Step)
      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% Overall error status for all settings.
      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% Valid values for the ApertureTime property.
      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% Test all supported values.
      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        % Configure the property.
      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        % Check if instrument error occurred.
      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        % Post information about error if one occurred.
      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        % A MATLAB error occurred.
      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        % Post information about error.
      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% Post message indicating if test step passed.
      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% Test Step 4: (dcvolts) Range all (Set Property Test Step)
      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% Valid values for the Range property.
      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% Test Step 5: (dcvolts) LowerLimit min (Set Property Test Step)
      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    % Verify that the configured value matches the expected value.
      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        % Get the current property value.
      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        % Compare to the expected value.
      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        % Post information about test step failure.
      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            % Post actual value.
      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            % Post expected value.
      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% Test Step 6: (dcvolts) NullOffsett max (Set Property Test Step)
      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% Test Step 7: (dcvolts) UpperLimit 51 (Set Property Test Step)
      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% Test Step 8: (dcvolts) Range 1 (Set Property Test Step)
      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% Test Step 9: (dcvolts)(range = 1) Resolution 1e-6 (Set Property Test Step)
      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% Test Step 10: AutoImpedence all (Set Property Test Step)
      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% Valid values for the AutoImpedance property.
      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% Test Step 11: AutoZero off (Set Property Test Step)
      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% Test Step 12: AutoZero on (Set Property Test Step)
      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% Test Step 13: AutoZero once (Set Property Test Step)
      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% Test Step 14: Bandwidth (Set Property Test Step)
      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% Valid values for the Bandwidth property.
      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% Test Step 15: set MeasurementType acvolts (Set Property Test Step)
      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% Test Step 16: (acvolts) Range all (Set Property Test Step)
      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% Test Step 17: (acvolts) LowerLimit max (Set Property Test Step)
      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% Test Step 18: (acvolts) NullOffset min (Set Property Test Step)
      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% Test Step 19: (acvolts) UpperLimit -73 (Set Property Test Step)
      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% Test Step 20: (acvolts) Range 100 (Set Property Test Step)
      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% Test Step 21: (acvolts)(range = 100) Resolution .001 (Set Property Test Step)
      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% Test Step 22: DataPointsAvailable (Get Property Test Step)
      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    % Query the property.
      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% Test Step 23: InputTerminal (Get Property Test Step)
      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% Test Step 24: PowerLineFrequency (Get Property Test Step)
      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% Test Step 25: set MeasurementType dccurrent (Set Property Test Step)
      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% Test Step 26: (dccurrent) Range 3 (Set Property Test Step)
      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% Test Step 27: (dccurrent) ApertureTime all (Set Property Test Step)
      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% Test Step 28: Range auto (Set Property Test Step)
      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% Test Step 29: SampleCount all (Set Property Test Step)
      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% Valid values for the SampleCount property.
      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% Test Step 30: AutoRange all (Set Property Test Step)
      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% Valid values for the AutoRange property.
      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% Test Step 32: (dccurrent)(range = 1) Resolution 3e-6 (Set Property Test Step)
      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% Test Step 33: set MeasurementType accurrent (Set Property Test Step)
      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% Test Step 34: (accurrent) Range 1 (Set Property Test Step)
      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% Test Step 35: Range max (Set Property Test Step)
      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% Test Step 36: Cal:Count (Get Property Test Step)
      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% Test Step 37: Cal:Enabled (Get Property Test Step)
      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% Test Step 38: Cal:Message (Set Property Test Step)
      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% Test Step 39: Cal:Message GET (Get Property Test Step)
      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% Test Step 40: un-securedevice (Function Test Step)
      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% This test step generated no code. Most likely because a
      % property or function to test was not selected.
      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% Test Step 41: updatecode (Function Test Step)
      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    % Execute the function.
      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% Test Step 42: set MeasurementType frequency (Set Property Test Step)
      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% Test Step 43: (frequency) Range all (Set Property Test Step)
      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% Test Step 44: (frequency) ApertureTime .01 (Set Property Test Step)
      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% Test Step 45: display off (Set Property Test Step)
      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% Test Step 46: display on (Set Property Test Step)
      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% Test Step 47: settext (Function Test Step)
      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% Test Step 48: clear (Function Test Step)
      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% Test Step 49: set MeasurementType period (Set Property Test Step)
      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% Test Step 50: (period) ApertureTime .1 (Set Property Test Step)
      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% Test Step 51: (period) Range all (Set Property Test Step)
      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% Test Step 52: Range min (Set Property Test Step)
      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% Test Step 53: DBMReference all (Set Property Test Step)
      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% Valid values for the DBMReference property.
      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% Test Step 54: DBReference (Set Property Test Step)
      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% Valid values for the DBReference property.
      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% Test Step 55: set MeasurementType resistance (Set Property Test Step)
      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% Test Step 56: (resistance) ApertureTime all (Set Property Test Step)
      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% Test Step 57: (resistance) Range 10,000 (Set Property Test Step)
      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% Test Step 58: (resistance)(range = 10,000) Resolution 3e-2 (Set Property Test Step)
      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% Test Step 59: Function all (Set Property Test Step)
      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% Valid values for the Function property.
      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% Test Step 60: getaverage (Function Test Step)
      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% Test Step 61: set MesurementType fresistance (Set Property Test Step)
      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% Test Step 62: (fresistance) ApertureTime all (Set Property Test Step)
      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% Test Step 63: (fresistance) Range 1e8 (Set Property Test Step)
      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% Test Step 64: (fresistance)(range = 1e8) Resolution 1e4 (Set Property Test Step)
      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% Cleanup.
      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% Post results.
      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    % An error occurred while running the test.
      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

  Method initiate
    Type: InstrumentCommand
    Line Command="Initiate:Immediate" Output="false"
    Description: INITIATE Configure the instrument to wait for a trigger.

      INVOKE(OBJ, 'initiate') configures the instrument to wait for a trigger.

      See also GETMEASUREMENT.

  Method measure
    MCode:
      function propertyValue = measure(obj)
      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
      % Get interface
      interface = get(obj,'interface');

      % Get source of trigger
      fprintf(interface,'TRIGger:SOURce?')
      triggerSource = fscanf(interface);

      % The string returns (seems) to have a carriage return at the end of it.
      % Replace it with the null string before using it
      triggerSource(length(triggerSource))='';

      % Get measurement type
      fprintf(interface,'SENSe:FUNCtion?')
      measurementType = fscanf(interface);

      % Error if the trigger source is a bus trigger
      if strcmpi(triggerSource,'BUS') == 1
          error('Invalid trigger source. Please see INITIATE and/or GETMEASUREMENT functions.')
          return
      end

      % Initiate immediately and Measure
      fprintf(interface,'INITiate:IMMediate')

      % Remove double quotes in string
      measurementType = strrep(measurementType,'"','');
      fprintf(interface,['MEASure:' measurementType '?'])

      propertyValue = fscanf(interface);
    Description: MEASURE Initiates and returns a measured value.

      INVOKE(OBJ, 'measure') initiates a measurement on the instrument and returns the measured value.

      See also GETMEASUREMENT.

Group calibration
  Description: The calibration group defines properties and functions related to instrument calibration.
  Size: 1
  Mappings ChannelMap Command="Calibration1" Index="1"

  Property Count
    Type: InstrumentCommand
    QueryCommand: CALibration:Count?
    PermissibleType: Double bounded [Max="32767.0" Min="0.0"]
    DefaultValue: 0
    ReadOnly: always
    Description: Returns number of times the instrument has been calibrated.

  Property Enabled
    Type: InstrumentCommand
    QueryCommand: CALibration:SECure:STATe?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: always
    Description: Query the secured state for calibration of the instrument.

  Property Message
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % Get the string
      fprintf(interface,'CALibration:STRing?')

      % Return it
      propertyValue = fscanf(interface);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      % Error checking.
      if ~ischar(propertyValue)
          error('MESSAGE must be a string.');
      end

      % Get interface.
      interface = get(get(obj,'parent'),'interface');

      % Write the command to instrument.
      fprintf(interface, ['CALibration:STRing "' propertyValue '"']);
    PermissibleType: String none
    ReadOnly: never
    Description: Specifies calibration information for the instrument.

  Method securedevice
    MCode:
      function securedevice(obj, calibrationCode, state)
      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% code is the code to secure the instrument

      % Get interface.
      interface = get(get(obj,'parent'),'interface');

      % Parse inputs.
      switch (nargin)
      case 1
          error('CALIBRATIONCODE must be specified.');
      case 2
          fprintf(interface,'CALibration:SECure:STATe?');
          currentState = fscanf(interface, '%g');
      case 3
          % STATE can either be 'secure' or 'unsecure'.
          if ~any(strcmpi(state, {'secure', 'unsecure'}))
              error('STATE must be either ''secure'' or ''unsecure''.');
          end

          % Translating State into the expected current state numeric value.
          if strcmpi(state, 'secure')
              currentState = 0;
          else
              currentState = 1;
          end
      otherwise
          error('Too many input arguments.');
      end

      % Error checking.
      if ~ischar(calibrationCode)
          error('CALIBRATIONCODE must be a string.');
      end

      % Unsecure or secure the instrument.
      switch (currentState)
      case 0
          % Secure.
          fprintf(interface,['CALibration:SECure:STATe ON , ' calibrationCode]);
      case 1
          % Unsecure.
          fprintf(interface,['CALibration:SECure:STATe OFF , ' calibrationCode]);
      end
    Description: SECUREDEVICE secure or unsecure the power supply for calibration

      INVOKE(OBJ, 'securedevice','code', STATE) to secure or unsecure the device. Use a STATE of ‘unsecure’ to unsecure the device before initiating the calibration process. Use a STATE of 'secure' to secure the device after the calibration process is complete.

  Method updatecode
    MCode:
      function updatecode(obj,secureCode)
      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% SecureCode is the new code.

      % Get interface.
      interface = get(get(obj,'parent'),'interface');

      % Validating the code (12-character format).
      if ~(isvarname(secureCode) && length(secureCode) <= 12)
          error(['SECURECODE must be a character string with letters, ',...
                 'digits and ' sprintf('\n') 'underscores. The first character ',...
                 'in SECURECODE must be a letter.' sprintf('\n') 'The maximum length is 12 characters.']);
      end

      % Verifying that the device is unsecured before changing the code.
      fprintf(interface,'CALibration:SECure:STATe?')
      state = fscanf(interface,'%g');

      if (state == 1)
          error(['The device must be unsecured before changing the code.' sprintf('\n'),...
              'Type ''instrhelp(obj, ''securedevice'')'' for more information on how ' sprintf('\n'),...
              'to unsecure the device.']);
          return
      end

      % Set the secure code to the new code.
      fprintf(interface,['CALibration:SECure:CODE ' secureCode])
    Description: UPDATECODE Change the security code.

      INVOKE(OBJ, 'updatecode' NEWCODE) updates the calibration security code.  The instrument must first be unsecured using the current security code.

      See also SECUREDEVICE

Group display
  Description: Define the behavior of the instrument front panel display.
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: DISPlay
    QueryCommand: DISPlay?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Set the state of the front panel display.

  Method clear
    Type: InstrumentCommand
    Line Command="DISPlay:TEXT:CLEar" Output="false"
    Description: CLEAR Clear the message displayed on the front panel.

      INVOKE(OBJ, 'clear') removes any message displayed on the instrument front panel.

      See also SETTEXT

  Method settext
    MCode:
      function settext(obj,str)
      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% str is the string to display

      % Error checking.
      if ~ischar(str)
          error('STR must be a string.');
      end

      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % Write the command to instrument.
      fprintf(interface, ['Display:Text "' str '"']);
    Description: SETTEXT Set the string displayed on the instrument front panel.

      INVOKE(OBJ, 'displaytext', S) displays string, S, on the instrument's front panel.
      The Display group's Enable property must be on for the text to be visible.

      See also CLEAR.

Group math
  Size: 1
  Mappings ChannelMap Command="math1" Index="1"

  Property DBMReference
    Type: InstrumentCommand
    ConfigureCommand: Calculate:DBM:Reference
    QueryCommand: Calculate:DBM:Reference?
    PermissibleType: String enum [min=MIN, max=MAX]
    PermissibleType: Double enum [50.0, 75.0, 93.0, 110.0, 124.0, 135.0, 150.0, 250.0, 300.0, 500.0, 600.0, 800.0, 900.0, 1000.0, 1200.0, 8000.0]
    DefaultValue: 50
    ReadOnly: never
    Description: Set or query the dBm reference value.

  Property DBReference
    Type: InstrumentCommand
    ConfigureCommand: Calculate:DB:Reference
    QueryCommand: Calculate:DB:Reference?
    PermissibleType: String enum [min=MIN, max=MAX]
    PermissibleType: Double bounded [Max="200.0" Min="-200.0"]
    DefaultValue: -200
    ReadOnly: never
    Description: Set or query the relative value in the db Relative Register.

  Property Function
    Type: InstrumentCommand
    ConfigureCommand: Calculate:Function
    QueryCommand: Calculate:Function?
    PermissibleType: String enum [null=NULL, db=DB, dbm=DBM, average=AVER, limit=LIM]
    DefaultValue: Null
    ReadOnly: never
    Description: Set or query the math function

  Property LowerLimit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the device
      device = get(obj,'Parent');

      %get interface
      interface = get(device,'Interface');

      %ask for the value
      fprintf(interface,'CALC:LIM:LOW?');

      %read and return the value
      propertyValue = eval(fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      %get interface
      interface = get(device,'Interface');

      %need to do some checking if propertyValue is a double
      if ~ischar(propertyValue)

      	%ask for the MeasurementType
      	fprintf(interface, 'FUNCtion?');

      	%read the value for MeasurementType
      	measurementType = fscanf(interface);

      	%remove trailing character
      	measurementType(length(measurementType))= '';

      	%list of all recognized MeasurementType values
      	mts = {'"volt"' , '"volt:ac"' , '"curr"' , '"curr:ac"' , '"freq"' ,...
      		'"per"' '"res"' , '"fres"' , '"diod"'};

      	%Create matrix of possible allowable values:
      	% row corresponds to measurementType, in same order as in 'mts' (above)
      	% first column is the minimum allowable value for propertyValue with the
      	% corresponding MeasurementType value. Second column is the maximum allowed
      	allowableValues = zeros(10,2);

      	allowableValues(1,:) = [-1200,1200];	%dcvolt
      	allowableValues(2,:) = [-1200,1200];	%acvolt
      	allowableValues(3,:) = [-3.6,3.6];		%dccurrent
      	allowableValues(4,:) = [-3.6,3.6];		%accurrent
      	allowableValues(5,:) = [-1.2e6,1.2e6];	%frequency
      	allowableValues(6,:) = [-1.2,1.2];		%period
      	allowableValues(7,:) = [-1.2e8,1.2e8];	%resistance
      	allowableValues(8,:) = [-1.2e8,1.2e8];	%fresistance
      	allowableValues(9,:) = [0,0];			%diode
      	allowableValues(10,:) = [0,0];			%continuity

      	%the index of the current MeasurementType in 'mts'
      	tindex = -1;

      	%find the index of the current MeasurementType in 'mts'
      	for t = 1:length(mts);
      		if strcmpi( char(mts(t)) , measurementType )
      			tindex = t;
      			break;
      		end%if
      	end%for t

      	%if it wasn't found, tindex will still be -1
      	if tindex == -1
      		error('Unrecognized value for MeasurementType');
      	end%if

      	%min and max allowable values are in the row of 'allowableValues' at tindex
      	allowed  = allowableValues(tindex,:);

      	%mininum is in the first column
      	mn = allowed(1);

      	%maximum is in the second column
      	mx = allowed(2);

      	%propertyValue must be from mn to mx (inclusive)
      	% If it isn't, throw and error
      	if propertyValue < mn | propertyValue > mx

      		error(['Invalid value for ',propertyName,...
      			' with current MeasurementType (',get(device,'MeasurementType'),...
      			'). Valid values: min',...
      			', max or a double between ',num2str(mn),' and ',...
      			num2str(mx)]);

      	else

      		%convert to string
      		propertyValue = num2str(propertyValue);
      	end%if/else

      end%if ~ischar(propertyValue)

      %set the value
      fprintf(interface,['CALC:LIM:LOW ',propertyValue]);
    PermissibleType: String enum [max=max, min=min]
    PermissibleType: Double bounded [Max="1200.0" Min="-1200.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the lower limit for limit testing.

  Property NullOffset
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the device
      device = get(obj,'Parent');

      %get interface
      interface = get(device,'Interface');

      %ask for the value
      fprintf(interface,'CALC:NULL:OFFSET?');

      %read and return the value
      propertyValue = eval(fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      %get interface
      interface = get(device,'Interface');

      %need to do some checking if propertyValue is a double
      if ~ischar(propertyValue)

      	%ask for the MeasurementType
      	fprintf(interface, 'FUNCtion?');

      	%read the value for MeasurementType
      	measurementType = fscanf(interface);

      	%remove trailing character
      	measurementType(length(measurementType))= '';

      	%list of all recognized MeasurementType values
      	mts = {'"volt"' , '"volt:ac"' , '"curr"' , '"curr:ac"' , '"freq"' ,...
      		'"per"' '"res"' , '"fres"' , '"diod"'};

      	%Create matrix of possible allowable values:
      	% row corresponds to measurementType, in same order as in 'mts' (above)
      	% first column is the minimum allowable value for propertyValue with the
      	% corresponding MeasurementType value. Second column is the maximum allowed
      	allowableValues = zeros(10,2);

      	allowableValues(1,:) = [-1200,1200];	%dcvolt
      	allowableValues(2,:) = [-1200,1200];	%acvolt
      	allowableValues(3,:) = [-3.6,3.6];		%dccurrent
      	allowableValues(4,:) = [-3.6,3.6];		%accurrent
      	allowableValues(5,:) = [-1.2e6,1.2e6];	%frequency
      	allowableValues(6,:) = [-1.2,1.2];		%period
      	allowableValues(7,:) = [-1.2e8,1.2e8];	%resistance
      	allowableValues(8,:) = [-1.2e8,1.2e8];	%fresistance
      	allowableValues(9,:) = [0,0];			%diode
      	allowableValues(10,:) = [0,0];			%continuity

      	%the index of the current MeasurementType in 'mts'
      	tindex = -1;

      	%find the index of the current MeasurementType in 'mts'
      	for t = 1:length(mts);
      		if strcmpi( char(mts(t)) , measurementType )
      			tindex = t;
      			break;
      		end%if
      	end%for t

      	%if it wasn't found, tindex will still be -1
      	if tindex == -1
      		error('Unrecognized value for MeasurementType');
      	end%if

      	%min and max allowable values are in the row of 'allowableValues' at tindex
      	allowed  = allowableValues(tindex,:);

      	%mininum is in the first column
      	mn = allowed(1);

      	%maximum is in the second column
      	mx = allowed(2);

      	%propertyValue must be from mn to mx (inclusive)
      	% If it isn't, throw and error
      	if propertyValue < mn | propertyValue > mx

      		error(['That value is not allowed for property ',propertyName,...
      			' with current MeasurementType (',get(device,'MeasurementType'),...
      			'). Allowed values are ''min''',...
      			', ''max'', or a double between ',num2str(mn),' and ',...
      			num2str(mx), ' (inclusive)']);

      	else

      		%convert to string
      		propertyValue = num2str(propertyValue);
      	end%if/else

      end%if ~ischar(propertyValue)

      %set the value
      fprintf(interface,['CALC:NULL:OFFSET ',propertyValue]);
    PermissibleType: String enum [max=max, min=min]
    PermissibleType: Double bounded [Max="1.2E8" Min="-1.2E8"]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query a null value in the multimeter's null register.

  Property UpperLimit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the device
      device = get(obj,'Parent');

      %get interface
      interface = get(device,'Interface');

      %ask for the value
      fprintf(interface,'CALC:LIM:UPP?');

      %read and return the value
      propertyValue = eval(fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      %get interface
      interface = get(device,'Interface');

      %need to do some checking if propertyValue is a double
      if ~ischar(propertyValue)

      	%ask for the MeasurementType
      	fprintf(interface, 'FUNCtion?');

      	%read the value for MeasurementType
      	measurementType = fscanf(interface);

      	%remove trailing character
      	measurementType(length(measurementType))= '';

      	%list of all recognized MeasurementType values
      	mts = {'"volt"' , '"volt:ac"' , '"curr"' , '"curr:ac"' , '"freq"' ,...
      		'"per"' '"res"' , '"fres"' , '"diod"'};

      	%Create matrix of possible allowable values:
      	% row corresponds to measurementType, in same order as in 'mts' (above)
      	% first column is the minimum allowable value for propertyValue with the
      	% corresponding MeasurementType value. Second column is the maximum allowed
      	allowableValues = zeros(10,2);

      	allowableValues(1,:) = [-1200,1200];	%dcvolt
      	allowableValues(2,:) = [-1200,1200];	%acvolt
      	allowableValues(3,:) = [-3.6,3.6];		%dccurrent
      	allowableValues(4,:) = [-3.6,3.6];		%accurrent
      	allowableValues(5,:) = [-1.2e6,1.2e6];	%frequency
      	allowableValues(6,:) = [-1.2,1.2];		%period
      	allowableValues(7,:) = [-1.2e8,1.2e8];	%resistance
      	allowableValues(8,:) = [-1.2e8,1.2e8];	%fresistance
      	allowableValues(9,:) = [0,0];			%diode
      	allowableValues(10,:) = [0,0];			%continuity

      	%the index of the current MeasurementType in 'mts'
      	tindex = -1;

      	%find the index of the current MeasurementType in 'mts'
      	for t = 1:length(mts);
      		if strcmpi( char(mts(t)) , measurementType )
      			tindex = t;
      			break;
      		end%if
      	end%for t

      	%if it wasn't found, tindex will still be -1
      	if tindex == -1
      		error('Unrecognized value for MeasurementType');
      	end%if

      	%min and max allowable values are in the row of 'allowableValues' at tindex
      	allowed  = allowableValues(tindex,:);

      	%mininum is in the first column
      	mn = allowed(1);

      	%maximum is in the second column
      	mx = allowed(2);

      	%propertyValue must be from mn to mx (inclusive)
      	% If it isn't, throw and error
      	if propertyValue < mn | propertyValue > mx

      		error(['That value is not allowed for property ',propertyName,...
      			' with current MeasurementType (',get(device,'MeasurementType'),...
      			'). Allowed values are ''min''',...
      			', ''max'', or a double between ',num2str(mn),' and ',...
      			num2str(mx), ' (inclusive)']);

      	else

      		%convert to string
      		propertyValue = num2str(propertyValue);
      	end%if/else

      end%if ~ischar(propertyValue)

      %set the value
      fprintf(interface,['CALC:LIM:UPP ',propertyValue]);
    PermissibleType: String enum [max=max, min=min]
    PermissibleType: Double bounded [Max="1.2E8" Min="-1.2E8"]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the upper limit for limit testing.

  Method getaverage
    MCode:
      function varargout = getaverage(obj)
      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
      % Error checking.
      if (nargout > 4)
          error('Too many output arguments.')
      end

      % Get the interface.
      interface = get(get(obj,'parent'),'interface');

      % Get the minimum.
      if (nargout >= 0)
          fprintf(interface,'CALCulate:AVERage:MINimum?')
          varargout{1}= fscanf(interface,'%f');
      end

      % Get the maximum.
      if (nargout >= 2)
          fprintf(interface,'CALCulate:AVERage:MAXimum?')
          varargout{2} = fscanf(interface,'%f');
      end

      % Get the average.
      if (nargout >= 3)
          fprintf(interface,'CALCulate:AVERage:AVERage?')
          varargout{3} = fscanf(interface,'%f');
      end

      % Get the count.
      if (nargout >= 4)
          fprintf(interface,'CALCulate:AVERage:COUNT?')
          varargout{4} = fscanf(interface,'%f');
      end
    Description: GETAVERAGE Return statistical information.

      [MINVALUE, MAXVALUE, AVERAGEVALUE, COUNT] = INVOKE(OBJ, 'getaverage') returns an array containing the minimum, maximum, average and count of min-max operation respectively.

Group system
  Description: General instrument system functionality.
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Property Version
    Type: InstrumentCommand
    QueryCommand: SYST:VERS?
    PermissibleType: String none
    ReadOnly: always
    Description: Returns the SCPI version of the instrument.

  Method beep
    Type: InstrumentCommand
    Line Command="SYSTem:BEEPer" Output="false"
    Description: BEEP Issue a beep.

      INVOKE(OBJ, 'beep') issues a beep from the instrument.

  Method disablelocalcontrols
    MCode:
      function disablelocalcontrols(obj)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Get the System interface
      fprintf(interface,'SYSTem:INTerface?');
      systemInterface =fscanf(interface);

      % If the interface is not RS232, generate an error
      if (strfind(systemInterface,'RS232')~= 1)
          error('Must be in RS232 Interface to use this function');
          return
      end

      % Otherewise send appropriate command
      fprintf(interface,'SYSTem:RWLock');
    Description: DISABLELOCALCONTROLS Disable all front-panel buttons and knobs.

      INVOKE(OBJ, 'disablelocalcontrols') 'unlocks' all front-panel keys and knobs. Valid for RS-232 mode only.

  Method enablelocalcontrols
    MCode:
      function enablelocalcontrols(obj)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Get the (remote) system interface
      fprintf(interface,'SYSTem:INTerface?');
      systemInterface = fscanf(interface);

      % If the interface is not RS232, generate an error
      if (strfind(systemInterface,'RS232')~= 1)
          error('Must be in RS232 interface to use this function');
          return
      end

      % Otherewise send appropriate command
      fprintf(interface,'SYSTem:LOCal');
    Description: ENABLELOCALCONTROLS Enable all front-panel buttons and knobs.

      INVOKE(OBJ, 'enablelocalcontrols') 'locks' all front-panel keys and knobs. Valid for RS-232 mode only.

Group trigger
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

  Property AutoDelay
    Type: InstrumentCommand
    ConfigureCommand: TRIGger:DELay:AUTO
    QueryCommand: TRIGger:DELay:AUTO?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Enables or disables the automatic trigger delay. The delay is determined by function range, integration time and ac filter setting.

  Property Count
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Count
    QueryCommand: Trigger:Count?
    PermissibleType: Double bounded [Max="50000.0" Min="1.0"]
    PermissibleType: String enum [min=MIN, max=MAX, infinity=INF]
    DefaultValue: 1
    ReadOnly: never
    Description: Set or query the number of readings per trigger.

  Property Delay
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Delay
    QueryCommand: Trigger:Delay?
    PermissibleType: Double bounded [Max="3600.0" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Set or query a trigger delay.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Source
    QueryCommand: Trigger:Source?
    PermissibleType: String enum [bus=BUS, immediate=IMM, external=EXT]
    DefaultValue: immediate
    ReadOnly: never
    Description: Set or query the instrument trigger source.

  Method trigger
    Type: InstrumentCommand
    Line Command="*TRG" Output="false"
    Description: TRIGGER Send a software trigger.

      INVOKE(OBJ, 'trigger') sends a software trigger to the instrument connected to device object.

      See also INITIATE.
