MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\agilent_e3648a.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: Agilent
InstrumentModel: E3648A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property TrackEnabled
    Type: InstrumentCommand
    ConfigureCommand: OUTPut:TRACK:STATe
    QueryCommand: OUTPut:TRACK:STATe?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: off
    ReadOnly: never
    Description: Enables or disables the power supply track mode.

      The device provides tracking outputs. In the track mode, two voltages of the output1 and the output2 supplies track each other within the voltage programming accuracy. The track mode is always off state when the power supply is turned off or after a remote interface reset.

  Method drivertest
    MCode:
      function varargout = drivertest(obj)
      %   AGILENT_E3648A_MIDTEST01 Code for testing a MATLAB instrument driver.
      %
      %   This is the machine generated code that tests a MATLAB instrument driver,
      %
      %   The test consists of multiple test steps that can test the MATLAB instrument
      %   drivers functions and properties.
      %
      %   The test code was generated with the MIDTEST GUI. For more information
      %   on MIDTEST, type 'instrhelp midtest' at the MATLAB command prompt.
      %
      %
      %   See also ICDEVICE, MIDTEST.
      %

      %   Creation time: 17-Feb-2004 15:22:47

      % Wrap entire test in try catch.
      try
      fprintf('Test: agilent_e3648a dc power supply full driver test\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      noErrorMsg             = '+0,"No error"';
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;
      deviceObj              = obj;

      % Test Step 1: Reset(1) (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          devicereset(deviceObj);

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf(result);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.');
          fprintf(lasterr);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 2: error (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          [message] = geterror(deviceObj);

          % Store the result so that it can be returned.
          varargout = {varargout{:}, message};

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf(result);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.');
          fprintf(lasterr);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 3: setTrackEnabled (Set Property Test Step)
      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    % Configure the property.
      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    % Check if instrument error occurred.
      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% Post information about error if one occurred.
      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    % Verify that the configured value matches the expected value.
      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        % Get the current property value.
      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        % Compare to the expected value.
      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        % Post information about test step failure.
      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            % Post actual value.
      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            % Post expected value.
      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    % A MATLAB error occurred.
      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    % Post information about error.
      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% Post message indicating if test step passed.
      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% Test Step 4: set TrackEnabled (Set Property Test Step)
      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% Test Step 5: get model (Get Property Test Step)
      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    % Query the property.
      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    % Store the result so that it can be returned.
      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% Test Step 6: Turn on outputon (Set Property Test Step)
      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% Test Step 7: Turn off over volt protection (Set Property Test Step)
      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% Test Step 8: measure voltage (Function Test Step)
      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    % Execute the function.
      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% Test Step 9: measure current (Function Test Step)
      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% Test Step 10: self test (Function Test Step)
      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% Test Step 11: get Count (Get Property Test Step)
      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% Test Step 12: get Cal state (Get Property Test Step)
      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% Test Step 13: calibrate voltage protection (Function Test Step)
      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% This test step generated no code. Most likely because a
      % property or function to test was not selected.
      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% Test Step 14: set message 01 (Set Property Test Step)
      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% Test Step 15: get message 01 (Get Property Test Step)
      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% Verify that the queried value matches the expected value.
      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% Test Step 22: secure device (Function Test Step)
      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% Test Step 23: unsecure device (Function Test Step)
      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% Test Step 24: change code (Function Test Step)
      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% Test Step 25: resecure device (Function Test Step)
      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% Test Step 26: reunsecure device (Function Test Step)
      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% Test Step 27: change code back (Function Test Step)
      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% Test Step 28: enable enabled display (Set Property Test Step)
      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% Test Step 29: get display enabled? (Get Property Test Step)
      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% Test Step 30: disable display (Set Property Test Step)
      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% Test Step 32: re-enable display (Set Property Test Step)
      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% Test Step 33: set disp mode VV (Set Property Test Step)
      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% Test Step 34: get disp mode VV (Get Property Test Step)
      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% Test Step 35: set disp mode VI (Set Property Test Step)
      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% Test Step 36: get disp mode VI (Get Property Test Step)
      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% Test Step 37: set disp mode II (Set Property Test Step)
      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% Test Step 38: get disp mode II (Get Property Test Step)
      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% Test Step 39: set CurrentLimit min (Set Property Test Step)
      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% Test Step 40: get CurrentLimit (Get Property Test Step)
      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% Test Step 41: set CurrentLimit max (Set Property Test Step)
      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% Test Step 43: set CurrentLimit 1 (Set Property Test Step)
      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% Test Step 44: setCurrentLimit 2.65 (Set Property Test Step)
      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% Test Step 45: setCurrentLimit PI (Set Property Test Step)
      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% Test Step 46: set CurrentStep .5 (Set Property Test Step)
      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% Test Step 47: set CurrentLimit down (Set Property Test Step)
      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% Test Step 48: set CurrentStep def (Set Property Test Step)
      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% Test Step 49: get CurrentStep def (Get Property Test Step)
      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% Test Step 53: setCurrentLimit up (Set Property Test Step)
      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% Test Step 54: set voltage 0 (Set Property Test Step)
      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% Test Step 55: enable OverVoltageProtection (Set Property Test Step)
      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% Test Step 56: set OverVoltageProtectionLimitALL (Set Property Test Step)
      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% Overall error status for all settings.
      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% Valid values for the OverVoltageProtectionLimit property.
      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% Test all supported values.
      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% Test Step 57: disable OverVoltageProtection (Set Property Test Step)
      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% Test Step 61: set OverVoltageProtectionLimit 2 (Set Property Test Step)
      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% Test Step 62: enable Output (Set Property Test Step)
      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% Test Step 63: get Output state on (Get Property Test Step)
      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% Test Step 64: disable output (Set Property Test Step)
      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% Test Step 65: get Output state off (Get Property Test Step)
      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% Test Step 68: get Output state tripped (Get Property Test Step)
      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% Test Step 69: reset (Function Test Step)
      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% Test Step 70: set VoltageProt Hgih (Set Property Test Step)
      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% Test Step 71: disable volt protection (Set Property Test Step)
      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% Test Step 72: turn on output (Set Property Test Step)
      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% Test Step 73: TriggerCurrentLimit (1) (Set Property Test Step)
      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% Test Step 74: TriggerVoltageLevel (1) (Set Property Test Step)
      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% Test Step 76: TriggerVoltageLevel(2) (Set Property Test Step)
      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% Test Step 77: TriggerSource (Set Property Test Step)
      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% Test Step 78: TriggerCoupling on (Set Property Test Step)
      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% Test Step 79: Trigger (Function Test Step)
      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% Test Step 80: set TriggerDelay (Set Property Test Step)
      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% Valid values for the TriggerDelay property.
      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% Test Step 81: set text 01 (Function Test Step)
      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% Test Step 84: clear text (Function Test Step)
      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% Test Step 85: set Volt Range low (Set Property Test Step)
      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% Test Step 86: set Volt min (Set Property Test Step)
      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% Test Step 87: set Volt max (Set Property Test Step)
      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% Test Step 88: set Volt step 8.24 (Set Property Test Step)
      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% Test Step 89: set Volt down (Set Property Test Step)
      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% Test Step 90: set Volt up (Set Property Test Step)
      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% Test Step 91: setVolt Range p8v (Set Property Test Step)
      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% Test Step 92: set Volt Range high (Set Property Test Step)
      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% Test Step 94: set Volt Max (Set Property Test Step)
      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% Test Step 98: set Volt Range p20v (Set Property Test Step)
      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% Test Step 99: set Volt Range 8pv (Set Property Test Step)
      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% Test Step 100: set current step default (Set Property Test Step)
      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% Test Step 101: set volt step .5 (Set Property Test Step)
      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% Test Step 102: increasecurrent (Function Test Step)
      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% Test Step 103: set volt down (Set Property Test Step)
      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% Test Step 104: increase volt (Function Test Step)
      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% Test Step 105: decrease current (Function Test Step)
      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% Test Step 106: decrease volt (Function Test Step)
      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% Test Step 107: disable output (Function Test Step)
      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% Test Step 108: enable output (Function Test Step)
      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% Test Step 109: re-enable output (Function Test Step)
      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% Test Step 110: reset volt protection (Function Test Step)
      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% Test Step 111: get version (Get Property Test Step)
      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% Test Step 112: save state 1 (Function Test Step)
      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% Test Step 117: load state 1 (Function Test Step)
      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% Test Step 122: range = p8v (Set Property Test Step)
      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% Test Step 123: TriggerVolt Level min (Set Property Test Step)
      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% Test Step 124: TriggerVolt Level max (Set Property Test Step)
      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% Test Step 125: TriggerVolt Level 1 (Set Property Test Step)
      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% Test Step 126: Trigger Volt Level min (Set Property Test Step)
      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% Test Step 127: Trigger Volt Level Max (Set Property Test Step)
      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% Test Step 128: Trigger Volt Level 1 (Set Property Test Step)
      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% Test Step 131: error check (Function Test Step)
      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% Test Step 132: beep! (Function Test Step)
      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% Cleanup.
      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% Post results.
      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    % An error occurred while running the test.
      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
    Description: Test the driver to make sure it works properly.

  Method measure
    Type: InstrumentCommand
    Line Command="Measure:Scalar:<type>:DC?" Format="text" Output="true" ReadOutputAs="ASCII"
    Input: type
    Description: MEASURE Measure the voltage or current of output signal.

      OUT = INVOKE(OBJ, 'measure', 'TYPE') measures the voltage or current of the output signal of the instrument connected to device object, OBJ and returns value to OUT. If TYPE is 'voltage', the voltage is measured. If TYPE is 'current', the current is measured.

  Method trigger
    Type: InstrumentCommand
    Line Command="INIT:IMM" Output="false"
    Line Command="*TRG" Output="false"
    Description: TRIGGER Send a software trigger.

      INVOKE(OBJ, 'trigger') sends a software trigger to the instrument connected to device object.

Group calibration
  Description: The calibration group defines properties and functions related to instrument calibration.
  Size: 1
  Mappings ChannelMap Command="Calibration1" Index="1"

  Property Count
    Type: InstrumentCommand
    QueryCommand: CAL:COUN?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns number of times the instrument has been calibrated.

  Property Enabled
    Type: InstrumentCommand
    QueryCommand: CAL:SEC:STAT?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: always
    Description: Query the secured state for calibration of the instrument.

  Property Message
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % Ask for the string
      fprintf(interface,'CALibration:STRing?')

      % Pluck the string
      propertyValue = fscanf(interface);

      % Trim the trailing character (a non-printing char such as \n)
      %	and send it packing
      propertyValue(length(propertyValue)) = '';
    SetMCode:
      function set(obj,propertyName, propertyValue)

      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
      %Error checking.
      if ~ischar(propertyValue)
      	error('MESSAGE must be a string.');
      end

      %Warning
      if length(propertyValue) > 40
      	warning('ICDevice:longmessage',...
      		'Your message may only be 40 characters, and will be truncated');
      end

      %Get interface
      interface = get(get(obj,'parent'),'interface');

      %Write command to instrument
      fprintf(interface,['CAL:STR "' propertyValue '"']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies calibration information for the instrument.

  Method calibratecurrent
    MCode:
      function calibratecurrent(obj,minData,midData,maxData)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %set the min data
      fprintf(interface,'CAL:CURR:LEV MIN');
      fprintf(interface,'CAL:CURR:DATA ',num2str(minData)');

      %set the mid data
      fprintf(interface,'CAL:CURR:LEV MID');
      fprintf(interface,'CAL:CURR:DATA ',num2str(midData)');

      %set the max data
      fprintf(interface,'CAL:CURR:LEV Max');
      fprintf(interface,'CAL:CURR:DATA ',num2str(maxData)');

  Method calibratevoltage
    MCode:
      function calibratecurrent(obj,minData,midData,maxData)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %set the min data
      fprintf(interface,'CAL:VOLT:LEV MIN');
      fprintf(interface,'CAL:VOLT:DATA ',num2str(minData)');

      %set the mid data
      fprintf(interface,'CAL:VOLT:LEV MID');
      fprintf(interface,'CAL:VOLT:DATA ',num2str(midData)');

      %set the max data
      fprintf(interface,'CAL:VOLT:LEV MAX');
      fprintf(interface,'CAL:VOLT:DATA ',num2str(maxData)');

  Method calibratevoltageprotection
    Type: InstrumentCommand
    Line Command="CAL:VOLT:PROT" Output="false"
    Description: CALIBRATEVOLTAGEPROTECTION Calibrate the overvoltage protection circuit of the power supply.

  Method securedevice
    MCode:
      function securedevice(obj, calibrationCode, state)
      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% code is the code to secure the instrument

      %Get parent of object
      parent = get(obj,'parent');

      % Get interface.
      interface = get(parent,'interface');

      % Parse inputs.
      switch (nargin)
      case 1
          error('CALIBRATIONCODE must be specified.');
      case 2
          fprintf(interface,'CALibration:SECure:STATe?');
          currentState = fscanf(interface, '%g');
      case 3
          % STATE can either be 'secure' or 'unsecure'.
          if ~any(strcmpi(state, {'secure', 'unsecure'}))
              error('STATE must be either ''secure'' or ''unsecure''.');
          end

          % Translating State into the expected current state numeric value.
          if strcmpi(state, 'secure')
              currentState = 0;
          else
              currentState = 1;
          end
      otherwise
          error('Too many input arguments.');
      end

      % Error checking.
      if ~ischar(calibrationCode)
          error('CALIBRATIONCODE must be a string.');
      end

      % Unsecure or secure the instrument.
      switch (currentState)
      case 0
          % Secure.
          fprintf(interface,['CALibration:SECure:STATe ON, "' calibrationCode '"']);
      case 1
          % Unsecure.
          fprintf(interface,['CALibration:SECure:STATe OFF, "' calibrationCode '"']);
      end
    Description: SECUREDEVICE secure or unsecure the power supply for calibration

      INVOKE(OBJ, 'securedevice','code', STATE) to secure or unsecure the device. Use a STATE of ‘unsecure’ to unsecure the device before initiating the calibration process. Use a STATE of 'secure' to secure the device after the calibration process is complete.

  Method updatecode
    MCode:
      function updatecode(obj,secureCode)
      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% SecureCode is the new code.

      %Get the parent
      parent = get(obj,'parent');

      % Get the interface.
      interface = get(parent,'interface');

      % Validating the code (12-character format).
      if ~(isvarname(secureCode) && length(secureCode) <= 12)
          error(['SECURECODE must be a character string with letters, ',...
                 'digits and ' sprintf('\n') 'underscores. The first character ',...
                 'in SECURECODE must be a letter.' sprintf('\n') 'The maximum length is 12 characters.']);
      end

      % Verifying that the device is unsecured before changing the code.
      fprintf(interface,'CALibration:SECure:STATe?')
      state = fscanf(interface,'%g');

      if (state == 1)
          error(['The device must be unsecured before changing the code.' sprintf('\n'),...
              'Type ''instrhelp(obj, ''securedevice'')'' for more information on how ' sprintf('\n'),...
              'to unsecure the device.']);
          return
      end

      % Set the secure code to the new code.
      fprintf(interface,['CALibration:SECure:CODE "' secureCode '"'])
    Description: UPDATECODE Change the security code.

      INVOKE(OBJ, 'updatecode' NEWCODE) updates the calibration security code.  The instrument must first be unsecured using the current security code.

      See also SECUREDEVICE

Group display
  Description: Define the behavior of the instrument front panel display.
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: DISP
    QueryCommand: DISP?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Set the state of the front panel display.

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: DISP:MODE
    QueryCommand: DISP:MODE?
    PermissibleType: String enum [voltage-voltage=VV, voltage-current=VI, current-current=II]
    DefaultValue: voltage-voltage
    ReadOnly: never
    Description: Set the front panel display mode. Valid values are:

      voltage-voltage         display the voltages of the two outputs
      voltage-current         display the voltage and current for each output
      current-current         display the currents of the two outputs

  Method clear
    Type: InstrumentCommand
    Line Command="DISP:TEXT:CLE" Output="false"
    Description: CLEAR Clear the message displayed on the front panel.

      INVOKE(OBJ, 'clear') removes any message displayed on the instrument front panel.

      See also SETTEXT

  Method settext
    MCode:
      function setText(obj,str)
      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% str is the string to display

      %get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(str)
          error('STR must be a string.');
      end

      % Write the command to instrument.
      fprintf(interface, ['Display:Text "' str '"']);
    Description: SETTEXT Set the string displayed on the instrument front panel.

      INVOKE(OBJ, 'displaytext', S) displays string, S, on the instrument's front panel.
      The Display group's Enable property must be on for the text to be visible.

      See also CLEAR.

Group output
  Description: Define the behavior and state of the outputs.
  Command: INSTRument:NSELect  <ID>
  Size: 2
  Mappings
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property CurrentLimit
    Type: InstrumentCommand
    ConfigureCommand: Source:Current:Level:Immediate:Amplitude
    QueryCommand: Source:Current:Level:Immediate:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p8v [Max="5.15" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p20v [Max="2.575" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX, up=UP, down=DOWN]
    DefaultValue: 5
    ReadOnly: never
    Description: Set and query the value of the output current limit.

  Property CurrentStep
    Type: InstrumentCommand
    ConfigureCommand: CURRent:STEP
    QueryCommand: CURRent:STEP?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p8v [Max="5.15" Min="9.57505E-5"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p20v [Max="2.575" Min="9.57505E-5"]
    PermissibleType: String enum [default=DEF]
    DefaultValue: default
    ReadOnly: never
    Description: Set and query the step size used with the increasecurrent and decreasecurrent functions.

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: Output:State
    QueryCommand: Output:State?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Set and query the state of the output.

  Property OverVoltageProtectionEnabled
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Protection:State
    QueryCommand: Source:Voltage:Protection:State?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Set and query the state of the over voltage protection feature.

  Property OverVoltageProtectionLimit
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Protection:Level
    QueryCommand: Source:Voltage:Protection:Level?
    PermissibleType: Double bounded [Max="22.0" Min="1.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 22.0
    ReadOnly: never
    Description: Set and query the over voltage protection limit.

  Property State
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      fprintf(interface,'VOLTage:PROTection:TRIPped?');
      state = fscanf(interface);

      % If the over voltage protection is tripped, return 'tripped'
      if strncmp(state ,'1',1)
          propertyValue = 'tripped';
      else
      % Otherwise return state of output
       fprintf(interface,'OUTPut:STATe?')
       state = fscanf(interface);
       if strncmp(state, '1',1)
      	 propertyValue = 'on';
       elseif strncmp(state, '0',1);
      	 propertyValue = 'off';
       else
      	 error(['Unknown value returned by device. Accepted values for'...
      		 ' State property are ''tripped'',''on'', and ''off''']);
       end

      end
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    PermissibleType: String enum [tripped=tripped, on=on, off=off]
    DefaultValue: tripped
    ReadOnly: always
    Description: Returns whether the voltage protection is tripped.

  Property TriggerCoupling
    Type: InstrumentCommand
    ConfigureCommand: inst:coup:trig
    QueryCommand: inst:coup:trig?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: Off
    ReadOnly: never
    Description: Enable or disable the coupling between two outputs.

      The COUPLE command consists of an optional subsystem node followed by signal parameter. The only valid parameter for the subsystem node is the trigger subsystem. If no node follows the couple command, trigger subsystem is assumed to be couple.

      The outputs of the power supply are considered as two logical instruments. The instrument commands provide a mechanism to identify and select an output. When one output is selected, the other one is unavailable for programming until selected.

  Property TriggerCurrentLimit
    Type: InstrumentCommand
    ConfigureCommand: Source:Current:Level:Triggered:Amplitude
    QueryCommand: Source:Current:Level:Triggered:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p8v [Max="5.15" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p20v [Max="2.575" Min="0.0"]
    PermissibleType: String enum [max=MAX, min=MIN]
    DefaultValue: 5
    ReadOnly: never
    Description: Set or query the trigger output current limit.

  Property TriggerDelay
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Sequence:Delay
    QueryCommand: Trigger:Sequence:Delay?
    PermissibleType: Double bounded [Max="3600.0" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the time delay between the detection of the trigger and the start of output.

  Property TriggerSource
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Source
    QueryCommand: Trigger:Source?
    PermissibleType: String enum [bus=BUS, immediate=IMM]
    DefaultValue: bus
    ReadOnly: never
    Description: Set or query the trigger source.

  Property TriggerVoltageLevel
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Level:Triggered:Amplitude
    QueryCommand: Source:Voltage:Level:Triggered:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p8v [Max="8.24" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p20v [Max="20.6" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the trigger output voltage level.

  Property VoltageLevel
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Level:Immediate:Amplitude
    QueryCommand: Source:Voltage:Level:Immediate:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p8v [Max="8.24" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p20v [Max="20.6" Min="0.0"]
    PermissibleType: String enum [max=MAX, min=MIN, up=UP, down=DOWN]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the output voltage level.

  Property VoltageOutputRange
    Type: InstrumentCommand
    ConfigureCommand: Voltage:Range
    QueryCommand: Voltage:Range?
    PermissibleType: String enum [low=LOW, high=HIGH, p8v=p8v, p20v=p20v]
    DefaultValue: low
    ReadOnly: never
    Description: Set or query the voltage output range.

  Property VoltageStep
    Type: InstrumentCommand
    ConfigureCommand: Voltage:Step
    QueryCommand: Voltage:Step?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p8v [Max="8.24" Min="9.57505E-5"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p20v [Max="20.6" Min="9.57505E-5"]
    PermissibleType: String enum [default=DEF]
    DefaultValue: default
    ReadOnly: never
    Description: Set and query the step size used with the increasevoltage and decreasevoltage functions.

  Method decreasecurrent
    Type: InstrumentCommand
    Line Command="CURR DOWN" Output="false"
    Description: DECREASECURRENT Decrease the output current leve.

      INVOKE(OBJ, 'decreasecurrent') decreases the current by the amount specified in the CurrentStep property.

  Method decreasevoltage
    Type: InstrumentCommand
    Line Command="VOLT DOWN" Output="false"
    Description: DECREASEVOLTAGE Decrease the output voltage level.

      INVOKE(OBJ, 'decreasevoltage') decreases the output voltage by the amount specified in the VoltageStep property.

  Method disable
    Type: InstrumentCommand
    Line Command="Output:State OFF" Output="false"
    Description: DISABLE Disable specified output of the power supply.

      INVOKE(OBJ, 'disable') disable device output object, OBJ. OBJ can be an array of output objects.

      See also ENABLE.

  Method enable
    Type: InstrumentCommand
    Line Command="Output:State ON" Output="false"
    Description: ENABLE Enable device output of the instrument.

      INVOKE(OBJ, 'enable') enable device output object, OBJ. OBJ can be an array of output objects.

      See also DISABLE.

  Method increasecurrent
    Type: InstrumentCommand
    Line Command="CURR UP" Output="false"
    Description: INCREASECURRENT Increase the output current level.

      INVOKE(OBJ, 'increasecurrent') increases the current level by the amount specified in the CurrentLevel property.

  Method increasevoltage
    Type: InstrumentCommand
    Line Command="VOLT UP" Output="false"
    Description: INCREASEVOLTAGE Increase the voltage level.

      INVOKE(OBJ, 'increasevoltage') increases the voltage by the amount specified in the VoltageStep property.

  Method resetvoltageprotection
    Type: InstrumentCommand
    Line Command="Voltage:Protection:Clear" Output="false"
    Description: RESETVOLTAGEPROTECTION Clears the overvoltage protection state.

      INVOKE(OBJ, 'resetvoltageprotection') resets the overvoltage protection state.

Group system
  Description: General instrument system functionality.
  Size: 1
  Mappings ChannelMap Command="Util1" Index="1"

  Property Version
    Type: InstrumentCommand
    QueryCommand: SYST:VERS?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the SCPI version of the instrument.

  Method beep
    Type: InstrumentCommand
    Line Command="SYST:BEEP" Output="false"
    Description: BEEP Issue a beep.

      INVOKE(OBJ, 'beep') issues a beep from the instrument.

  Method disablelocalcontrols
    MCode:
      function disablelocalcontrols(obj)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Get the System interface
      fprintf(interface,'SYSTem:INTerface?');
      systemInterface =fscanf(interface);

      % If the interface is not RS232, generate an error
      if (strcmpi(systemInterface,'RS232')~= 1)
          error('Must be in RS232 interface to use this function');
          return
      end

      % Otherewise send appropriate command
      fprintf(interface,'SYSTem:RWLock');
    Description: DISABLELOCALCONTROLS Disable all front-panel buttons and knobs.

      INVOKE(OBJ, 'disablelocalcontrols') 'unlocks' all front-panel keys and knobs. Valid for RS-232 mode only.

  Method enablelocalcontrols
    MCode:
      function enablelocalcontrols(obj)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Get the (remote) system interface
      fprintf(interface,'SYSTem:INTerface?');
      systemInterface = fscanf(interface);

      % If the interface is not RS232, generate an error
      if (strcmpi(systemInterface,'RS232')~= 1)
          error('Must be in RS232 interface to use this function');
      return
      end

      % Otherewise send appropriate command
      fprintf(interface,'SYSTem:LOCal');
    Description: ENABLELOCALCONTROLS Enable all front-panel buttons and knobs.

      INVOKE(OBJ, 'enablelocalcontrols') 'locks' all front-panel keys and knobs. Valid for RS-232 mode only.

  Method loadstate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif  location >5 || location <1
                  error('LOCATION must be between 1 and 5 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*RCL ' num2str(location)])
    Description: LOADSTATE Recall a previously saved configuration.

      INVOKE(OBJ, 'loadstate', LOCATION) recalls the power supply state stored in the specified storage LOCATION.

  Method savestate
    MCode:
      function savestate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif  location >5 || location <1
                  error('LOCATION must be between 1 and 5 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*SAV ' num2str(location)])
    Description: SAVESTATE Store a configuration.

      INVOKE(OBJ, 'savestate', LOCATION) stores the present configuration of theinstrument to the specified LOCATION. Any state previously stored in the same location is overwritten.
