MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\generic_agilent_33120a.mdd
DriverType: MATLAB generic
InstrumentType: Function Generator
InstrumentManufacturer: Agilent
InstrumentModel: 33120A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)

    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    % Extract the interface object.

    % initializes driverData
    driverData = get(obj, 'DriverData');

    % checks to see if driver has been called on before, if it has then it
    % loads data that would normaly be saved if machine was turned off
    try
       load('generic_agilent_33120a_initialData')
    catch
        % if driver has never been called before it sets all data to default
        % settings
        driverData.amplitude = 0.1;
        driverData.offset = 0;
        driverData.units = 'vpp';
        driverData.catalog = {'"SINC"','"NEG_RAMP"','"EXP_RISE"','"EXP_FALL"','"CARDIAC"'};
        driverData.dutycycle = 50;
        driverData.dutycyclesquare = 50;
        driverData.frequency = 1000;
        driverData.outputload = 50;
        driverData.outputsync = 'on';
        driverData.triggerslope = 'positive';
        driverData.triggersource = 'immediate';
        driverData.waveform = 'sin';
        driverData.error = {};
        driverData.holdplace = 1;
        driverData.enabled = {'off','off','off','off','off'};
        driverData.waveformMax = 15000000;
        driverData.unitfactor = 1;
        driverData.points = {8.19200E+03,9.00000E+00,4.09600E+03,4.09600E+03,1.02400E+03};

        driverData.amplitudemod.depth = 100;
        driverData.amplitudemod.enabled = 'off';
        driverData.amplitudemod.internalfrequencey = 100;
        driverData.amplitudemod.internalwaveform = 'sin';
        driverData.amplitudemod.source = 'both';

        driverData.arbitrarywaveform.crestfactor = 0;
        driverData.arbitrarywaveform.currentwaveformname = 'SINC';
        driverData.arbitrarywaveform.gain =  0.1;
        driverData.arbitrarywaveform.maxnumberwaveform = 9;
        driverData.arbitrarywaveform.offset =  0;
        driverData.arbitrarywaveform.waveformlengthmax = 16000;
        driverData.arbitrarywaveform.waveformlengthmin =  8;
        driverData.arbitrarywaveform.numbercreated = 5;

        driverData.burstmod.cycles = 1;
        driverData.burstmod.enabled = 'off';
        driverData.burstmod.internalrate = 100;
        driverData.burstmod.phase = 0;
        driverData.burstmod.source = 'internal';

        driverData.calibration.count = 0;
        driverData.calibration.state = 'on';
        driverData.calibration.message = '';
        driverData.calibration.setup = 0;
        driverData.calibration.code = 'HP033120';

        driverData.display.enabled = 'on';
        driverData.display.settext = '';

        driverData.frequencymod.enabled = 'off';
        driverData.frequencymod.internaldeviation = 100;
        driverData.frequencymod.internalfrequenvy = 10;
        driverData.frequencymod.internalwaveform = 'sin';

        driverData.frequencysweep.enabled = 'off';
        driverData.frequencysweep.spacing = 'linear';
        driverData.frequencysweep.start = 100;
        driverData.frequencysweep.stop = 1000;
        driverData.frequencysweep.time = 1;

        driverData.fskmod.enabled = 'off';
        driverData.fskmod.frequency = 100;
        driverData.fskmod.internalrate = 10;
        driverData.fskmod.source = 'internal';

        driverData.system.byteorder = 'normal';
        driverData.system.version = 1993;

        % saves the initial data
        save('generic_agilent_33120a_initialData', 'driverData')
    end
    test = get(obj, 'DriverData');
    set(obj, 'DriverData', driverData);

ConnectInitCode
  Code:
    function init(obj)
    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
    driverData = get(obj, 'DriverData');
    driverData.connect = true;
    set(obj, 'DriverData', driverData);

CleanupCode
  Code:
    function cleanup(obj)
    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
    driverData = get(obj, 'DriverData');

    % resets data and saves the data that should be retained after driver is
    % disconnected
    try
        invoke(obj,'reset')
        driverData = get(obj, 'DriverData');
        save('generic_agilent_33120a_initialData', 'driverData')
    catch
    end
    driverData.disconnect = true;
    set(obj, 'DriverData', driverData);

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Amplitude
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.amplitude * driverData.unitfactor;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');

      % converts the amplitude to vpp
      if(~ischar(propertyValue))
      propertyValue = propertyValue / driverData.unitfactor;
      end

      % finds the maximum and minimum amplitude with respect to the output load
      if(driverData.outputload == 50)
          max = 10;
          min = .05;
      elseif(driverData.outputload == 9.9E37)
          max = 20;
          min = 0.1;
      end

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = min;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = max;
      end

      driverData.amplitude = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: Double bounded [Max="20.0" Min="0.1"]
    PermissibleType: String enum [max=max, min=min]
    DefaultValue: 0.100
    ReadOnly: never
    Description: Set the output amplitude for the currently active function.  MIN selects the smallest amplitude allowed for the selected function (50 mVpp into 50 ohms) MAX Selects the largest amplitude allowed (10 Vpp into 50 ohms).  The default amplitude is 100 mVpp(into 50 ohms).  For arbitrary waveforms, the maximum amplitude will be limited if the data do not span the full range of the output DAC (Digital-to-Analog Converter). For example, the built-in "SINC" does not use the full range of value between PLUS OR MINUS 1 and therefore its maximum amplitude is 6.084 (into 50 ohms).  For dc volts, the output level is actually controlled by setting the offset voltage. You can set the dc voltage to any value between PLUS OR MINUS 5 Vdc into 50 ohms or PLUS OR MINUS 10 Vdc into an open circuit.

  Property AmplitudeOffset
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.offset;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');

      % get the OutputLoad
      load = driverData.outputload;

      % returns an error if the propertyValue is not within in a proper range in
      % relationship to the output load. Also finds the apropriate maximum and
      % minimum amplitude offset value with respect to the ouput load
      switch load
          case 50
              max = .2;
              min = -.2;
              if ~ischar(propertyValue)
                  if (propertyValue > .2) || (propertyValue < -.2)
                      error(['For the current OutputLoad setting, accepted ',...
                          'values for AmplitudeOffset are ''min'',''max'', ',...
                          'or a value from -.2 to .2']);
                  end
              end
          case 9.9e37
              max = .4;
              min = -.4;
              if ~ischar(propertyValue)
                  if (propertyValue > .4) || (propertyValue < -.4)
                      error(['For the current OutputLoad setting, accepted ',...
                          'values for AmplitudeOffset are ''min'',''max'', ',...
                          'or a value from -.4 to .4']);
                  end
              end
              otherwise
                  error(['Unexpected value for OutputLoad. Expected ',...
                      '50 or 9.9e37']);
      end

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = min;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = max;
      end

      driverData.offset = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: Double bounded [Max="0.4" Min="-0.4"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: -0.2
    ReadOnly: never
    Description: set the amplitude offset for the currently active function.

  Property AmplitudeUnits
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.units;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');

      % finds the appropriate  number that can be used to convert the amplitude
      % to the units specified by the user
      if(strcmpi(propertyValue,'vpp'))
          driverData.unitfactor = 1;
      elseif(strcmpi(propertyValue,'vrms'))
          driverData.unitfactor = .288868;
      elseif(strcmpi(propertyValue,'dbm'))
          driverData.unitfactor = 2.2185;
      elseif(strcmpi(propertyValue,'default'))
          driverData.unitfactor = 1;
          propertyValue = 'vpp';
      end

      driverData.units = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: String enum [vpp=vpp, vrms=vrms, dbm=dbm, default=default]
    DefaultValue: VPP
    ReadOnly: never
    Description: Select the output unit from amplitude only.

  Property Catalog
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');

      % prints out the catalog
      l = length(driverData.catalog);
      str = sprintf('%s',driverData.catalog{1});
      for i = 2: l
      pri = sprintf(',%s',driverData.catalog{i});
      str = cat(2,str,pri);
      end
      propertyValue = str;
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    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: always
    Description: List the names of all waveforms currently downloaded to memory.

  Property Dutycycle
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');

      % figures out the dutycyle depending on the active waveform
      if(strcmpi('square',driverData.waveform))
          propertyValue = driverData.dutycyclesquare;
      else
          propertyValue  = driverData.dutycycle;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on

      driverData = get(obj, 'DriverData');

      % returns an error if the propertyValue is not within in a proper range in
      % relationship to frequency. Also finds the apropriate maximum and
      % minimum dutycycle with respect to the frequency
      frequency = driverData.frequency;
      if(frequency <= 5000000)
          max = 80;
          min = 20;
          if ~ischar(propertyValue)
              if (propertyValue > max) || (propertyValue < min)
                  error(['For the current Frequency setting, accepted ',...
                      'values for Dutycycle are ''min'',''max'', ',...
                      'or a value from 20 to 80']);
              end
          end
      elseif(frequency > 5000000)
          max = 40;
          min = 60;
          if ~ischar(propertyValue)
              if (propertyValue > max) || (propertyValue < min)
                  error(['For the current Frequency setting, accepted ',...
                      'values for Dutycycle are ''min'',''max'', ',...
                      'or a value from 40 to 60']);
              end
          end
      else
          error(['Unexpected value for Frequency. Expected ',...
              'a value between 1.0E-4 and 1.5E7']);
      end

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = min;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = max;
      end

      % if the waveform is a square it stores the dutycycle some where seperate
      % so it can not be over written when the waveform changes
      if(strcmpi('square',driverData.waveform))
          driverData.dutycyclesquare = propertyValue;
      else
          driverData.dutycycle = propertyValue;
      end

      set(obj, 'DriverData', driverData);
    PermissibleType: String enum [min=min, max=max]
    PermissibleType: Double bounded [Max="80.0" Min="20.0"]
    DefaultValue: 50
    ReadOnly: never
    Description: Set the duty cycle in percent for square waves only.  Duty cycle represents the amount of time per cycle that the square wave is high.  The duty cycle is remembered when you change from square wave to another function. When you return the square wave function, the previous duty cycle is used. The APPly command automatically sets the duty cycle to 50% for square waves.  The duty cycle is automatically adjusted if you select a frequency that is not valid with the percent duty cycle. For example if you set the duty cycle to 70% and then change the frequency to 8MHz, the function generator will automatically adjust the duty cycle to 60% (the upper limit for this frequency).

  Property Frequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.frequency;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 1.0E-4;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = driverData.waveformMax;
      end

      % adjusts the dutycycle with respect to the frequency
      if((propertyValue > 5) && (driverData.dutycycle > 60))
          driverData.dutycycle = 60;
      elseif((propertyValue > 5) && (driverData.dutycycle < 40))
          driverData.dutycycle = 40;
      end

      driverData.frequency = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: Double bounded [Max="1.5E7" Min="1.0E-4"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 1.0E-4
    ReadOnly: never
    Description: Set the output frequency.  min selects the lowest frequency allowed for currently active function. max selects the highest frequency allowed for currently active function.  The default frequency is 1 kHz for all functions.  For arbitrary waveforms that you create and download from memory, the maximum frequency depends on the number of points specified in the waveform.  The output frequency is automatically adjusted if you select a function whose maximum frequency is less than that of currently active function. For example, if you output 1 MHz sine wave and then change the function to triangle wave, the function generator will adjust the output to 100 kHz (the upper limit for triangle wave).

  Property OutputLoad
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.outputload;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');
      oldLoad = driverData.outputload;

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue. Also checks to see if the output load effects
      % the amplitude and then adjusts it accordingly
      if(strcmpi(propertyValue,'min'))
          propertyValue = 50.0;
      elseif(strcmpi(propertyValue,'max') || strcmpi(propertyValue,'infinity'))
          if(oldLoad == 50.0)
              if(~ischar(driverData.amplitude))
                  driverData.amplitude = driverData.amplitude * 2;
              end
          end
          propertyValue = 9.9E37;
      end

      driverData.outputload = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: Double enum [50.0, 9.9E37]
    PermissibleType: String enum [infinity=infinity, min=min, max=max]
    DefaultValue: 50
    ReadOnly: never
    Description: Select the output termination for output amplitude and offset voltage.  The function generator has a fixed output impedance of 50 ohms on the OUTPUT terminal. You can specify whether you are terminating the output into a 50 ohms load or an open circuit. Incorrect impedance matching between the function generator and your load will result in an amplitude or offset which does not match the specified signal level.  INF sets the output termination to "high impedance". MIN selects 50 ohms. MAX selects "high impedance". The default is 50 ohms.  The amplitude (or dc offset) is automatically adjusted (and no error is generated) if you change the output termination. For example, if you set the amplitude to 10 Vpp and then change the termination from 50 ohms to "high impedance", the display impedance will double to 20 Vpp. If you change the "high impedance" to 50 ohms, the displayed amplitude will drop in half.  If you specify 50 ohms but are actually terminating into an open circuit, the displayed output will be twice the value specified. For example, if you set the offset to 100 mVdc (and specify a 50 ohms termination) but are actually terminating output into an open circuit, the actual displayed offset will be 200 mVdc.

  Property OutputMode
    GetMCode:
      function  propertyValue = getProperty(obj, propertyName)
      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% get interface

      driverData = get(obj, 'DriverData');

      % If it is not stantard, it is arbitrary
      shape = driverData.waveform;
      if strcmpi(shape, 'USER') == 1
          propertyValue = 'arbitrary';
      else
          propertyValue = 'standard';
      end
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    PermissibleType: String enum [arbitrary=aribtrary, standard=standard]
    DefaultValue: standard
    ReadOnly: always
    Description: returns if the wave form is a user waveform or standard

  Property OutputSync
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.outputsync;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');
      driverData.outputsync = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: String enum [on=on, off=off]
    DefaultValue: off
    ReadOnly: never
    Description: Enable or disable output SYNC from the terminal.  The default is "ON".  When the SYNC signal is disabled, the output level on the SYNC terminal is indeterminate (it might be a TTL "high" or a TTL "low").

  Property TriggerSlope
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.triggerslope;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');
      driverData.triggerslope = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: String enum [positive=positive, negative=negative]
    DefaultValue: positive
    ReadOnly: never
    Description: Select the polarity of the EXT Trig terminal.

  Property TriggerSource
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.triggersource;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(obj, 'DriverData');
      driverData.triggersource = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: String enum [immediate=immediate, external=external, bus=bus]
    DefaultValue: immediate
    ReadOnly: never
    Description: Select the source from which the function generator will accept a trigger.

  Property Waveform
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(obj, 'DriverData');
      propertyValue = driverData.waveform;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(obj, 'DriverData');

      % sets the maximum amplitude based on the waveform
      if(strcmpi(propertyValue,'sin') || strcmpi(propertyValue,'square'))
          driverData.waveformMax = 15000000;
      elseif(strcmpi(propertyValue,'triangle') || strcmpi(propertyValue,'ramp'))
          driverData.waveformMax = 100000;
      else
          driverData.waveformMax = 5000000;
      end

      % adjusts the frequency if the new waveform conflicts with the current
      % setting
      if(driverData.frequency > driverData.waveformMax)
          driverData.frequency = driverData.waveformMax;
          beep
          driverData.error{driverData.holdplace} = ' -221,"Settings conflict; frequency has been adjusted"';
          driverData.holdplace = driverData.holdplace + 1;
      end

      % sets the dutycycle
      if(strcmpi('square',propertyValue))
          driverData.dutycycle = driverData.dutycyclesquare;
      end

      driverData.waveform = propertyValue;
      set(obj, 'DriverData', driverData);
    PermissibleType: String enum [sin=sin, square=square, ramp=ramp, noise=noise, DC=DC, user=user, triangle=triangle]
    DefaultValue: sin
    ReadOnly: never
    Description: Select the output function.  The selected waveform is output using the previously selected frequency, amplitude, and dc offset settings. If you select "USER", the function generator outputs the arbitrary waveform currently selected by the FUNC:USER command.

  Method drivertest
    MCode:
      function varargout = drivertest(obj)
      %   AGILENT_33120_MIDTEST01 Code for testing a MATLAB instrument driver.
      %
      %   This is the machine generated code that tests a MATLAB instrument driver,
      %
      %   The test consists of multiple test steps that can test the MATLAB instrument
      %   drivers functions and properties.
      %
      %   The test code was generated with the MIDTEST GUI. For more information
      %   on MIDTEST, type 'instrhelp midtest' at the MATLAB command prompt.
      %
      %
      %   See also ICDEVICE, MIDTEST.
      %

      %   Creation time: 07-Nov-2005 13:46:16

      % Wrap entire test in try catch.
      try
      fprintf('Test: Generic Agilent 33120a Driver Test\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;

      % Create device object using the driver file
      deviceObj = obj;

      driverData = get(deviceObj,'DriverData');
      securityCode = driverData.calibration.code;
      groupObj = get(deviceObj, 'Calibration');
      groupObj = groupObj(1);
      invoke(groupObj, 'securedevice', securityCode, 'unsecure');

      % Test Step 1: All Properties Sweep (Properties Sweep Test Step)
      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Amplitude property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Amplitude property.
      validValues = {0.1, 6.1, 12.1, 20.0, 'max', 'min'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'Amplitude', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing AmplitudeOffset property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the AmplitudeOffset property.

      % For the current OutputLoad setting, accepted values for AmplitudeOffset
      % are 'min','max', or a value from -.2 to .2 whereas absolute range is -.4
      % to .4
      validValues = {-0.2,0.0,'min','max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'AmplitudeOffset', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing AmplitudeUnits property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the AmplitudeUnits property.
      validValues = {'vpp', 'vrms', 'dbm', 'default'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'AmplitudeUnits', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Catalog property in the parent group.\n');

      try
          % Query the value for the read-only property, Catalog.
          get(deviceObj, 'Catalog');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Dutycycle property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Dutycycle property.
      validValues = {'min', 'max', 20.0, 40.0, 60.0, 80.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'Dutycycle', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Frequency property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Frequency property.
      validValues = {1.0E-4, 4999999.0001, 9999998.0001, 1.5E7, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'Frequency', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InstrumentModel property in the parent group.\n');

      try
          % Query the value for the read-only property, InstrumentModel.
          get(deviceObj, 'InstrumentModel');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing OutputLoad property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the OutputLoad property.
      validValues = {50.0, 9.9E37, 'infinity', 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'OutputLoad', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing OutputMode property in the parent group.\n');

      try
          % Query the value for the read-only property, OutputMode.
          get(deviceObj, 'OutputMode');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing OutputSync property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the OutputSync property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'OutputSync', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing TriggerSlope property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the TriggerSlope property.
      validValues = {'positive', 'negative'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'TriggerSlope', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing TriggerSource property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the TriggerSource property.
      validValues = {'immediate', 'external', 'bus'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'TriggerSource', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Waveform property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Waveform property.
      validValues = {'sin', 'square', 'ramp', 'noise', 'DC', 'user', 'triangle'};

      % Test all supported values.
      for i = 1:length(validValues)
          try

              set(deviceObj,'Frequency','min');

              % Configure the property.
              set(deviceObj, 'Waveform', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Depth property in the Amplitudemod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Depth property.
      validValues = {0.0, 40.0, 80.0, 120.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Amplitudemod');
              set(groupObj, 'Depth', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Enabled property in the Amplitudemod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Enabled property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Amplitudemod');
              set(groupObj, 'Enabled', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InternalFrequency property in the Amplitudemod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the InternalFrequency property.
      validValues = {0.01, 6666.01, 13332.01, 20000.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Amplitudemod');
              set(groupObj, 'InternalFrequency', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InternalWaveform property in the Amplitudemod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the InternalWaveform property.
      validValues = {'sin', 'square', 'triangle', 'ramp', 'noise', 'user'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Amplitudemod');
              set(groupObj, 'InternalWaveform', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Source property in the Amplitudemod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Source property.
      validValues = {'both', 'external'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Amplitudemod');
              set(groupObj, 'Source', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing CrestFactor property in the Arbitrarywaveform group.\n');

      try
          % Query the value for the read-only property, CrestFactor.
          groupObj = get(deviceObj, 'Arbitrarywaveform');
          get(groupObj, {'CrestFactor'});

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing CurrentWaveformName property in the Arbitrarywaveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the CurrentWaveformName property excluding 'another' option.
      validValues ={'SINC','NEG_RAMP','EXP_RISE','EXP_FALL','CARDIAC'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Arbitrarywaveform');
              set(groupObj, 'CurrentWaveformName', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Frequency property in the Arbitrarywaveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Frequency property.
      validValues = {1.0E-4, 4999999.0001, 9999998.0001, 1.5E7, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Arbitrarywaveform');
              set(groupObj, 'Frequency', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Gain property in the Arbitrarywaveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Gain property.

      % For current OutputLoad settings, valid values are max, min, or  a value
      % from .06095 to 12.165 though absolute limits are from .0305 to 12.165
      validValues = {4.0305, 8.0305, 12.165, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Arbitrarywaveform');
              set(groupObj, 'Gain', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing MaxNumberWaveform property in the Arbitrarywaveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the MaxNumberWaveform property.
      validValues = {-1000.0, -500.0, 0.0, 500.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Arbitrarywaveform');
              set(groupObj, 'MaxNumberWaveform', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Offset property in the Arbitrarywaveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Offset property.
      validValues = {-0.2, -0.1, 0.0, 0.2, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Arbitrarywaveform');
              set(groupObj, 'Offset', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing WaveformLengthMax property in the Arbitrarywaveform group.\n');

      try
          % Query the value for the read-only property, WaveformLengthMax.
          groupObj = get(deviceObj, 'Arbitrarywaveform');
          get(groupObj, {'WaveformLengthMax'});

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing WaveformLengthMin property in the Arbitrarywaveform group.\n');

      try
          % Query the value for the read-only property, WaveformLengthMin.
          groupObj = get(deviceObj, 'Arbitrarywaveform');
          get(groupObj, {'WaveformLengthMin'});

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Cycles property in the Burstmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Cycles property.
      validValues = {1.0, 16667.0, 33333.0, 50000.0, 'min', 'max', 'infinity'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Burstmod');
              set(groupObj, 'Cycles', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Enabled property in the Burstmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Enabled property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Burstmod');
              set(groupObj, 'Enabled', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InternalRate property in the Burstmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the InternalRate property.
      validValues = {0.01, 16666.01, 33332.01, 50000.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Burstmod');
              set(groupObj, 'InternalRate', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Phase property in the Burstmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Phase property.
      validValues = {-360.0, -120.0, 120.0, 360.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Burstmod');
              set(groupObj, 'Phase', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Source property in the Burstmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Source property.
      validValues = {'external', 'internal'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Burstmod');
              set(groupObj, 'Source', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Count property in the Calibration group.\n');

      try
          % Query the value for the read-only property, Count.
          groupObj = get(deviceObj, 'Calibration');
          get(groupObj, {'Count'});

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Enabled property in the Calibration group.\n');

      try
          % Query the value for the read-only property, Enabled.
          groupObj = get(deviceObj, 'Calibration');
          get(groupObj, {'Enabled'});

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Message property in the Calibration group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Message property.
      validValues = {'on', 'off', 'sydney', 'wayne', 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Calibration');
              set(groupObj, 'Message', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Setup property in the Calibration group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Setup property.
      validValues = {0.0, 28.0, 56.0, 84.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Calibration');
              set(groupObj, 'Setup', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Enabled property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Enabled property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'Enabled', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Enabled property in the Frequencymod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Enabled property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencymod');
              set(groupObj, 'Enabled', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InternalDeviation property in the Frequencymod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the InternalDeviation property.
      validValues = {0.01, 33333.01, 66666.01, 100000.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencymod');
              set(groupObj, 'InternalDeviation', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InternalFrequency property in the Frequencymod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the InternalFrequency property.
      validValues = {0.01, 3333.01, 6666.01, 10000.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencymod');
              set(groupObj, 'InternalFrequency', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InternalWaveform property in the Frequencymod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the InternalWaveform property.
      validValues = {'sin', 'square', 'triangle', 'ramp', 'noise', 'user'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencymod');
              set(groupObj, 'InternalWaveform', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Enabled property in the Frequencysweep group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Enabled property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencysweep');
              set(groupObj, 'Enabled', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Spacing property in the Frequencysweep group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Spacing property.
      validValues = {'linear', 'log'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencysweep');
              set(groupObj, 'Spacing', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Start property in the Frequencysweep group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Start property.
      validValues = {0.01, 4999999.01, 9999998.01, 1.5E7, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencysweep');
              set(groupObj, 'Start', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Stop property in the Frequencysweep group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Stop property.
      validValues = {'max', 'min', 0.01, 4999999.01, 9999998.01, 1.5E7};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencysweep');
              set(groupObj, 'Stop', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Time property in the Frequencysweep group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Time property.
      validValues = {0.0010, 166.001, 332.001, 500.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Frequencysweep');
              set(groupObj, 'Time', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Enabled property in the Fskmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Enabled property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Fskmod');
              set(groupObj, 'Enabled', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Frequency property in the Fskmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Frequency property.
      validValues = {0.01, 4999999.01, 9999998.01, 1.5E7, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Fskmod');
              set(groupObj, 'Frequency', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InternalRate property in the Fskmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the InternalRate property.
      validValues = {0.01, 16666.01, 33332.01, 50000.0, 'min', 'max'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Fskmod');
              set(groupObj, 'InternalRate', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Source property in the Fskmod group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Source property.
      validValues = {'internal', 'external'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Fskmod');
              set(groupObj, 'Source', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing ByteOrder property in the System group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the ByteOrder property.
      validValues = {'normal', 'swapped'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'System');
              set(groupObj, 'ByteOrder', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Version property in the System group.\n');

      try
          % Query the value for the read-only property, Version.
          groupObj = get(deviceObj, 'System');
          get(groupObj, {'Version'});

          % Check if instrument error occurred.
          result = invoke(deviceObj,'error');
          errorcode = ~isempty(result);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 2: Amplitude - Set Property (Set Property Test Step)

      errorcode = false;

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Amplitude property.
      validValues = {0.1, 6.1, 12.1, 20.0, 'max', 'min'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'Amplitude', validValues{i});

              % Check if instrument error occurred.
              result = invoke(deviceObj,'error');
              errorcode = ~isempty(result);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 3: AmplitudeOffset - Set Property (Set Property Test Step)
      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% Overall error status for all settings.
      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% Valid values for the AmplitudeOffset property.
      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% Test all supported values.
      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        % Configure the property.
      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        % Check if instrument error occurred.
      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        % Post information about error if one occurred.
      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        % A MATLAB error occurred.
      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        % Post information about error.
      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% Post message indicating if test step passed.
      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% Test Step 4: AmplitudeUnits - Set Property (Set Property Test Step)
      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% Valid values for the AmplitudeUnits property.
      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% Test Step 5: DutyCycle - Set Property (Set Property Test Step)
      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% Valid values for the Dutycycle property.
      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% Test Step 6: Frequency - Set Property (Set Property Test Step)
      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% Valid values for the Frequency property.
      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% Test Step 7: OutputLoad - Set Property (Set Property Test Step)
      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% Valid values for the OutputLoad property.
      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% Test Step 8: OutputSync - Set Property (Set Property Test Step)
      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% Valid values for the OutputSync property.
      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% Test Step 9: TriggerSlope - Set Property (Set Property Test Step)
      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% Valid values for the TriggerSlope property.
      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% Test Step 10: TriggerSource - Set Property (Set Property Test Step)
      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% Valid values for the TriggerSource property.
      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% Test Step 11: Waveform - Set Property (Set Property Test Step)
      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% Valid values for the Waveform property.
      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% Test Step 12: Depth - Set Property (Set Property Test Step)
      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% Valid values for the Depth property.
      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% Test Step 13: Enabled - Set Property (Set Property Test Step)
      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% Valid values for the Enabled property.
      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% Test Step 14: InternalFrequency - Set Property (Set Property Test Step)
      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% Valid values for the InternalFrequency property.
      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% Test Step 15: InternalWaveform - Set Property (Set Property Test Step)
      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% Valid values for the InternalWaveform property.
      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% Test Step 16: Source - Set Property (Set Property Test Step)
      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% Valid values for the Source property.
      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% Test Step 17: CurrentWaveformName - Set Property (Set Property Test Step)
      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% Valid values for the CurrentWaveformName property excluding 'another' option.
      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% Test Step 18: Frequency (Waveform) - Set Property (Set Property Test Step)
      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% Test Step 19: Gain - Set Property (Set Property Test Step)
      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% Valid values for the Gain property.
      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% For current OutputLoad settings, valid values are max, min, or  a value
      % from .06095 to 12.165 though absolute limits are from .0305 to 12.165
      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% Test Step 20: MaxNumberWaveform - Set Property (Set Property Test Step)
      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% Valid values for the MaxNumberWaveform property.
      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% Test Step 21: Offset - Set Property (Set Property Test Step)
      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% Valid values for the Offset property.
      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% Test Step 22: Cycles - Set Property (Set Property Test Step)
      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% Valid values for the Cycles property.
      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% Test Step 23: Enabled (BurstMod) - Set Property (Set Property Test Step)
      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% Test Step 24: InternalRate - Set Property (Set Property Test Step)
      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% Valid values for the InternalRate property.
      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% Test Step 25: Phase - Set Property (Set Property Test Step)
      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% Valid values for the Phase property.
      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% Test Step 26: Source (BurstMod) - Set Property (Set Property Test Step)
      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% Test Step 27: Message - Set Property (Set Property Test Step)
      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% Valid values for the Message property.
      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% Test Step 28: Setup (Calibration) - Set Property (Set Property Test Step)
      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% Valid values for the Setup property.
      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% Test Step 29: Enabled (Display) - Set Property (Set Property Test Step)
      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% Test Step 30: Enabled (FrequencyMod) - Set Property (Set Property Test Step)
      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% Test Step 31: InternalDeviation - Set Property (Set Property Test Step)
      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% Valid values for the InternalDeviation property.
      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% Test Step 34: Enabled (FrequencySweep) - Set Property (Set Property Test Step)
      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% Test Step 35: Spacing - Set Property (Set Property Test Step)
      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% Valid values for the Spacing property.
      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% Test Step 36: Start - Set Property (Set Property Test Step)
      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% Valid values for the Start property.
      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% Test Step 37: Stop - Set Property (Set Property Test Step)
      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% Valid values for the Stop property.
      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% Test Step 38: Time - Set Property (Set Property Test Step)
      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% Valid values for the Time property.
      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% Test Step 39: Enabled (FSKMod) - Set Property (Set Property Test Step)
      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% Test Step 40: Frequency (FSKMod) - Set Property (Set Property Test Step)
      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% Test Step 42: Source (FSKMod) - Set Property (Set Property Test Step)
      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% Test Step 43: ByteOrder - Set Property (Set Property Test Step)
      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% Valid values for the ByteOrder property.
      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% Test Step 44: Amplitude - Get Property (Get Property Test Step)
      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    % Query the property.
      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    % Store the result so that it can be returned.
      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% Test Step 45: AmplitudeOffset - Get Property (Get Property Test Step)
      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% Test Step 46: AmplitudeUnits - Get Property (Get Property Test Step)
      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% Test Step 47: Catalog - Get Property (Get Property Test Step)
      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% Test Step 48: DutyCycle - Get Property (Get Property Test Step)
      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% Test Step 49: Frequency - Get Property (Get Property Test Step)
      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% Test Step 50: InstrumentModel - Get Property (Get Property Test Step)
      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% Test Step 51: OutputLoad - Get Property (Get Property Test Step)
      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% Test Step 52: OutputMode - Get Property (Get Property Test Step)
      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% Test Step 53: OutputSync - Get Property (Get Property Test Step)
      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% Test Step 54: TriggerSlope - Get Property (Get Property Test Step)
      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% Test Step 55: TriggerSource - Get Property (Get Property Test Step)
      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% Test Step 56: Waveform - Get Property (Get Property Test Step)
      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% Test Step 57: Depth - Get Property (Get Property Test Step)
      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% Test Step 58: Enabled (AmplitudeMod) - Get Property (Get Property Test Step)
      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% Test Step 59: InternalFrequency - Get Property (Get Property Test Step)
      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% Test Step 60: InternalWaveform - Get Property (Get Property Test Step)
      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% Test Step 61: Source (AmplitudeMod) - Get Property (Get Property Test Step)
      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% Test Step 62: CrestFactor - Get Property (Get Property Test Step)
      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% Test Step 63: CurrentWaveformName - Get Property (Get Property Test Step)
      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% Test Step 64: Frequency (ArbitraryWaveform) - Get Property (Get Property Test Step)
      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% Test Step 65: Gain - Get Property (Get Property Test Step)
      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% Test Step 66: maxNumberWaveform - Get Property (Get Property Test Step)
      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% Test Step 67: Offset - Get Property (Get Property Test Step)
      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% Test Step 68: WaveformLengthMax - Get Property (Get Property Test Step)
      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% Test Step 69: WaveformLengthMin - Get Property (Get Property Test Step)
      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% Test Step 70: Cycles - Get Property (Get Property Test Step)
      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% Test Step 71: Enabled (BurstMod) - Get Property (Get Property Test Step)
      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% Test Step 72: InternalRate - Get Property (Get Property Test Step)
      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% Test Step 73: Phase - Get Property (Get Property Test Step)
      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% Test Step 74: Source (BurstMod) - Get Property (Get Property Test Step)
      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% Test Step 75: Count - Get Property (Get Property Test Step)
      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% Test Step 76: Enabled (Calibration) -Get Property (Get Property Test Step)
      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% Test Step 77: Message - Get Property (Get Property Test Step)
      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% Test Step 78: Setup (Calibration) - Get Property (Get Property Test Step)
      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% Test Step 79: Enabled (Display) - Get Property (Get Property Test Step)
      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% Test Step 80: Enabled (FrequencyMod) - Get Property (Get Property Test Step)
      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% Test Step 81: internalDeviation - Get Property (Get Property Test Step)
      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% Test Step 84: Enabled (FrequencySweep) - Get Property (Get Property Test Step)
      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% Test Step 85: Spacing - Get Property (Get Property Test Step)
      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% Test Step 86: Start - Get Property (Get Property Test Step)
      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% Test Step 87: Stop - Get Property (Get Property Test Step)
      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% Test Step 88: Time - Get Property (Get Property Test Step)
      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% Test Step 89: Enabled (FSKMod) - Get Property (Get Property Test Step)
      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% Test Step 90: Frequency (FSKMod) - Get Property (Get Property Test Step)
      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% Test Step 92: Source (FSKMod) - Get Property (Get Property Test Step)
      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% Test Step 93: ByteOrder - Get Property (Get Property Test Step)
      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% Test Step 94: Version - Get Property (Get Property Test Step)
      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% Test Step 96: error - Function (Function Test Step)
      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    % Execute the function.
      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% Test Step 100: trigger - Function (Function Test Step)
      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% Test Step 101: clear - Function (Function Test Step)
      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% Test Step 102: create - Function (Function Test Step)
      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% Test Step 103: getlength - Function (Function Test Step)
      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% Test Step 104: setwaveform - Function (Function Test Step)
      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% Test Step 108: settext - Function (Function Test Step)
      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% Test Step 109: beep - Function (Function Test Step)
      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% Test Step 110: savestate - Function (Function Test Step)
      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% Test Step 111: loadstate - Function (Function Test Step)
      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% Test Step 112: deletestate - Function (Function Test Step)
      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% Test Step 98: reset - Function (Function Test Step)
      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% Cleanup.
      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% Post results.
      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    % An error occurred while running the test.
      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
    Description: INVOKE(OBJ,'drivertest')

  Method error
    MCode:
      function err = error(obj)
      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
      driverData = get(obj, 'DriverData');
      numberOfErrors = numel(driverData.error);

      % checks to see if there are any errors stored.
      if(numberOfErrors == 0)
          err = '';
      else
          err = driverData.error{numberOfErrors};
          driverData.error(numberOfErrors) = '';
          set(obj, 'DriverData', driverData);
      end
    Description: ERR = INVOKE(OBJ,'error')  Returns last instrument error stored

  Method reset
    MCode:
      function reset(obj)
      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driverData = get(obj, 'DriverData');

      driverData.amplitude = 0.1;
      driverData.offset = 0;
      driverData.units = 'vpp';
      driverData.dutycycle = 50;
      driverData.dutycyclesquare = 50;
      driverData.frequency = 1000;
      driverData.outputload = 50;
      driverData.outputsync = 'on';
      driverData.triggerslope = 'positive';
      driverData.triggersource = 'immediate';
      driverData.waveform = 'sin';
      driverData.error = {};
      driverData.holdplace = 1;
      driverData.enabled = {'off','off','off','off','off'};
      driverData.waveformMax = 15000000;
      driverData.unitfactor = 1;

      driverData.amplitudemod.depth = 100;
      driverData.amplitudemod.enabled = 'off';
      driverData.amplitudemod.internalfrequencey = 100;
      driverData.amplitudemod.internalwaveform = 'sin';
      driverData.amplitudemod.source = 'both';

      driverData.arbitrarywaveform.crestfactor = 0;
      driverData.arbitrarywaveform.currentwaveformname = 'SINC';
      driverData.arbitrarywaveform.gain =  0.1;
      driverData.arbitrarywaveform.maxnumberwaveform = 9;
      driverData.arbitrarywaveform.numberwaveform = 0;
      driverData.arbitrarywaveform.offset =  0;
      driverData.arbitrarywaveform.waveformlengthmax = 16000;
      driverData.arbitrarywaveform.waveformlengthmin =  8;
      driverData.arbitrarywaveform.numbercreated = 5;

      driverData.burstmod.cycles = 1;
      driverData.burstmod.enabled = 'off';
      driverData.burstmod.internalrate = 100;
      driverData.burstmod.phase = 0;
      driverData.burstmod.source = 'internal';

      driverData.calibration.count = 0;
      driverData.calibration.state = 'on';
      driverData.calibration.setup = 0;

      driverData.display.enabled = 'on';

      driverData.frequencymod.enabled = 'off';
      driverData.frequencymod.internaldeviation = 100;
      driverData.frequencymod.internalfrequenvy = 10;
      driverData.frequencymod.internalwaveform = 'sin';

      driverData.frequencysweep.enabled = 'off';
      driverData.frequencysweep.spacing = 'linear';
      driverData.frequencysweep.start = 100;
      driverData.frequencysweep.stop = 1000;
      driverData.frequencysweep.time = 1;

      driverData.fskmod.enabled = 'off';
      driverData.fskmod.frequency = 100;
      driverData.fskmod.internalrate = 10;
      driverData.fskmod.source = 'internal';

      driverData.system.byteorder = 'normal';
      driverData.system.version = 1993;

      set(obj, 'DriverData', driverData);
    Description: INVOKE(OBJ,'reset') Loads the initial values for driverData from the file generic_agilent_33120a_initialData

  Method trigger
    MCode:
      function trigger(obj)
      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
    Description: TRIGGER Send a software trigger to the instrument.  INVOKE(OBJ, 'trigger') sends a software trigger to the instrument.

Group amplitudemod
  Size: 1
  Mappings ChannelMap Command="AmplitudeMod1" Index="1"

  Property Depth
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.amplitudemod.depth;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 120;
      end

      driverData.amplitudemod.depth = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="120.0" Min="0.0"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 100
    ReadOnly: never
    Description: Set the internal modulation depth in percent.   Select from 0% to 120%. The default is 100%.

  Property Enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.enabled{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if another mode is enabled
      idx = strmatch('on',driverData.enabled,'exact');

      % stores an error if another mode is enabled and switches all other modes
      % to 'off'
      if(strcmpi(propertyValue,'on') && ~isempty(idx) && idx ~= 1)
          beep
          driverData.error{driverData.holdplace} = '-221,"Settings conflict; previous modulation has been disabled"';
          driverData.holdplace = driverData.holdplace + 1;
          driverData.enabled{idx} = 'off';
      end

      driverData.enabled{1} = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [on=on, off=off]
    DefaultValue: off
    ReadOnly: never
    Description: Disable or enable AM.   To ensure proper operation, you should enable AM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable AM the previous modulation is turned off.

  Property InternalFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.amplitudemod.internalfrequencey;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = .01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 20000;
      end

      driverData.amplitudemod.internalfrequencey = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="20000.0" Min="0.01"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Select the frequency of the modulating waveform.  Used only when the internal modulation source is selected. Select from 10 mHz to 20 kHz. The default is 100 Hz.

  Property InternalWaveform
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.amplitudemod.internalwaveform;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.amplitudemod.internalwaveform = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [sin=sin, square=square, triangle=triangle, ramp=ramp, noise=noise, user=user]
    DefaultValue: sin
    ReadOnly: never
    Description: Select the shape of the modulating waveform.   Used only when the internal modulation source is selected. You can use the noise function as the modulating waveform. However, you cannot use the noise function as or dc volts as the carrier waveform.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.amplitudemod.source;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.amplitudemod.source  = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [both=both, external=external]
    DefaultValue: both
    ReadOnly: never
    Description: Select the source of the modulating signal.  The function generator will accept an internal modulating signal, an external modulating signal, or both. The default is BOTH.

Group arbitrarywaveform
  Size: 1
  Mappings ChannelMap Command="ArbitraryWaveform1" Index="1"

  Property CrestFactor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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

      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.arbitrarywaveform.crestfactor;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the default crest factor. Actual Value can not be calculated.

  Property CurrentWaveformName
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.arbitrarywaveform.currentwaveformname;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the the waveform name already exists
      custom = driverData.catalog;
      str = sprintf('"%s"',upper(propertyValue));
      idx = strmatch(upper(str),custom,'exact');

      % gets the length of the name
      numberofChar = length(propertyValue);

      % checks to see if the first character of the name is a nunber
      firstChar = propertyValue(1);
      ascii = double(lower(firstChar));
      number = {'1','2','3','4','5','6','7','8','9','0'}
      num = strmatch(firstChar,number,'exact');

      % stores an error if name is not in a valid form
      if~(isempty(num))
          driverData.error{driverData.holdplace} = '-128,"Numeric data not allowed"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif~((97 <= ascii) && (ascii <= 122))
          driverData.error{driverData.holdplace} = '-101,"Invalid character"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif(numberofChar >= 13)
          driverData.error{driverData.holdplace} = '-112,"Program mnemonic too long"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif(numberofChar >= 9)
          driverData.error{driverData.holdplace} = '+783,"Arb waveform name too long';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif(isempty(idx))
          driverData.error{driverData.holdplace} = '+785,"Specified arb waveform does not exist"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      else
          driverData.arbitrarywaveform.currentwaveformname  = propertyValue;
      end

      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String none
    ReadOnly: never
    Description: Set or query the name of the current arbitrary waveform. To view a list of the recognized names of arbitrary waveforms, query the Catalog property of the Parent group.

  Property Frequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequency;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 1.0E-4;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = driverData.waveformMax;
      end

      % adjusts the dutycycle with respect to the frequency
      if((propertyValue > 5) && (driverData.dutycycle > 60))
          driverData.dutycycle = 60;
      elseif((propertyValue > 5) && (driverData.dutycycle < 40))
          driverData.dutycycle = 40;
      end

      driverData.frequency = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="1.5E7" Min="1.0E-4"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 1.0E-4
    ReadOnly: never
    Description: Set the output frequency.  MIN selects the lowest frequency allowed for currently active function. MAX selects the highest frequency allowed for currently active function.  The default frequency is 1 kHz for all functions.  For arbitrary waveforms that you create and download from memory, the maximum frequency depends on the number of points specified in the waveform.  The output frequency is automatically adjusted if you select a function whose maximum frequency is less than that of currently active function. For example, if you output 1 MHz sine wave and then change the function to triangle wave, the function generator will adjust the output to 100 kHz (the upper limit for triangle wave).

  Property Gain
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.arbitrarywaveform.gain;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      load = driverData.outputload;

      % returns an error if the propertyValue is not within in a proper range in
      % relationship to the output load. Also finds the apropriate maximum gain
      % value with respect to the ouput load
      switch load
          case 50
              max = 6.084515;
              if(~ischar(propertyValue))
                  if(propertyValue > 6.084515)
                      error(['??? Invalid value for Gain. For current',...
                      ' OutputLoad settings, valid values are max, min, or ',...
                      ' a value from .0305 to 6.084515']);
                  end
              end
          case 9.9E37
              max = 12.165;
              if(~ischar(propertyValue))
                  if(propertyValue < .06095)
                      error(['??? Invalid value for Gain. For current',...
                      ' OutputLoad settings, valid values are max, min, or ',...
                      ' a value from .06095 to 12.165']);
                  end
              end
          otherwise
              error(['??? Unexpected value for OutputLoad. ',...
                  'Expected either 50 or 9.9e37.']);
      end

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.0305;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = max;
      end

      driverData.arbitrarywaveform.gain = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="12.165" Min="0.0305"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0.100
    ReadOnly: never
    Description: Set the output amplitude for the currently active function.  MIN selects the smallest amplitude allowed for the selected function (50 mVpp into 50 ohms) MAX Selects the largest amplitude allowed (10 Vpp into 50 ohms).  The default amplitude is 100 mVpp(into 50 ohms).  For arbitrary waveforms, the maximum amplitude will be limited if the data do not span the full range of the output DAC (Digital-to-Analog Converter). For example, the built-in "SINC" does not use the full range of value between PLUS OR MINUS 1 and therefore its maximum amplitude is 6.084 (into 50 ohms).  For dc volts, the output level is actually controlled by setting the offset voltage. You can set the dc voltage to any value between PLUS OR MINUS 5 Vdc into 50 ohms or PLUS OR MINUS 10 Vdc into an open circuit.

  Property MaxNumberWaveform
    GetMCode:
      function propertyValue = get(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.arbitrarywaveform.maxnumberwaveform;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Query the maximun number of waveforms that the function generator supports.

  Property Offset
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.arbitrarywaveform.offset;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = -0.2;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 0.2;
      end

      driverData.arbitrarywaveform.offset  = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="0.2" Min="-0.2"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0
    ReadOnly: never
    Description: Set the dc offset voltage for the currently active function.

  Property WaveformLengthMax
    GetMCode:
      function propertyValue = get(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.arbitrarywaveform.waveformlengthmax;
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    PermissibleType: Double none
    DefaultValue: 16000
    ReadOnly: always
    Description: Maximum number of data points that can be downloaded.

  Property WaveformLengthMin
    GetMCode:
      function propertyValue = get(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.arbitrarywaveform.waveformlengthmin
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    PermissibleType: Double none
    DefaultValue: 8
    ReadOnly: always
    Description: Minimum number of data points that can be downloaded.

  Method clear
    MCode:
      function clear(obj, waveName)
      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% WAVENAME is the namenof the arbitrary waveform to delete.
      % According to the specificaions in the manual you should be able
      % to delete user-defined waveforms both in volatile and non-volatile memory,
      % except the built-in ones. If a user-defined waveform is currently active,
      % you cannot delete it.If you are erasing all user-defined waveforms at once,
      % the currently active waveform won't disappear and an error will be generated.

      beep on

      driverData = get(get(obj, 'Parent'), 'DriverData');

      % gets the current settings
      currentWaveform = driverData.waveform;
      currentCatalog = driverData.catalog;

      defaultCatalog = {'"SINC"','"NEG_RAMP"','"EXP_RISE"','"EXP_FALL"','"CARDIAC"'};

      % gets the current arbitrarty wavefrom name and finds its index in the
      % catalog
      arbitraryWaveName = driverData.arbitrarywaveform.currentwaveformname;
      String = sprintf('"%s"',upper(arbitraryWaveName));
      idx_arbitraryWaveName = strmatch(upper(String),defaultCatalog,'exact');

      switch(nargin)
          case 1
              % if NAME is not specified all non built-in arbitrary waveforms are cleared
              driverData.catalog = defaultCatalog;
              waveName = arbitraryWaveName;

              % checks to see if active waveform is an arbitrarywave form and is
              % userdefined
              if(strcmpi(currentWaveform,'USER') && isempty(idx_arbitraryWaveName))

                  % saves the data points of the active waveform
                  idx = strmatch(upper(String),currentCatalog,'exact');
                  temp = driverData.points{idx};
                  driverData.points = {8.19200E+03,9.00000E+00,4.09600E+03,4.09600E+03,1.02400E+03};

                  % adds the active waveform back on to the catalog
                  driverData.catalog = cat(2,driverData.catalog,String);
                  driverData.arbitrarywaveform.numbercreated = driverData.arbitrarywaveform.numbercreated + 1;

                  % adds the saved data points back on
                  idx = strmatch(upper(String),driverData.catalog,'exact');
                  driverData.points{idx} = temp;

                  % displays an error
                  driverData.error{driverData.holdplace} = '+787,"Cannot delete an active arb waveform"';
                  driverData.holdplace = driverData.holdplace + 1;
                  beep;
                  set(get(obj, 'Parent'), 'DriverData', driverData);
                  error('cannot erase active arbitrary waveform')
              else
                  driverData.points = {8.19200E+03,9.00000E+00,4.09600E+03,4.09600E+03,1.02400E+03};
              end

          otherwise
              % Verify that the name exists
              str = sprintf('"%s"',upper(waveName));
              idx = strmatch(upper(str),currentCatalog,'exact');

              if isempty(idx)
                  error('NAME must exist.');
              end
              % NAME must not be a built-in arbitrary waveform name.
              if any(strcmpi(waveName, {'sinc', 'neg_ramp', 'exp_rise', 'exp_fall','cardiac'}))
                  driverData.error{driverData.holdplace} = '+786,"Cannot delete a built-in arb waveform"';
                  driverData.holdplace = driverData.holdplace + 1;
                  beep;
                  set(get(obj, 'Parent'), 'DriverData', driverData);
                  error('cannot erase any of the following: sinc, neg_ramp, exp_rise, exp_fall , cardiac');

              % NAME can not be an active abitrary waveform
              elseif(strcmpi(currentWaveform,'USER') && strcmpi(arbitraryWaveName,waveName))
                  driverData.error{driverData.holdplace} = '+787,"Cannot delete an active arb waveform"';
                  driverData.holdplace = driverData.holdplace + 1;
                  beep;
                  set(get(obj, 'Parent'), 'DriverData', driverData);
                  error('cannot erase active arbitrary waveform')
              end

              % deletes the data points associated with the cleared waveform
              driverData.points(idx) = '';

              % deletes the waveform from the catalog
              driverData.catalog(idx) = '';
      end

      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj, clear, waveName)Delete the specified arbitrary waveform from memory.

  Method create
    MCode:
      function create(obj,name, datapoints)
      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% DATAPOINTS is an array of points % NAME is the name of the arbitrary waveform
      % if the user specifies the name as VOLATILE, then the waveform can't be stored in
      % non-volatile memory (using that name).

      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');
      d = datapoints;
      numberOfWaves = length(driverData.catalog);
      % Checks to see if the max number of waveforms has already been reached
      if(numberOfWaves >= driverData.arbitrarywaveform.maxnumberwaveform)
          driverData.error{driverData.holdplace} = '+781,"Not enough memory to store new arb waveform; use DATA:DELete"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      else

          % Check that the array contains only numeric data
          if ~isnumeric(datapoints)
              error('Only numeric data is valid');
          end
          % Check that the number of points is within range
          s = size(datapoints);
          if (length(s) > 2 || (min(s) > 1))
              error('The datapoints must be a 1 x N vector of values');
          end
          driverData.length = length(datapoints);
          minData = driverData.arbitrarywaveform.waveformlengthmin;
          maxData = driverData.arbitrarywaveform.waveformlengthmax;
          if (length(datapoints) < minData || length(datapoints) > maxData)
              error('The datapoints must be between %i and %i in length.',minData,maxData);
          end
          if (max(datapoints) > 2047 || min(datapoints) < -2047)
              error('Only datapoint values between -2047 and 2047 are accepted by the instrument.');
          end
          % Validating the name (must not exceed 8 characters).
          if ~(isvarname(name) && length(name) <= 8 )
              error(['NAME must be a character string with letters, ',...
                  'digits and ' sprintf('\n') 'underscores. The first character ',...
                  'in NAME must be a letter.' sprintf('\n') 'The maximum length is 8 characters.']);
          end
          % Check that the name is not one of the restricted names
          if any(strcmpi(name, {'sinc', 'neg_ramp', 'exp_rise', 'exp_fall','cardiac'}))
              error('NAME cannot be any of the following: sinc, neg_ramp, exp_rise, exp_fall , cardiac');
          end

          custom = driverData.catalog;
          str = sprintf('"%s"',upper(name));
          idx = strmatch(upper(str),custom,'exact');
          if(isempty(idx))
              new = sprintf('"%s"',name);
              driverData.catalog = cat(2,driverData.catalog,str);
              driverData.points{length(custom) + 1} = datapoints;
          else
              driverData.points{idx} = datapoints;
          end
      end
      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj, create, name, datapoints)Upload waveform data to the Function Generator.   OBJ is the device object's ArbitraryWaveform group. NAME is the name to store your waveform to in the arbitrary waveform catalog in non-volatile memory. Alternatively, you can specify 'volatile' for NAME to leave the waveform in volatile memory. DATAPOINTS is an array of numerics representing the functional points of the arbitrary waveform.  To set your uploaded waveform to the current "user" waveform, pass the name you specified(or 'volatile') to the CurrentWaveformName property of the ArbitraryWaveform group. Select 'user' from the waveform property the Parent group to ensure that arbitrary waveform is the selected output mode.

  Method getlength
    MCode:
      function points =  getlength(obj,name)
      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% NAME is the name of the arbitrary waveform

      driverData = get(get(obj, 'Parent'), 'DriverData');

      % finds the current waveform
      custom = driverData.catalog;
      str = sprintf('"%s"',upper(name));
      idx = strmatch(upper(str),custom,'exact');

      % checks to see if the user typed in a valid waveform
      if(isempty(idx))
          error('waveform listed does not exist')
      else
          % finds the corrisponing data
          driverData.points;
          data = driverData.points{idx};

          % checks to see if the length needs to be calculated
          if(idx < 6)
              points = data;
          else
              points = length(data);
          end

          % gets the length of the data
          driverData.length = points;

          set(get(obj, 'Parent'), 'DriverData', driverData)
      end
    Description: points = INVOKE(obj, getlength, name) returns the length of the waveform specified by NAME

  Method setwaveform
    MCode:
      function setwaveform(obj, name)
      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% NAME is the name you want to activate

      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the the waveform name already exists
      custom = driverData.catalog;
      str = sprintf('"%s"',upper(name));
      idx = strmatch(upper(str),custom,'exact');

      % gets the length of the name
      numberofChar = length(name);

      % checks to see if the first character of the name is a nunber
      firstChar = name(1);
      ascii = double(lower(firstChar));
      number = {'1','2','3','4','5','6','7','8','9','0'};
      num = strmatch(firstChar,number,'exact');

      % returns an error if name is not in a valid form
      if~(isempty(num))
          driverData.error{driverData.holdplace} = '-128,"Numeric data not allowed"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif~((97 <= ascii) && (ascii <= 122))
          driverData.error{driverData.holdplace} = '-101,"Invalid character"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif(numberofChar >= 13)
          driverData.error{driverData.holdplace} = '-112,"Program mnemonic too long"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif(numberofChar >= 9)
          driverData.error{driverData.holdplace} = '+783,"Arb waveform name too long';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      elseif(isempty(idx))
          driverData.error{driverData.holdplace} = '+785,"Specified arb waveform does not exist"';
          driverData.holdplace = driverData.holdplace + 1;
          beep;
      else
          driverData.arbitrarywaveform.currentwaveformname  = name;
      end

      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj, setwaveform, name) Changes the waveform to the specified arbitrary waveform

Group burstmod
  Size: 1
  Mappings ChannelMap Command="BurstMod1" Index="1"

  Property Cycles
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.burstmod.cycles;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 1.0;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 50000.0;
      end

      driverData.burstmod.cycles = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="50000.0" Min="1.0"]
    PermissibleType: String enum [min=min, max=max, infinity=infinity]
    DefaultValue: 1
    ReadOnly: never
    Description: Set the number of cycles to be output per burst(Trigger burst mode only). Select from one cycle to 50 000 cycles, in 1 cycles increments. The default is 1 cycle.

  Property Enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.enabled{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if another mode is enabled
      idx = strmatch('on',driverData.enabled,'exact');

      % stores an error if another mode is enabled and switches all other modes
      % to 'off'
      if(strcmpi(propertyValue,'on') && ~isempty(idx) && idx ~= 2)
          beep
          driverData.error{driverData.holdplace} = '-221,"Settings conflict; previous modulation has been disabled"';
          driverData.holdplace = driverData.holdplace + 1;
          driverData.enabled{idx} = 'off';
      end

      driverData.enabled{2} = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [on=on, off=off]
    DefaultValue: on
    ReadOnly: never
    Description: Enable or disable burst modulation.   To ensure proper operation, you should enable the burst mode after you have set other modulation parameters. Only one modulation mode can be enabled at a time. When you enable the burst mode, the previous modulation mode is turned off.

  Property InternalRate
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.burstmod.internalrate;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 50000.0;
      end

      driverData.burstmod.internalrate = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="50000.0" Min="0.01"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the burst rate for internally triggered bursts.  The burst rate frequency defines the interval between bursts. Select from 10 mHz to 50 kHz. The default is 100 Hz.  The burst rate is used only when internal triggering is enables. The burst rate is ignored when single triggering or external triggering is enabled.  It is possible to specify a burst rate that is too fast for the function generator to output with the specified carrier frequency and burst count. If the burst rate is too high, the function generator will internally adjust it as needed to continuously re-trigger the burst. The adjustment is handled internally by the function generator.

  Property Phase
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.burstmod.phase;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = -360;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 360;
      end

      driverData.burstmod.phase = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="360.0" Min="-360.0"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0
    ReadOnly: never
    Description: Set the starting phase for the burst (Trigger burst mode only).  Select from -360 degrees to +360, in .001 degree increments. The default is 0 degrees.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.burstmod.source;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.burstmod.source = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [external=external, internal=internal]
    DefaultValue: external
    ReadOnly: never
    Description: Select the burst modulation source.  In the external gated burst mode, the output waveform is either "on" or "off" based on the level of the external signal applied to the rear panel.  When the internal burst source is selected, the external gated mode is disabled.  When the external gate source is selected, the output is enabled or disabled based on the logic level of the gate signal applied to the EXT TRIG terminal. The default is INT.  When external gate source is selected, the burst count, burst rate, burst phase, and burst trigger are ignored (these parameters are used only for burst mode).

Group calibration
  Size: 1
  Mappings ChannelMap Command="Calibration1" Index="1"

  Property Count
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.calibration.count;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the default count ( 0 ). Actual Value can not be calculated.

  Property Enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.calibration.state;
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    PermissibleType: String enum [on=on, off=off]
    DefaultValue: on
    ReadOnly: always
    Description: Query the secured state of the funtion generator.

  Property Message
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.calibration.message;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % Error checking.
      if ~ischar(propertyValue)
          error('MESSAGE must be a string.');
      end

      % Checks to see if the string entered by the user is longer then 40
      % characters. If it is it is then truncated and the user is given an error
      if( length(propertyValue) > 40)
          i = 1;
          while(i < 41)
              message(i) = propertyValue(i);
              i = 1 + i;
          end
          warning('ICDevice:longmessage',...
              'Your message may only be 40 characters, and will be truncated')
          beep
          driverData.error{driverData.holdplace} = '-223,"Too much data"';
          driverData.holdplace = driverData.holdplace + 1;
      else
          message = propertyValue;
      end

      % Checks to see if the the power supply is unsecure if it is not, it
      % returns an error.
      if(strcmp(driverData.calibration.state,'off'))
          driverData.calibration.message = sprintf('"%s"',message);
      else
          error('the power supply must be unsecure to set message')
      end

      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never
    Description: Record calibration information about the function generator.

  Property Setup
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.calibration.setup;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.calibration.setup = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="84.0" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Configure the function generator's internal state for each of the calibration steps to be performed.

  Method securedevice
    MCode:
      function securedevice(obj, calibrationCode, state)
      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% code is the code to secure the instrument

      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % Parse inputs.
      switch (nargin)
      case 1
          error('CALIBRATIONCODE must be specified.');
      case 2
          if(strcmp(calibrationCode,driverData.calibration.code))
          currentState = driverData.calibration.state;
          else
              beep
              driverData.error{driverData.holdplace} = '+703,"Invalid secure code"';
              driverData.holdplace = driverData.holdplace+1;
              set(get(obj, 'Parent'), 'DriverData', driverData);
              error('incorrect code')
          end
      case 3
           if(strcmp(calibrationCode,driverData.calibration.code))
               % STATE can either be 'secure' or 'unsecure'.
                 if ~any(strcmpi(state, {'secure', 'unsecure'}))
                     error('STATE must be either ''secure'' or ''unsecure''.');
                 end

              % Translating State into the expected current state numeric value.
                 if strcmpi(state, 'secure')
                     currentState = 'on';
                 else
                     currentState = 'off';
                 end
           else
               beep
               driverData.error{driverData.holdplace} = '+703,"Invalid secure code"';
               driverData.holdplace = driverData.holdplace + 1;
               set(get(obj, 'Parent'), 'DriverData', driverData);
               error('incorrect code')
           end
      otherwise
          error('Too many input arguments.');
      end

      % Error checking.
      if ~ischar(calibrationCode)
          error('CALIBRATIONCODE must be a string.');
      end

      % Unsecure or secure the instrument.
      driverData.calibration.state = currentState;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: SECUREDEVICE secure or unsecure the power supply for calibration  INVOKE(OBJ, 'securedevice','code','secure') to 'secure' the device after the calibration process.  INVOKE(OBJ, 'securedevice','code','unsecure') to ‘unsecure’ the device before calibration.

  Method setsecurecode
    MCode:
      function setsecurecode(obj,secureCode)
      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% SecureCode is the new code.

      driverData = get(get(obj, 'Parent'), 'DriverData');

      % Validating the code (12-character format).
      if ~(isvarname(secureCode))
          error(['SECURECODE must be a character string with letters, ',...
                 'digits and ' sprintf('\n') 'underscores. The first character ',...
                 'in SECURECODE must be a letter.' sprintf('\n') 'The maximum length is 12 characters.']);
      elseif ~(length(secureCode) <= 12)
          beep
          driverData.error{driverData.holdplace} = '+704,"Secure code too long"';
          driverData.holdplace = driverData.holdplace + 1;
          set(get(obj, 'Parent'), 'DriverData', driverData);
          error('The maximum length for SECURECODE is 12 characters.')
      end

      % Verifying that the device is unsecured before changing the code.
      state = driverData.calibration.state;

      if (strcmp(state,'on'))
          error(['The device must be unsecured before changing the code.' sprintf('\n'),...
              'Type ''instrhelp(obj, ''securedevice'')'' for more information on how ' sprintf('\n'),...
              'to unsecure the device.']);
          return
      end

      % Set the secure code to the new code.
      driverData.calibration.code = secureCode;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: SETSECURECDE To change the security code into a new one.  INVOKE(OBJ, 'newcode') to change the current security code to a new one.  Note: You must first unsecure the Fumction Generator using the old security code.

Group display
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue  = driverData.display.enabled;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.display.enabled = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [on=on, off=off]
    DefaultValue: on
    ReadOnly: never
    Description: Turn the front panel display on or off.

  Method clear
    MCode:
      function clear(obj)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.display.settext = '';
      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj, clear)  Clear the message displayed on the front panel.

  Method settext
    MCode:
      function setText(obj,str)

      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % Error checking.
      if ~ischar(str)
          error('STR must be a string.');
      end

      % Checks to see if the string entered by the user is longer then 40
      % characters. If it is it is then truncated and the user is given an error
      if( length(str) > 40)
          i = 1;
          while(i < 41)
              text(i) = str(i);
              i = 1 + i ;
          end
          warning('ICDevice:longmessage',...
              'Your message may only be 40 characters, and will be truncated');
          beep
          driverData.error{driverData.holdplace} = '-223,"Too much data"';
          driverData.holdplace = driverData.holdplace + 1;
      else
          text = str;
      end

      driverData.display.settext = text;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj, settext, text) Display a message containing up to eleven characters on the front panel.

Group frequencymod
  Size: 1
  Mappings ChannelMap Command="FrequencyMod1" Index="1"

  Property Enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.enabled{3};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if another mode is enabled
      idx = strmatch('on',driverData.enabled,'exact');

      % sets an error if another mode is enabled and switches all other modes
      % to 'off'
      if(strcmpi(propertyValue,'on') && ~isempty(idx) && idx ~= 3)
          beep
          driverData.error{driverData.holdplace} = '-221,"Settings conflict; previous modulation has been disabled"';
          driverData.holdplace = driverData.holdplace + 1;
          driverData.enabled{idx} = 'off';
      end

      driverData.enabled{3} = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [on=on, off=off]
    DefaultValue: on
    ReadOnly: never
    Description: Disable or enable FM.   To ensure proper operation, you should enable FM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable FM, the previous modulation mode is turned off.

  Property InternalDeviation
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequencymod.internaldeviation;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % returns an error if the propertyValue conflicts with the carrier frequency
      max = driverData.waveformMax;
      if(propertyValue > driverData.frequency )
          propertyValue = driverData.frequency;
          beep
          driverData.error{driverData.holdplace} = ' -221,"Settings conflict; fm deviation has been adjusted"';
          driverData.holdplace = driverData.holdplace + 1;
      end
      if((propertyValue + driverData.frequency) > (max + 100000))
          propertyValue = max;
          beep
          driverData.error{driverData.holdplace} = ' -221,"Settings conflict; fm deviation has been adjusted"';
          driverData.holdplace = driverData.holdplace + 1;
      end

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = driverData.frequency;
      end

      driverData.frequencymod.internaldeviation = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="100000.0" Min="0.01"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 100
    ReadOnly: never
    Description: Set the peak frequency deviation in Hertz.  This value represents the variation in frequency of the modulating waveform.  from the carrier frequency.  Select from 10 mHz to 7.5 MHz. Default is 100 Hz.  The carrier frequency must always be greater than or equal to the peak Frequency deviation. If you attempt to set the deviation to a value greater than the carrier frequency (with FM enabled), the function generator will automatically adjust the deviation to equal the carrier frequency.  The sum of the carrier frequency and peak frequency deviation must be less than or equal to the maximum frequency for the selected function plus 100 kHz. If you attempt to set the deviation to an invalid value, the multimeter will automatically adjust the value to the maximum value allowed with the present carrier frequency.

  Property InternalFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequencymod.internalfrequenvy;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 10000.0;
      end

      driverData.frequencymod.internalfrequenvy = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="10000.0" Min="0.01"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Select the frequency of the modulating waveform.  Select from 10 mHz to 100 kHz. The default is 10 Hz.

  Property InternalWaveform
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequencymod.internalwaveform;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.frequencymod.internalwaveform = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [sin=sin, square=square, triangle=triangle, ramp=ramp, noise=noise, user=user]
    DefaultValue: sin
    ReadOnly: never
    Description: Select the shape of the modulating function.  You can use the noise function as a modulating waveform. However, you cannot use the noise function as a carrier waveform. The default value is SIN.

Group frequencysweep
  Size: 1
  Mappings ChannelMap Command="FrequencySweep1" Index="1"

  Property Enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.enabled{4};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if another mode is enabled
      idx = strmatch('on',driverData.enabled,'exact');

      % sets an error if another mode is enabled and switches all other modes
      % to 'off'
      if(strcmpi(propertyValue,'on') && ~isempty(idx) && idx ~= 4)
          beep
          driverData.error{driverData.holdplace} = '-221,"Settings conflict; previous modulation has been disabled"';
          driverData.holdplace = driverData.holdplace + 1;
          driverData.enabled{idx} = 'off';
      end

      driverData.enabled{4} = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [on=on, off=off]
    DefaultValue: On
    ReadOnly: never
    Description: Enable or disable the sweep mode.  To ensure proper operation, you should enable AM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable AM the previous modulation is turned off.

  Property Spacing
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequencysweep.spacing;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.frequencysweep.spacing = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [linear=linear, log=log]
    DefaultValue: linear
    ReadOnly: never
    Description: Select the linear or the algorithmic spacing for the sweep.  The default is linear.

  Property Start
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequencysweep.start;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 1.5E7;
      end

      driverData.frequencysweep.start = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="1.5E7" Min="0.01"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the start frequency   Select from 10 mHz to 15 MHz. the sweep is phase continuous over the full frequency range. The default is 100 Hz.]  Executing the *RST command does not set the start and stop frequency to their default values. Instead the restart operation set the start frequency to 10 mHz(minimum) and the stop frequency to 15 MHz (maximum).

  Property Stop
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequencysweep.stop;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 1.5E7;
      end

      driverData.frequencysweep.stop = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [max=max, min=min]
    PermissibleType: Double bounded [Max="1.5E7" Min="0.01"]
    DefaultValue: 1000
    ReadOnly: never
    Description: Set the stop frequency.   Select from 10mHz to 15 MHz. The sweep is phase is continuous over the full frequency range. The default is 1 kHz.  Executing the *RST command does not set the start and stop frequency to their default values. Instead the restart operation set the start frequency to 10 mHz(minimum) and the stop frequency to 15 MHz (maximum).

  Property Time
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.frequencysweep.time;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.0010;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 500.0;
      end

      driverData.frequencysweep.time = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="500.0" Min="0.0010"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 1
    ReadOnly: never
    Description: Set the number of seconds required to sweep from start of the frequency sweep to stop frequency.  Select from 1 ms to 500 seconds.  The number of frequency points in the sweep depends on the sweep time you select and is automatically calculated by the function generator.

Group fskmod
  Size: 1
  Mappings ChannelMap Command="FSKmod1" Index="1"

  Property Enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.enabled{5};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      beep on
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if another mode is enabled
      idx = strmatch('on',driverData.enabled,'exact');

      % stores an error if another mode is enabled and switches all other modes
      % to 'off'
      if(strcmpi(propertyValue,'on') && ~isempty(idx) && idx ~= 5)
          beep
          driverData.error{driverData.holdplace} = '-221,"Settings conflict; previous modulation has been disabled"';
          driverData.holdplace = driverData.holdplace + 1;
          driverData.enabled{idx}  = 'off';
      end

      driverData.enabled{5} = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [on=on, off=off]
    DefaultValue: on
    ReadOnly: never
    Description: Disable or enable the FSK mode.   To ensure proper operation, you should enable AM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable AM the previous modulation is turned off.

  Property Frequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.fskmod.frequency;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 1.5E7;
      end

      driverData.fskmod.frequency = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="1.5E7" Min="0.01"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the FSK "hop" frequency from 10 mHz to 15 MHz.  The default value is 100 Hz.

  Property InternalRate
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.fskmod.internalrate;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % checks to see if the user typed in a string value and then sets the
      % appropriate propertyValue
      if(strcmpi(propertyValue,'min'))
          propertyValue = 0.01;
      elseif(strcmpi(propertyValue,'max'))
          propertyValue = 50000.0;
      end

      driverData.fskmod.internalrate = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: Double bounded [Max="50000.0" Min="0.01"]
    PermissibleType: String enum [min=min, max=max]
    DefaultValue: 10
    ReadOnly: never
    Description: Set the rate at which the internal frequency "shifts" between the carrier and hop frequency.   Select from 10 mHz to 50 kHz, The default is 10 Hz.  The FSK rate is ignored when the external source is selected.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.fskmod.source;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.fskmod.source = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [internal=internal, external=external]
    DefaultValue: internal
    ReadOnly: never
    Description: Select an internal or external FSK.  The default is INT.  When the internal source is selected, the rate at which output frequency "shifts" between carrier frequency and hop frequency is determined by the FSK rate specified.  When external source is selected, the output frequency is determined by the signal level on the rear-panel FSK terminal. When a low "TTL" is level is present, the carrier frequency is output.  The maximum external FSK rate is 1 MHz.  The external annunciator turns on when the function generator is waiting for external trigger signal.

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Property ByteOrder
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.system.byteorder;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      driverData.system.byteorder = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [normal=normal, swapped=swappped]
    DefaultValue: normal
    ReadOnly: never
    Description: Select the byte order for binary transfers in the block mode using the DATA:DAC command.

  Property Version
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.system.version;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Query the function generator to determine the present SCPI version.

  Method beep
    MCode:
      function beep(obj)
      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
      beep on
      beep
    Description: INVOKE(obj,beep) to issue asingle beep immediately.

  Method deletestate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      driverData = get(get(obj, 'Parent'), 'DriverData');

      % Error checking
      % LOCATION must be a scalar and between 1 and 5, inclusive.
      if ~isnumeric(location)
          error('LOCATION must be numeric');
      elseif  location >5 || location <1
          error('LOCATION must be between 1 and 5 inclusive');
      end

      savefile = sprintf('generic_agilent_33120a_location%i.mat',location);
      delete (savefile)

      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj,deletestate,location) to delete a previously stored state.

  Method loadstate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      driverData = get(get(obj, 'Parent'), 'DriverData');

      % Error checking
      % LOCATION must be a scalar and between 1 and 5, inclusive.
      if ~isnumeric(location)
          error('LOCATION must be numeric');
      elseif  location >5 || location <1
          error('LOCATION must be between 1 and 5 inclusive');
      end

      savefile = sprintf('generic_agilent_33120a_location%i.mat',location);
      load (savefile)

      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj,loadstate,location) to recall a previously stored state.

  Method savestate
    MCode:
      function savestate(obj,location)
      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% LOCATION is the specified storage location

      driverData = get(get(obj, 'Parent'), 'DriverData');

      % Error checking
      % LOCATION must be a scalar and between 1 and 5, inclusive.
      if ~isnumeric(location)
          error('LOCATION must be numeric');
      elseif  location >5 || location <1
          error('LOCATION must be between 1 and 5 inclusive');
      end

      savefile = sprintf('generic_agilent_33120a_location%i.mat',location);
      save(savefile, 'driverData')

      set(get(obj, 'Parent'), 'DriverData', driverData);
    Description: INVOKE(obj,savestate,location) to store an instrument configuration at a LOCATION.
