MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\sandbox\matlab\toolbox\instrument\instrument\drivers\lecroy_lt344l.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: LeCroy
InstrumentModel: LT344L
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST;COMM_HEADER OFF;
Selftest: *TST?
Error: *ESR?; CMR?

CreateInitCode
  Code:
    function init(obj)
    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
    % Extract the interface object.
    interface = get(obj, 'Interface');

    % Configure the buffer size to allow for waveform transfer.
    % 21000 is the maximum allowed points that can be transferred to the instrument
    set(interface, 'InputBufferSize', 21000);
    set(interface, 'OutputBufferSize',21000);

    % initializes userData
    userData = get(obj, 'UserData');
    userData.measurment.type = 'FREQ';

    % valid colors for scope
    userData.color = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'} ;

    % all sources are set to channel one as a default
    userData.measurment.source = 'C1';
    userData.source = 'C1';

    % initializes the waveform header to an empty array
    userData.header = [];
    set(obj, 'UserData', userData);

ConnectInitCode
  Code:
    function init(obj)
    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
    % get the interface
    interface = get(obj, 'interface');

    % If HEADER is not OFF then responses retrieved from
    % the device will not match what is expected, and the driver will not
    % function properly.

    fprintf(interface, 'COMM_HEADER OFF');

    % Clear the Standard Event Status Register (SESR) to remove possible Power
    % on event, which would otherwise be returned by getError.
    query(interface, ' CMR?');

    userData = get(obj, 'UserData');
    userData.connect = true;
    set(obj, 'UserData', userData);

CleanupCode
  Code:
    function cleanup(obj)
    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

    userData = get(obj, 'UserData');
    userData.connect = false;
    set(obj, 'UserData', userData);

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Date
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the interface
      interface = get(obj,'Interface');

      % queries the instrument
      fprintf(interface,'DATE?');

      % retrieve the value from the instrument
      propertyValue = fscanf(interface);
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Queries the oscilloscope's internal date. Returns date in the form of day, month, year, hour, min, sec.

  Property RearOutput
    Type: InstrumentCommand
    ConfigureCommand: Rear_OUTput
    QueryCommand: REAR_OUTPUT?
    PermissibleType: String enum [off=OFF, passFail=PF, singlePulse=PULSE, triggerOut=TRIG, triggerReady=TRDY]
    DefaultValue: off
    ReadOnly: never
    Description: Sets or queries the oscilloscope rear output.

  Property ResponseHeaderState
    Type: InstrumentCommand
    QueryCommand: COMM_HEADER?
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: off
    ReadOnly: always
    Description: Queries the Response Header Enable State that causes the oscilloscope to either include or omit headers on query responses.

      NOTE: Although the property is not truly read only for the instrument, the value must be 'off' for the driver to operate correctly.  As a result, it is set as read-only for the driver.

  Method autoset
    Type: InstrumentCommand
    Line Command="AUTO_SETUP" Output="false"
    Description: AUTOSET Automatic parameter adjustment.

      INVOKE(OBJ, 'autoset') causes the oscilloscope to adjust its vertical, horizontal, and trigger controls to display a more stable waveform.

  Method buzzer
    MCode:
      function buzzer(obj,state)
      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
      % get the interface
      interface = get(obj,'Interface');

      % converts the user input to an insturment command
      idx = strmatch(lower(state), {'on','off','beep'}, 'exact');
      if (isempty(idx))
          error('instrument:method:invalidValue','State must be one of: ON, OFF, BEEP');
      end

      % determines what code to send to the instrument
      to_interface = sprintf('BUZZ %s',upper(state));

      % sets the instrument
      fprintf(interface,to_interface);
    Description: BUZZER controls the built-in piezo-electric buzz.

      INVOKE(OBJ,'buzzer',STATE) state can be BEEP, ON, or  OFF.

  Method drivertest
    MCode:
      function varargout = drivertest(obj)
      %   LECROYTEST Code for testing a MATLAB instrument driver.
      %
      %   This is the machine generated code that tests a MATLAB instrument driver,
      %   lecroy_lt344l_ex.mdd.
      %
      %   The test consists of multiple test steps that can test the MATLAB instrument
      %   drivers functions and properties.
      %
      %   The test code was generated with the MIDTEST GUI. For more information
      %   on MIDTEST, type 'instrhelp midtest' at the MATLAB command prompt.
      %
      %   To run the test, type the name of the file, LeCroyTest, at the MATLAB
      %   command prompt.
      %
      %   The file, LECROYTEST.M must be on your MATLAB PATH. For additional information
      %   on setting your MATLAB PATH, type 'help addpath' at the MATLAB command
      %   prompt.
      %
      %   Example:
      %       lecroytest;
      %
      %   See also ICDEVICE, MIDTEST.
      %

      %   Creation time: 11-Nov-2005 10:26:40

      % Wrap entire test in try catch.
      try
      fprintf('Test: Lecroy LT344I driver test\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      noErrorMsg             = '0;0';
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;

      % Construct the device object.
      deviceObj = obj;

      % Test Step 1: devicereset - Function (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          devicereset(deviceObj);

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr,'\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 2: Properties Sweep - 1 (Properties Sweep Test Step)
      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Date property in the parent group.\n');

      try
          % Query the value for the read-only property, Date.
          get(deviceObj, 'Date');

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmp(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing InstrumentModel property in the parent group.\n');

      try
          % Query the value for the read-only property, InstrumentModel.
          get(deviceObj, 'InstrumentModel');

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmp(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing RearOutPut property in the parent group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the RearOutPut property.
      validValues = {'off', 'passFail', 'triggerOut', 'triggerReady'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              set(deviceObj, 'RearOutPut', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(deviceObj, 'RearOutPut');

                  % Compare to the expected value.
                  errorcode = ~isequal(tempOut, validValues{i});

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      if isnumeric(tempOut)
                          fprintf(['Actual value: ' num2str(tempOut), '\n']);
                      else
                          fprintf(['Actual value: ' tempOut, '\n']);
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}), '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing ResponseHeaderState property in the parent group.\n');

      try
          % Query the value for the read-only property, ResponseHeaderState.
          get(deviceObj, 'ResponseHeaderState');

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmp(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Control property in the Acquisition group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Control property.
      validValues = {'run', 'stop'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Acquisition');
              set(groupObj, 'Control', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Control'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Delay property in the Acquisition group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Delay property.
      validValues = {-10000.0,100.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try

              groupObj = get(deviceObj, 'Acquisition');
              set(groupObj, 'TimeBase', 1);

              % Configure the property.
              groupObj = get(deviceObj, 'Acquisition');
              set(groupObj, 'Delay', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Delay'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing State property in the Acquisition group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the State property.
      validValues = {'stop', 'run'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Acquisition');
              set(groupObj, 'State', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'State'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Timebase property in the Acquisition group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Timebase property.
      validValues = {1.0E-9, 2.0E-9, 5.0E-9, 1.0E-8, 2.0E-8, 5.0E-8, 1.0E-7, 2.0E-7, 5.0E-7, 1.0E-6, 2.0E-6, 5.0E-6, 1.0E-5, 2.0E-5, 5.0E-5, 1.0E-4, 2.0E-4, 5.0E-4, 0.0010, 0.0020, 0.0050, 0.01, 0.02, 0.05, 0.1, 0.2, 0.5, 1.0, 2.0, 5.0, 10.0, 20.0, 50.0, 100.0, 200.0, 500.0, 1000.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Acquisition');
              set(groupObj, 'Timebase', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Timebase'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % changes the enviroment on the instrument so that BandwidthLimit settings
      % can be used
      groupObj = get(deviceObj, 'Channel');
      get(groupObj,'state');

      % Post information on the property being tested.
      fprintf('Testing BandwidthLimit property in the Channel group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the BandwidthLimit property.
      % validValues = {'on', 'off', '200mhz'};
      validValues = {'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Channel');
              set(groupObj, 'BandwidthLimit', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'BandwidthLimit'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Coupling property in the Channel group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Coupling property.
      validValues = {'ac', 'dc', 'ground', '50ohms'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Channel');
              set(groupObj, 'Coupling', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Coupling'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Position property in the Channel group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Position property.
      validValues = {-1.0, 1.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Channel');
              set(groupObj, 'Position', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Position'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Probe property in the Channel group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Probe property.
      validValues = {1.0, 2.0, 5.0, 10.0, 20.0, 25.0, 50.0, 100.0, 200.0, 500.0, 1000.0, 10000.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Channel');
              set(groupObj, 'Probe', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Probe'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Scale property in the Channel group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Scale property.
      validValues = {0.0020, 10.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Channel');
              set(groupObj, 'Scale', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Scale'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing State property in the Channel group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the State property.
      validValues = {'off', 'on'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Channel');
              set(groupObj, 'State', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'State'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing CursorType property in the Cursor group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the CursorType property.
      validValues = {'none', 'custom', 'fail', 'horizontalAbsolute', 'standardTimeParameters', 'horizontalRelative', 'pass', 'verticalAbsolute', 'standardVoltageParameters', 'verticalRelative'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Cursor');
              set(groupObj, 'CursorType', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'CursorType'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing HorizontalBarDelta property in the Cursor group.\n');

      try
          % Query the value for the read-only property, HorizontalBarDelta.
          groupObj = get(deviceObj, 'Cursor');
          get(groupObj, {'HorizontalBarDelta'});

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmp(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Source property in the Cursor group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Source property.
      validValues = {'channel1', 'channel2', 'channel3', 'channel4', 'traceA', 'traceB', 'traceC', 'traceD'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Cursor');
              set(groupObj, 'Source', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Source'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing VerticalBarDelta property in the Cursor group.\n');

      try
          % Query the value for the read-only property, VerticalBarDelta.
          groupObj = get(deviceObj, 'Cursor');
          get(groupObj, {'VerticalBarDelta'});

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmp(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing BackgroundColor property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the BackgroundColor property.
      validValues = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'BackgroundColor', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = upper(get(groupObj, {'BackgroundColor'}));

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Contrast property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Contrast property.
      validValues = {0.0, 10.0, 20.0, 30.0, 40.0, 50.0, 60.0, 70.0, 80.0, 90.0, 100.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'Contrast', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Contrast'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing CursorColor property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the CursorColor property.
      validValues = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'CursorColor', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = upper(get(groupObj, {'CursorColor'}));

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Format property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Format property.
      validValues = {'xy', 'yt'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'Format', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Format'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Grid property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Grid property.
      validValues = {'single', 'dual', 'quad', 'octal'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'Grid', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Grid'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing GridColor property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the GridColor property.
      validValues = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'GridColor', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = upper(get(groupObj, {'GridColor'}));

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Neutralcolor property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Neutralcolor property.
      validValues = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'Neutralcolor', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = upper(get(groupObj, {'Neutralcolor'}));

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing OverlayColor property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the OverlayColor property.
      validValues = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'OverlayColor', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = upper(get(groupObj, {'OverlayColor'}));

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Persistence property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Persistence property.
      validValues = {'infinite', 0.5, 1.0, 2.0, 5.0, 10.0, 20.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'Persistence', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Persistence'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing ColorScheme property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the ColorScheme property.
      validValues = {'1', '2', '3', '4', '5', '6', 'U1', 'U2', 'U3', 'U4'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'ColorScheme', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'ColorScheme'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Style property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Style property.
      validValues = {'dots', 'vectors'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'Style', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Style'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing TextColor property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the TextColor property.
      validValues = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'TextColor', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = upper(get(groupObj, {'TextColor'}));

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing WarningColor property in the Display group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the WarningColor property.
      validValues = {'WHITE','CYAN','YELLOW','GREEN','MAGENTA','BLUE','RED','LTGRAY','GRAY','SLGRAY','CHGRAY','DKCYAN','CREAM','SAND','AMBER','OLIVE','LTGREEN','JADE','LMGREEN','APGREEN','EMGREEN','GRGREEN','OCSPRAY','ICEBLUE','PASTBLUE','PALEBLUE','SKYBLUE','ROYLBLUE','DEEPBLUE','NAVY','PLUM','PURPLE','AMETHYST','FUCHSIA','RASPBRY','NEONPINK','PALEPINK','PINK','VERMIL','ORANGE','CERISE','KHAKI','BROWN','BLACK'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Display');
              set(groupObj, 'WarningColor', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = upper(get(groupObj, {'WarningColor'}));

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing MeasurementType property in the Measurement group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the MeasurementType property.
      validValues = {'frequency', 'mean', 'period', 'peak2peak', 'crms', 'amplitude', 'area', 'base'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Measurement');
              set(groupObj, 'MeasurementType', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'MeasurementType'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Source property in the Measurement group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Source property.
      validValues = {'channel1', 'channel2', 'channel3', 'channel4'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Measurement');
              set(groupObj, 'Source', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Source'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Value property in the Measurement group.\n');

      try
          % Query the value for the read-only property, Value.
          groupObj = get(deviceObj, 'Measurement');
          get(groupObj, {'Value'});

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmp(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Max property in the Sequence group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Reset the device
      devicereset(deviceObj);

      % Valid values for the Max property.
      validValues = {50.0, 100.0, 250.0, 500.0, 1000.0, 2500.0, 5000.0, 10000.0, 25000.0, 50000.0, 100000.0, 250000.0, 500000.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try

              % Configure the property.
              groupObj = get(deviceObj, 'Sequence');
              set(groupObj, 'Max', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Max'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';

                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Mode property in the Sequence group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Mode property.
      validValues = {'on', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Sequence');
              set(groupObj, 'Mode', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Mode'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Segment property in the Sequence group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Segment property.
      validValues = {50.0, 200.0, 500.0, 2000.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Sequence');
              set(groupObj, 'Segment', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Segment'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Coupling property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Coupling property.
      validValues = {'ac', 'dc', 'highFreqRejection', 'lowFreqRejection'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');
              set(groupObj, 'Coupling', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Coupling'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % get the interface
      interface = get(deviceObj,'Interface');
      % change the settings of trig so that holdoff can be used
      fprintf(interface,'TRig_SElect EDGE,HT,TI')

      % Post information on the property being tested.
      fprintf('Testing Holdoff property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Holdoff property.
      validValues = {1.0E-8, 10.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');

              % changes the trigger settings so that you can be in the correct
              % environment

              set(groupObj, 'TriggerType', 'edge')
              set(groupObj, 'HoldType', 'time')
              set(groupObj, 'Holdoff', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Holdoff'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing HoldType property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the HoldType property.
      validValues = {'time', 'timeWithin', 'event', 'pulseSmaller', 'pulseLarger', 'intervalSmaller', 'intervalLarger', 'pulseWidthWindow', 'intervalWidthWindow', 'off'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
            % sets the trigger type so that hold type can be changed
              switch validValues{i}
                  case {'time','event','off'}
                      dependentValue = 'edge';
                  case {'pulseSmaller','pulseLarger','pulseWidthWindow'}
                      dependentValue = 'glitch';
                  case {'intervalSmaller','intervalLarger','intervalWidthWindow'}
                      dependentValue = 'interval';
                  case {'timeWithin'}
                      dependentValue = 'stateQualified';
              end
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');
              set(groupObj, 'TriggerType', dependentValue)
              set(groupObj, 'HoldType', validValues{i});
              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'HoldType'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Level property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      groupObj = get(deviceObj, 'Channel');
      set(groupObj, 'Scale', 10);

      % Valid values for the Level property.
      validValues = {-50.0, 50.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');
              set(groupObj, 'Level', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Level'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Mode property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Mode property.
      validValues = {'auto', 'run', 'stop'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');
              set(groupObj, 'Mode', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Mode'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Slope property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Slope property.
      validValues = {'falling', 'rising', 'window'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');
              set(groupObj, 'Slope', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Slope'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Source property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Source property.
      validValues = {'channel1', 'channel2', 'external', 'external10', 'channel3', 'channel4', 'acline'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');

              % changes the trigger settings so that you can be in the correct
              % environment
              set(groupObj, 'TriggerType', 'edge')

              set(groupObj, 'Source', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Source'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing TriggerType property in the Trigger group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the TriggerType property.
      validValues = {'edge', 'drop', 'glitch', 'interval', 'stateQualified', 'edgeQualified'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Trigger');
              set(groupObj, 'TriggerType', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'TriggerType'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Window property in the Trigger group.\n');

      try
          % Query the value for the read-only property, Window.
          groupObj = get(deviceObj, 'Trigger');
          get(groupObj, {'Window'});

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmp(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result,'\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while getting the property value.\n');
          fprintf([lasterr,'\n']);
      end

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing ByteOrder property in the Waveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the ByteOrder property.
      validValues = {'bigEndian', 'littleEndian'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Waveform');
              set(groupObj, 'ByteOrder', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'ByteOrder'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing FirstPoint property in the Waveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the FirstPoint property.
      validValues = {0.0, 2500.0};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Waveform');
              set(groupObj, 'FirstPoint', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'FirstPoint'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Reset errorcode.
      errorcode = false;

      % Post information on the property being tested.
      fprintf('Testing Precision property in the Waveform group.\n');

      % Overall error status for all settings.
      finalerrorcode = false;

      % Valid values for the Precision property.
      validValues = { 'int16', 'int8'};

      % Test all supported values.
      for i = 1:length(validValues)
          try
              % Configure the property.
              groupObj = get(deviceObj, 'Waveform');
              set(groupObj, 'Precision', validValues{i});

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode = ~strcmp(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode == true)
                  fprintf('An instrument error occurred while setting the property value.\n');
                  fprintf([result,'\n']);
              end

              % Verify that the configured value matches the expected value.
              if (errorcode == false)
                  % Get the current property value.
                  tempOut = get(groupObj, {'Precision'});

                  % Compare to the expected value.
                  expectedValue = cell(size(groupObj))';
                  [expectedValue{:}] = deal(validValues{i});
                  errorcode = ~isequal(tempOut, expectedValue);

                  % Post information about test step failure.
                  if (errorcode == true)
                      fprintf('The property is not configured to the expected value.\n');

                      % Post actual value.
                      for k=1:length(tempOut)
                          c = tempOut{k};
                          if isnumeric(c)
                              fprintf(['Actual value(' num2str(k) '): ' num2str(c) '\n']);
                          else
                              fprintf(['Actual value(' num2str(k) '): ' c '\n']);
                          end
                      end

                      % Post expected value.
                      if isnumeric(validValues{i})
                          fprintf(['Expected value: ' num2str(validValues{i}) '\n']);
                      else
                          fprintf(['Expected value: ' validValues{i}, '\n']);
                      end
                  end

                  % Check if instrument error occurred.
                  result = geterror(deviceObj);
                  errorcode1 = ~strcmp(result, noErrorMsg);

                  % Post information about error if one occurred.
                  if (errorcode1 == true)
                      errorcode = errorcode1;
                      fprintf('An instrument error occurred while getting the property value.\n');
                      fprintf([result,'\n']);
                  end
              end
          catch
              % A MATLAB error occurred.
              errorcode = true;

              % Post information about error.
              fprintf('A MATLAB error occurred while testing the property.\n');
              fprintf([lasterr,'\n']);
          end
          if (errorcode == true)
              finalerrorcode = true;
          end
      end
      errorcode = finalerrorcode;

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 3: devicereset - Function (Function Test Step)
      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    % Execute the function.
      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    % Check if instrument error occurred.
      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    % Post information about error if one occurred.
      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    % A MATLAB error occurred.
      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    % Post information about error.
      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% Post message indicating if test step passed.
      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% Test Step 4: Properties Sweep - 2 (Properties Sweep Test Step)
      % Reset errorcode.
      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% Post information on the property being tested.
      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    % Query the value for the read-only property, Date.
      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    % Query the value for the read-only property, InstrumentModel.
      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    % Query the value for the read-only property, ResponseHeaderState.
      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% Overall error status for all settings.
      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% Valid values for the Delay property.
      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% Test all supported values.
      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        % Configure the property.
      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        % Verify that the configured value matches the expected value.
      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            % Get the current property value.
      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            % Compare to the expected value.
      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            % Post information about test step failure.
      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                % Post actual value.
      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                % Post expected value.
      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% Valid values for the State property.
      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% Valid values for the Timebase property.
      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% Valid values for the BandwidthLimit property.
      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% Valid values for the Coupling property.
      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% Valid values for the Position property.
      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% Valid values for the Probe property.
      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% Valid values for the Scale property.
      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% Valid values for the CursorType property.
      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    % Query the value for the read-only property, HorizontalBarDelta.
      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% Valid values for the Source property.
      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    % Query the value for the read-only property, VerticalBarDelta.
      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% Valid values for the Persistence property.
      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% Valid values for the MeasurementType property.
      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    % Query the value for the read-only property, Value.
      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% Valid values for the Mode property.
      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% Valid values for the Segment property.
      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% Valid values for the Slope property.
      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    % Query the value for the read-only property, Window.
      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% Valid values for the ByteOrder property.
      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% Valid values for the FirstPoint property.
      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% Valid values for the MaxNumberPoint property.
      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% Valid values for the Precision property.
      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% Test Step 6: Properties Sweep - 3 (failing) (Properties Sweep Test Step)
      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% Test Step 8: autoset - Function (Function Test Step)
      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% Test Step 9: buzzer ON - Function (Function Test Step)
      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% Test Step 10: buzzer OFF - Function (Function Test Step)
      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% Test Step 11: buzzer BEEP - Function (Function Test Step)
      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% Test Step 12: geterror - Function (Function Test Step)
      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    % Store the result so that it can be returned.
      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% Test Step 13: selfcalibrate - Function (failing) (Function Test Step)
      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% Test Step 14: selftest - Function (Function Test Step)
      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    % For this test the instrument sends 0 instead of 0;0
      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% Test Step 15: channelcolor - Function (failing) (Function Test Step)
      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    %set the color scheme to a user defined one
      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% Test Step 16: bits - Function (Function Test Step)
      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% Test Step 17: maxsweeps - Function (Function Test Step)
      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% Test Step 18: weight - Function (Function Test Step)
      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% Test Step 19: savestate - Function (Function Test Step)
      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% Test Step 20: loadstate - Function (Function Test Step)
      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% Test Step 21: trigger - Function (Function Test Step)
      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% Test Step 22: readwaveform - Function (Function Test Step)
      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% Reset the device
      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    % sets the max number of points to less then 20000
      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% Test Step 23: writewaveform - Function (failing) (Function Test Step)
      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% Test Step 24: storewaveform - Function  (Function Test Step)
      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% returns the path to C1
      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% Test Step 25: All Properties Sweep (Properties Sweep Test Step)
      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% Valid values for the RearOutPut property.
      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% Valid values for the Control property.
      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% Valid values for the HorizontalBarPosition1 property.
      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% Valid values for the VerticalBarPosition1 property.
      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% Valid values for the BackgroundColor property.
      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% Valid values for the Contrast property.
      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% Valid values for the CursorColor property.
      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% Valid values for the Format property.
      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% Valid values for the Grid property.
      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% Valid values for the GridColor property.
      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% Valid values for the Neutralcolor property.
      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% Valid values for the OverlayColor property.
      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% Valid values for the ColorScheme property.
      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% Valid values for the Style property.
      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% Valid values for the TextColor property.
      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% Valid values for the WarningColor property.
      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% Valid values for the Max property.
      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% Valid values for the Holdoff property.
      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        % changes the trigger settings so that you can be in the correct
              % environment
      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% Valid values for the HoldType property.
      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        % sets the trigger type so that hold type can be changed
      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% Valid values for the Level property.
      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        % sets the trigger values so that the sourse can be changed
      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% Valid values for the TriggerType property.
      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% Valid values for the EndingPoint property.
      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% test for functions that were added last
      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% Test Step 1: set to subtraction (Function Test Step)
      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% Test Step 2: 1st channel (Function Test Step)
      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% Error if the function output argument(s) do not match the expected value(s).
      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        % Post the results.
      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            % Loop through results and display them.
      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        % Post the expected values.
      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% Test Step 3: 2nd channel (Function Test Step)
      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% Test Step 4: get equation subtract (Function Test Step)
      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% Test Step 5: set to addition (Function Test Step)
      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% Test Step 7: 2ndchannel (Function Test Step)
      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% Test Step 8: get equation addition (Function Test Step)
      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% Test Step 9: set to negation (Function Test Step)
      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% Test Step 12: get equation negation (Function Test Step)
      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% Test Step 13: set to ratio (Function Test Step)
      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% Test Step 16: get equation ratio (Function Test Step)
      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% Test Step 17: set to multiplication (Function Test Step)
      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% Test Step 20: get equation multiplication (Function Test Step)
      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% Test Step 21: set to reciprocal (Function Test Step)
      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% Test Step 24: get equation reciprocal (Function Test Step)
      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% Test Step 25: set to identity (Function Test Step)
      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% Test Step 28: get equation identity (Function Test Step)
      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% Test Step 29: maxpoints-100 (Function Test Step)
      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% Test Step 26: factoryreset - Function (Function Test Step)
      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% Cleanup.
      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% Post results.
      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    % An error occurred while running the test.
      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

  Method factoryreset
    Type: InstrumentCommand
    Line Command="*RST" Output="false"
    Line Command=" COMM_HEADER OFF" Output="false"
    Description: FACTORYRESET  Resets the oscilloscope to its factory default settings.

      INVOKE(OBJ, 'factoryreset')  resets the oscilloscope to its factory settings.

  Method selfcalibrate
    Type: InstrumentCommand
    Line Command="*CAL?" Output="false"
    Description: SELFCALIBRATE Performs an internal self-calibration.

      INVOKE(obj, 'selfcalibrate') to self-calibrate the oscilloscope. This function does not return any status information.

  Method setdate
    MCode:
      function setdate(obj,day,month,year,hour,minute,second)
      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
      % get the interface
      interface = get(obj,'Interface');

      % determines what code to send to the instrument
      to_interface = sprintf('DATE %i,%s,%i,%i,%i,%i',day,month,year,hour,minute,second);

      % sets the instrument
      fprintf(interface,to_interface);
    Description: SETDATE sets the internal clock of the oscilloscope.

      INVOKE(OBJ, 'setdate',DAY,MONTH,YEAR,HOUR,MINUTE,SECOND)

Group acquisition
  Description: The acquisition group defines properties and functions related to how the waveform is acquired and the timebase.
  Size: 1
  Mappings ChannelMap Command="Acquisition1" Index="1"

  Property Control
    Type: InstrumentCommand
    ConfigureCommand: TRig_MoDe
    QueryCommand: TRig_MoDe?
    PermissibleType: String enum [single=SINGLE, run=NORM, stop=STOP, auto=AUTO]
    DefaultValue: run
    ReadOnly: never
    Description: Tells the oscilloscope when to stop taking acquisitions for edge trigger type.

  Property Delay
    Type: InstrumentCommand
    ConfigureCommand: TRig_DeLay
    QueryCommand: TRig_DeLay?
    PermissibleType: String none DependentProperty=Timebase DependentPropertyValue=1.0e-8
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1.0e-9 [Max="100.0" Min="-1.0E-5"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=2.0e-9 [Max="100.0" Min="-2.0E-5"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=5.0e-9 [Max="100.0" Min="-5.0E-5"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1.0e-8 [Max="100.0" Min="-1.0E-4"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=2.0e-8 [Max="100.0" Min="-2.0E-4"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=5.0e-8 [Max="100.0" Min="-5.0E-4"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1.0e-7 [Max="100.0" Min="-0.0010"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=2.0e-7 [Max="100.0" Min="-0.0020"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=5.0e-7 [Max="100.0" Min="-0.0050"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1.0e-6 [Max="100.0" Min="-0.01"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=2.0e-6 [Max="100.0" Min="-0.02"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=5.0e-6 [Max="100.0" Min="-0.05"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1.0e-5 [Max="100.0" Min="-0.1"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=2.0e-5 [Max="100.0" Min="-0.2"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=5.0e-5 [Max="100.0" Min="-0.5"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1.0e-4 [Max="100.0" Min="-1.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=2.0e-4 [Max="100.0" Min="-2.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=5.0e-4 [Max="100.0" Min="-5.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.0010 [Max="100.0" Min="-10.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.0020 [Max="100.0" Min="-20.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.0050 [Max="100.0" Min="-50.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.01 [Max="100.0" Min="-100.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.02 [Max="100.0" Min="-200.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.05 [Max="100.0" Min="-500.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.1 [Max="100.0" Min="-1000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.2 [Max="100.0" Min="-2000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=0.5 [Max="100.0" Min="-5000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1.0 [Max="100.0" Min="-10000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=2.0 [Max="100.0" Min="-20000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=5.0 [Max="100.0" Min="-50000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=10.0 [Max="100.0" Min="-100000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=20.0 [Max="100.0" Min="-200000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=50.0 [Max="100.0" Min="-500000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=100.0 [Max="100.0" Min="-1000000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=200.0 [Max="100.0" Min="-2000000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=500.0 [Max="100.0" Min="-5000000.0"]
    PermissibleType: Double bounded DependentProperty=Timebase DependentPropertyValue=1000.0 [Max="100.0" Min="-1.0E7"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the main time base horizontal position.

  Property State
    Type: InstrumentCommand
    ConfigureCommand: TRig_MoDe
    QueryCommand: TRig_MoDe?
    PermissibleType: String enum [stop=STOP, run=NORM, single=SINGLE, auto=AUTO]
    DefaultValue: run
    ReadOnly: never
    Description: Starts or stops oscilloscope acquisitions.

  Property Timebase
    Type: InstrumentCommand
    ConfigureCommand: Time_DIV
    QueryCommand: Time_DIV?
    PermissibleType: Double enum [1.0E-9, 2.0E-9, 5.0E-9, 1.0E-8, 2.0E-8, 5.0E-8, 1.0E-7, 2.0E-7, 5.0E-7, 1.0E-6, 2.0E-6, 5.0E-6, 1.0E-5, 2.0E-5, 5.0E-5, 1.0E-4, 2.0E-4, 5.0E-4, 0.0010, 0.0020, 0.0050, 0.01, 0.02, 0.05, 0.1, 0.2, 0.5, 1.0, 2.0, 5.0, 10.0, 20.0, 50.0, 100.0, 200.0, 500.0, 1000.0]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets the time per division for the main time base.

Group channel
  Size: 4
  Mappings
    ChannelMap Command="C4" Index="4"
    ChannelMap Command="C3" Index="3"
    ChannelMap Command="C2" Index="2"
    ChannelMap Command="C1" Index="1"

  Property BandwidthLimit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface, 'BandWidth_Limit?');

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the bandwidth limit separate from other data
      try
          % gets the hardware index number
          hw = obj.HwIndex;

          % output of instrument is in the format of C1,ON,C2,OFF,C3,ON.....
          % need the value of the channel which is always at Hwindex * 2
          hw = hw * 2;

          % returns the value
          propertyValue = lower(idn{hw});
      catch
          % if global bandwidth limit is on, then the output of the instrument is
          % just the bandwidthlimit with no headers
          propertyValue = lower(idn{1});
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % turns global bandwidth limit off
      fprintf(interface,'GLOBAL_BWL OFF')

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('BandWidth_Limit C%i,%s',hw,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String enum [on=ON, off=OFF, 200MHz=200MHZ]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the bandwidth setting of the specified oscilloscope channel.

  Property Coupling
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing?',hw);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      value = scanstr(interface);

      % converts the instrument value to the corresponding property value
      instrumentValues = {'A1M', 'D1M', 'GND', 'D50'};
      propertyValues = {'ac', 'dc', 'ground', '50ohms'};
      idx = strmatch(value{1}, instrumentValues);

      % returns the value
      propertyValue = propertyValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing %s', hw, propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String enum [ac=A1M, dc=D1M, ground=GND, 50ohms=D50]
    DefaultValue: ac
    ReadOnly: never
    Description: Sets or queries the coupling of the specified oscilloscope channel.

  Property Position
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');

      % get the interface
      interface = get(device, 'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:OFfSeT?', hw);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      propertyValue = str2num(fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');

      % get the interface
      interface = get(device, 'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:OFfSeT %i', hw, propertyValue);

      % sets the instrument
      fprintf(interface,to_interface);
    PermissibleType: Double bounded [Max="10.0" Min="-10.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the vertical position of the specified oscilloscope channel.

  Property Probe
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:ATTeNuation?', hw);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      propertyValue = str2num(fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:ATTeNuation %i',hw,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double enum [1.0, 2.0, 5.0, 10.0, 20.0, 25.0, 50.0, 100.0, 200.0, 500.0, 1000.0, 10000.0]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the attenuation factor of the specified channel.

  Property Scale
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:Volt_DIV?',hw);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      propertyValue = str2num( fscanf(interface));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:Volt_DIV %i',hw,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double bounded [Max="10.0" Min="0.0020"]
    DefaultValue: 0.0020
    ReadOnly: never
    Description: Sets or queries the vertical gain of the specified oscilloscope channel.

  Property State
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRAce?',hw);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      value = scanstr(interface);

      % returns the value
      propertyValue=lower(value{1});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRAce %s',hw,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String enum [off=OFF, on=ON ]
    DefaultValue: off
    ReadOnly: never
    Description: Enable or disable the display of the waveform on the scope.

Group cursor
  Size: 1
  Mappings ChannelMap Command="Cursor1" Index="1"

  Property CursorType
    Type: InstrumentCommand
    ConfigureCommand: CuRsor_MeaSure
    QueryCommand: CuRsor_MeaSure?
    PermissibleType: String enum [none=OFF, custom=CUST, fail=FAIL, horizontalAbsolute=HABS, standardTimeParameters=HPAR, horizontalRelative=HREL, pass=PASS, verticalAbsolute=VABS, standardVoltageParameters=VPAR, verticalRelative=VREL]
    DefaultValue: none
    ReadOnly: never
    Description: Selects the cursor type.

  Property HorizontalBarDelta
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % gets first cursor value
      to_interface = sprintf('%s:PEr_Cursor_Value? HABS',chan);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);
      % need just the second part of the data because the first part is
      % the type of value returned
      value1 = idn{2};

      % gets second cursor value
      to_interface = sprintf('%s:PEr_Cursor_Value? HREL',chan)

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);
      % need just the second part of the data because the first part is
      % the type of value returned
      value2 = idn{2};

      % returns the difference of the two values
      propertyValue = value2 - value1;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the difference (in vertical units) between the two horizontal bar cursors in the oscilloscope display.

  Property HorizontalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? HABS',chan);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      % need just the second part of the data because the first part is
      % the type of value returned
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set HABS, %i',chan,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first horizontal bar cursor position.

  Property HorizontalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? HREF',chan);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      % need just the second part of the data because the first part is
      % the type of value returned
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set HREF, %i',chan,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second horizontal bar cursor position.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % gets the user specified source
      value = userData.source;

      % converts the instrument value into its corresponding property value
      validValues = {'channel1','channel2','channel3','channel4','traceA','traceB','traceC','traceD'};
      scopeValues = {'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD'};
      idx = strmatch(value,scopeValues, 'exact');

      % returns the value
      propertyValue = validValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % sets the user specified source
      userData.source = propertyValue;
      set(get(obj, 'Parent'), 'UserData', userData);
    PermissibleType: String enum [channel1=C1, channel2=C2, channel3=C3, channel4=C4, traceA=TA, traceB=TB, traceC=TC, traceD=TD]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets or queries the waveform that is the source of the vertical and horizontal scale factors used in determining cursor values.
      This value should be set before using the horizontal or vertical properties.

  Property VerticalBarDelta
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % gets first cursor value
      to_interface = sprintf('%s:PEr_Cursor_Value? VABS',chan);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);
      % need just the second part of the data because the first part is
      % the type of value returned
      value1 = idn{2};

      % gets second cursor value
      to_interface = sprintf('%s:PEr_Cursor_Value?  VREL',chan);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);
      % need just the second part of the data because the first part is
      % the type of value returned
      value2 = idn{2};

      % returns the difference of the two values
      propertyValue = value2 - value1;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the time or frequency difference between the two vertical bar cursors.

  Property VerticalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? VABS',chan);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      % need just the second part of the data because the first part is
      % the type of value returned
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set VABS, %i',chan,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first vertical bar cursor position.

  Property VerticalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? VREF',chan);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      % need just the second part of the data because the first part is
      % the type of value returned
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the user specified source
      chan = userData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set VREF, %i',chan,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second vertical bar cursor position.

Group display
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property BackgroundColor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      % returns all of settings' colors
      fprintf(interface,'COLOR?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the background color, the 26th value of the returned instrument
      % string, separate from the rest of the color settings
      propertyValue = lower(idn{26});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the propertyValue is a valid color
      validColor = userData.color;
      idx = strmatch(upper(propertyValue),validColor,'exact');

      if(isempty(idx))
          error('instrument:property:invalidValue','Intput value is an invalid color.')
      end

      % checks to see if the color scheme is on a user defined scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isn't already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
          fprintf(interface,'Color_SCHeme U1')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR BACKGND,%s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface);
    PermissibleType: String none
    ReadOnly: never
    Description: Sets or queries the background color.

  Property ColorScheme
    Type: InstrumentCommand
    ConfigureCommand: Color_SCHeme
    QueryCommand: Color_SCHeme?
    PermissibleType: String enum [1=1, 2=2, 3=3, 4=4, 5=5, 6=6, U1=U1, U2=U2, U3=U3, U4=U4]
    DefaultValue: 1
    ReadOnly: never
    Description: Sets or queries the overlay color scheme.

  Property Contrast
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'INTenSity?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % determines what code to send to the instrument
      to_interface = sprintf('INTenSity TRACE,%i,GRID,%i',propertyValue,propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double enum [0.0, 10.0, 20.0, 30.0, 40.0, 50.0, 60.0, 70.0, 80.0, 90.0, 100.0]
    DefaultValue: 50
    ReadOnly: never
    Description: Set or query the contrast of the LCD display.

  Property CursorColor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      % returns all of settings' colors
      fprintf(interface,'COLOR?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the cursor color, the 22nd value of the returned instrument
      % string, separate from the rest of the color settings
      propertyValue = lower(idn{22});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the propertyValue is a valid color
      validColor = userData.color;
      idx = strmatch(upper(propertyValue),validColor,'exact');

      if(isempty(idx))
          error('instrument:property:invalidValue','Intput value is an invalid color.')
      end

      % checks to see if the color scheme is on a user scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isn't already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
          fprintf(interface,'Color_SCHeme U1')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR CURSOR,%s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String none
    ReadOnly: never
    Description: Sets or queries the cursor color.

  Property Format
    Type: InstrumentCommand
    ConfigureCommand: XY_DiSplay
    QueryCommand: XY_DiSplay?
    PermissibleType: String enum [xy=ON, yt=OFF]
    DefaultValue: xy
    ReadOnly: never
    Description: Sets or queries the oscilloscope display format.

  Property Grid
    Type: InstrumentCommand
    ConfigureCommand: GRID
    QueryCommand: GRID?
    PermissibleType: String enum [single=SINGLE, dual= DUAL, quad=QUAD, octal= OCTAL]
    DefaultValue: single
    ReadOnly: never
    Description: Sets or queries the oscilloscope's grid style.

  Property GridColor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      % returns all of settings' colors
      fprintf(interface,'COLOR?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the grid color, the 18th value of the returned instrument
      % string, separate from the rest of the color settings
      propertyValue = lower(idn{18});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the propertyValue is a valid color
      validColor = userData.color;
      idx = strmatch(upper(propertyValue),validColor,'exact');

      if(isempty(idx))
          error('instrument:property:invalidValue','Intput value is an invalid color.')
      end

      % checks to see if the color scheme is on a user scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isn't already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
          fprintf(interface,'Color_SCHeme U1')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR GRID,%s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String none
    ReadOnly: never
    Description: Sets or queries the grid color.

  Property Neutralcolor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      % returns all of settings' colors
      fprintf(interface,'COLOR?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the neutral color, the 24th value of the returned instrument
      % string, separate from the rest of the color settings
      propertyValue = lower(idn{24});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the propertyValue is a valid color
      validColor = userData.color;
      idx = strmatch(upper(propertyValue),validColor,'exact');

      if(isempty(idx))
          error('instrument:property:invalidValue','Intput value is an invalid color.')
      end

      % checks to see if the color scheme is on a user scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isn't already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
          fprintf(interface,'Color_SCHeme U1')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR NEUTRAL,%s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String none
    ReadOnly: never
    Description: Sets or queries the neutral color.

  Property OverlayColor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      % returns all of settings' colors
      fprintf(interface,'COLOR?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the overlay color, the 30th value of the returned instrument
      % string, separate from the rest of the color settings
      propertyValue = lower(idn{30});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the propertyValue is a valid color
      validColor = userData.color;
      idx = strmatch(upper(propertyValue),validColor,'exact');

      if(isempty(idx))
          error('instrument:property:invalidValue','Intput value is an invalid color.')
      end

      % checks to see if the color scheme is on a user scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isn't already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
      	fprintf(interface,'Color_SCHeme U1')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR OVERLAYS,%s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String none
    ReadOnly: never
    Description: Sets or queries the overlay color.

  Property Persistence
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % Tell the instrument you want it to tell you the value
      fprintf(interface, 'PErsist_SetUp?');

      % queries the instrument
      idn = scanstr(interface);

      % retrieve the value from the instrument
      if(ischar(idn{1}))
          propertyValue = 'infinite';
      else
          propertyValue = idn{1};
      end;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % determines what data type is and sets the instrument
      if(propertyValue == 5E-1)
          fprintf(interface,'PErsist_SetUp 0.5,ALL')
      elseif(ischar(propertyValue))
          fprintf(interface,'PErsist_SetUp %s,ALL',propertyValue)
      else
          fprintf(interface,'PErsist_SetUp %i,ALL',propertyValue)
      end;
    PermissibleType: String enum [infinite=infinite]
    PermissibleType: Double enum [0.5, 1.0, 2.0, 5.0, 10.0, 20.0]
    DefaultValue: infinite
    ReadOnly: never
    Description: Sets the length of time that data points are displayed.

  Property Style
    Type: InstrumentCommand
    ConfigureCommand: DoT_JoiN
    QueryCommand: DoT_JoiN?
    PermissibleType: String enum [dots=ON, vectors=OFF]
    DefaultValue: dots
    ReadOnly: never
    Description: Selects how to display the waveform data.

  Property TextColor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      % returns all of settings' colors
      fprintf(interface,'COLOR?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the text color, the 20th value of the returned instrument
      % string, separate from the rest of the color settings
      propertyValue = lower(idn{20});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the propertyValue is a valid color
      validColor = userData.color;
      idx = strmatch(upper(propertyValue),validColor,'exact');

      if(isempty(idx))
          error('instrument:property:invalidValue','Intput value is an invalid color.')
      end

      % checks to see if the color scheme is on a user scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isn't already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
      	fprintf(interface,'Color_SCHeme U1')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR TEXT,%s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String none
    ReadOnly: never
    Description: Sets or queries the text color.

  Property WarningColor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      % returns all of settings' colors
      fprintf(interface,'COLOR?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the warning color, the 28th value of the returned instrument
      % string, separate from the rest of the color settings
      propertyValue = lower(idn{28});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the propertyValue is a valid color
      validColor = userData.color;
      idx = strmatch(upper(propertyValue),validColor,'exact');

      if(isempty(idx))
          error('instrument:property:invalidValue','Intput value is an invalid color.')
      end

      % checks to see if the color scheme is on a user scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isn't already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
          fprintf(interface,'Color_SCHeme U1')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR WARNING,%s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String none
    ReadOnly: never
    Description: Sets or queries the warning color.

  Method channelcolor
    MCode:
      function channelcolor(obj,chan,color)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % checks to see if the color entered is valid
      validColor = userData.color;
      idx = strmatch(upper(color),validColor,'exact');
      if(isempty(idx))
          error('instrument:property:invalidValue','COLOR input is an invalid color.')
      end;

      % checks to see if the the color scheme is on a user scheme
      scheme = get(obj,'colorscheme');

      % changes the color scheme to one of the user schemes if it isnt already set to one
      % checks to see if the length of color scheme is equal to 1
      % all non user defined schemes have name length of one while all the user
      % defined schemes have a name length of two
      if(length(scheme) == 1)
          warning('instrument:property:settingsConflict','Changing color scheme to U1 so that colors can be changed.')
      	fprintf(interface,'Color_SCHeme U1')
      end

      % chcks to see if the channel entered is valid
      validValues = {'channel1','channel2','channel3','channel4','traceA','traceB','traceC','traceD'};
      scopeValues = {'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD'};
      idx = strmatch(chan,validValues);
      str=' channel1, channel2, channel3, channel4, traceA, traceB, traceC, traceD';
      if (isempty(idx))
          error('instrument:property:invalidValue','CHANNEL must be one of:%s',str);
      end
      trueSource = scopeValues{idx};

      % determines what code to send to the instrument
      to_interface = sprintf('COLOR %s,%s',trueSource,color);

      % sets the instrument
      fprintf(interface,to_interface)
    Description: CHANCOLOR changes the specified channel's or trace's color

      INVOKE(OBJ,chanColor,CHANNEL,COLOR) sets the color of the waveform of CHANNEL to COLOR.

      Example:
      	invoke(obj, 'chanColor', 'channel1','blue');

      Channel must be one of : channel1, channel2, channel3, channel4.

Group math
  Size: 1
  Mappings ChannelMap Command="Math1" Index="1"

  Method bits
    MCode:
      function bits(obj,bits,trace)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValues = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idx = strmatch(trace,validValues, 'exact');
      trace = scopeValues{idx};

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine BITS, %i',trace,bits);

      % sets the instrument
      fprintf(interface,to_interface)
    Description: BITS sets the number of ERES bits 

      INVOKE(OBJ,'bits',BITS,TRACE) sets the number of ERES bits to BITS for TRACE

      Trace must be one of : traceA, traceB, traceC, traceD.

  Method getequation
    MCode:
      function value = getequation(obj,trace)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValuesTrace = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idTrace = strmatch(trace,validValuesTrace, 'exact');
      trace = scopeValues{idTrace};

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine?',trace);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      % looks for the second argument because the first is the word EQN and the
      % actual value follows after it
      idn = scanstr(interface);
      equation = idn{2};

      % converts the instrument value into the property value
      switch length(equation)
          case 7
              if(~isempty(strfind(equation,'-')))
                  value = 'subtraction' ;
              elseif(~isempty(strfind (equation,'+')))
                  value = 'addition';
              elseif(~isempty(strfind (equation,'/')))
                  value = 'ratio';
              elseif(~isempty(strfind(equation,'*')))
                  value = 'multiplication' ;
              else
                  value = equation;
              end
          case 6
              if(~isempty(strfind (equation,'1/')))
                  value = 'reciprocal';
              else
                  value = equation;
              end
          case 5
              if(~isempty(strfind(equation,'-')))
                  value = 'negation';
              elseif(~isempty(strfind(equation,'+')))
                  value = 'identity' ;
              else
                  value = equation;
              end
          otherwise
              value = equation;
      end
    Description: Returns the equation used in for TRACE.

      INVOKE(OBJ,'getequation',TRACE) 

      Trace must be one of : traceA, traceB, traceC, traceD.

  Method getfirstchannel
    MCode:
      function value = getfirstchannel(obj, trace)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValuesTrace = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idTrace = strmatch(trace,validValuesTrace, 'exact');
      trace = scopeValues{idTrace};

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine?',trace);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      % looks for the second argument because the first is the word EQN and the
      % actual value follows after it
      idn = scanstr(interface);
      equation = idn{2};

      % finds out the letter C in the equation
      findC = strfind(equation,'C');

      % adds one to the location of letter C, this gives the channel location
      channelLocation = findC(1) + 1;

      % gets tje channel number from the location using the channel location
      %number
      channelNumber =  equation(channelLocation);

      % returns the value
      value = sprintf('channel%s',channelNumber);
    Description: Returns the first channel used for TRACE.

      INVOKE(OBJ,'getfirstchannel',TRACE) 

      Trace must be one of : traceA, traceB, traceC, traceD.

  Method getsecondchannel
    MCode:
      function value = getsecondchannel(obj, trace)
      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
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValuesTrace = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idTrace = strmatch(trace,validValuesTrace, 'exact');
      trace = scopeValues{idTrace};

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine?',trace);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      % looks for the second argument because the first is the word EQN and the
      % actual value follows after it
      idn = scanstr(interface);
      equation = idn{2};

      % finds out the letter C in the equation
      findC = strfind(equation,'C');

      % looks for the second occurance of the letter c but if one isnt found
      % then only one channel was used and an empty string is returned
      try
          % adds one to the location of letter C, this gives the channel location
          channelLocation = findC(2) + 1;

          % gets tje channel number from the location using the channel location
          %number
          channelNumber =  equation(channelLocation);

          % returns the value
          value = sprintf('channel%s',channelNumber);
      catch
          value = '';
      end
    Description: Returns the second channel used  for TRACE.

      INVOKE(OBJ,'getequation',TRACE) 

      Trace must be one of : traceA, traceB, traceC, traceD.

      If only one channel is used this function returns an empty string.

  Method maxpoints
    MCode:
      function maxpoints(obj,maxPoints,trace)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValues = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idx = strmatch(trace,validValues, 'exact');
      trace = scopeValues{idx};

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine MAXPTS, %i',trace,maxPoints);

      % sets the instrument
      fprintf(interface,to_interface)
    Description: MAXPOINTS sets the maximum number of points for TRACE

      INVOKE(OBJ,'maxPoints',MAXPOINTS,TRACE) 

      Trace must be one of : traceA, traceB, traceC, traceD.

  Method maxsweeps
    MCode:
      function maxsweeps(obj,sweep,trace)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValues = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idx = strmatch(trace,validValues, 'exact');
      trace = scopeValues{idx};

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine SWEEPS, %i',trace,sweep);

      % sets the instrument
      fprintf(interface,to_interface)
    Description: MAXSWEEPS sets the maximum number of sweeps for TRACE

      INVOKE(OBJ,'maxSweeps',NUMBEROFSWEEPS,TRACE) 

      Trace must be one of : traceA, traceB, traceC, traceD.

  Method setmathequation
    MCode:
      function setmathequation(obj,equation,firstChannel,secondChannel,trace)
      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% get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValuesTrace = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idTrace = strmatch(trace,validValuesTrace, 'exact');
      trace = scopeValues{idTrace};

      % converts the user input for first and second channel to instrument values
      validValuesChannel = {'channel1','channel2','channel3','channel4'};
      scopeValues = {'C1', 'C2', 'C3', 'C4'};

      idFirst = strmatch(firstChannel,validValuesChannel, 'exact');
      firstChannel = scopeValues{idFirst};

      idSecond = strmatch(secondChannel,validValuesChannel, 'exact');
      secondChannel = scopeValues{idSecond};

      % converts valid values to a string by converting the cell to a matrix and
      % then concatenating the strings with a ',' between each of the values
      valuesTrace = cell2mat(strcat(validValuesTrace,','));
      valuesChannel = cell2mat(strcat(validValuesChannel,','));

      % cuts off the last character of the string because you don't want to end in
      % a comma
      valuesTrace = valuesTrace(1:length(valuesTrace)-1);
      valuesChannel = valuesChannel(1:length(valuesChannel)-1);

      % throws an error if values are not valid
      if(isempty(idTrace))
          error('instrument:method:invalidValue','Trace must be one of:%s.',valuesTrace)
      elseif(isempty(idFirst)||isempty(idSecond))
          error('instrument:method:invalidValue','Channel must be one of:%s.',valuesChannel)
      end

      % converts the equation into the instrument value
      if(strcmpi(equation,'negation'))
          value = sprintf('-%s',firstChannel);
      elseif(strcmpi(equation,'identity'))
          value = sprintf('+%s',firstChannel);
      elseif(strcmpi(equation,'subtraction'))
          value = sprintf('%s-%s',firstChannel,secondChannel);
      elseif(strcmpi(equation,'addition'))
          value = sprintf('%s+%s',firstChannel,secondChannel);
      elseif (strcmpi(equation,'ratio'))
          value = sprintf('%s/%s',firstChannel,secondChannel);
      elseif(strcmpi(equation,'multiplication'))
          value = sprintf('%s*%s',firstChannel,secondChannel);
      elseif(strcmpi(equation,'reciprocal'))
          value = sprintf('1/%s',firstChannel);
      else
          value = equation;
          warning('instrument:method:unknownValue','the equation that you have chosen is not a standard equation')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine EQN, ''%s''',trace,value);

      % sets the instrument
      fprintf(interface,to_interface)
    Description: SETMATHEQUATION sets the math equation on TRACE to EQUATION, using FIRST and SECONDCHANNEL.

      INVOKE(OBJ,'setMathEquation',EQUATION,FIRSTCHANNEL,SECONDCHANNEL,TRACE) 

      Trace must be one of : traceA, traceB, traceC, traceD.
      Channel must be one of : channel1, channel2, channel3, channel4.
      Equation must be one of: negation, identity, subtraction, addition, ratio, multiplication, reciprocal or a custom equation

  Method weight
    MCode:
      function weight(obj,weight,trace)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % converts the user input for trace to an instrument value
      validValues = {'traceA','traceB','traceC','traceD'};
      scopeValues = {'TA', 'TB', 'TC', 'TD'};
      idx = strmatch(trace,validValues, 'exact');
      trace = scopeValues{idx};

      % determines what code to send to the instrument
      to_interface = sprintf('%s:DEFine WEIGHT, %i',trace,weight);

      % sets the instrument
      fprintf(interface,to_interface)
    Description: WEIGHT sets the continuous average weight for TRACE

      INVOKE(OBJ,'weight',TRACE) 

      Trace must be one of : traceA, traceB, traceC, traceD.

Group measurement
  Size: 5
  Mappings
    ChannelMap Command="IMMED" Index="5"
    ChannelMap Command="MEAS4" Index="4"
    ChannelMap Command="MEAS3" Index="3"
    ChannelMap Command="MEAS2" Index="2"
    ChannelMap Command="MEAS1" Index="1"

  Property MeasurementType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % gets the measurement type from userData
      userData = get(get(obj, 'Parent'), 'UserData');
      value = userData.measurment.type;

      % converts the instrument value to the property value
      validValues = {'frequency','mean','period','peak2peak','crms','amplitude','area','base'};
      scopeValues = {'FREQ', 'MEAN', 'PER', 'PK2PK', 'CRM', 'AMPL', 'AREA', 'BASE'};
      idx = strmatch(value,scopeValues, 'exact');

      % returns the value
      propertyValue = validValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % sets the user specified source
      userData.measurment.type = propertyValue;
      set(get(obj, 'Parent'), 'UserData', userData)
    PermissibleType: String enum [frequency=FREQ, mean=MEAN, period=PER, peak2peak=PK2PK, crms=CRM, amplitude=AMPL, area=AREA, base=BASE]
    DefaultValue: frequency
    ReadOnly: never
    Description: Sets or query the measurement type.  By default this driver supports the standard measurement types of the oscilloscope, and does not include any measurements supported only by expansion modules.  To add additional measurement types supported by your model, edit the driver using midedit.

      Set this property and the Source property, before using the Value property.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % gets the source from userData
      userData = get(get(obj, 'Parent'), 'UserData');
      value = userData.measurment.source;

      % converts the instrument value to the property value
      validValues = {'channel1','channel2','channel3','channel4'};
      scopeValues = {'C1', 'C2', 'C3', 'C4'};
      idx = strmatch(value,scopeValues, 'exact');

      % returns the value
      propertyValue = validValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % sets the user specified source
      userData.measurment.source = propertyValue;
      set(get(obj, 'Parent'), 'UserData', userData)
    PermissibleType: String enum [channel1=C1, channel2=C2, channel3=C3, channel4=C4]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets or queries the source of the measurement.

      Set this property and the MeasurementType property, before using the Value property.

  Property Value
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets channel to use for measurement from userData
      userData = get(get(obj, 'Parent'), 'UserData');
      chan = userData.measurment.source;

      % gets the measurement type
      type = userData.measurment.type;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PArameter_VAlue? %s',chan,type);

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      propertyValue = idn{2};
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the value of a measurement.  If the object is the immediate measurement object (the HwName property is 'IMMED') this property is always valid.  For the standard periodic measurements, it is only a valid if the MesesurementType is not 'none'. 

      Set Source and MeasurementType  properties, before using this property

Group sequence
  Size: 1
  Mappings ChannelMap Command="Sequence1" Index="1"

  Property Max
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'SEQUENCE?');

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % converts max into a string so that its property value can be found
      if(isnumeric(idn{3}))
          value=sprintf('%i',idn{3});
      else
          value=sprintf('%s',idn{3});
      end

      % converts the instrument value to the property value
      validValues = {'50','100','250','500','1000','2500','5000 ','10000','25000','50000','100000','250000','500000','1000000','2500000','5000000','10000000'};
      scopeValues = {'50','100','250','500','1000','2500', '5K', '10K', '25K','50K','100K','250K','500K','1M'};
      idx = strmatch(value,scopeValues, 'exact');

      % returns the value
      propertyValue = str2num(validValues{idx});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'SEQUENCE?');

      % retrieve the value from the instrument
      idn = scanstr(interface);
      if(strcmp('OFF',idn{1}))
          warning('instrument:property:settingsConflict','mode is set to OFF right now and is being changed to ON so that max can be changed.')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE ON,%i,%i ',idn{2},propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double enum [50.0, 100.0, 250.0, 500.0, 1000.0, 2500.0, 5000.0, 10000.0, 25000.0, 50000.0, 100000.0, 250000.0, 500000.0, 1000000.0, 2500000.0, 5000000.0, 1.0E7]
    DefaultValue: 50
    ReadOnly: never
    Description: Sets or queries the max size of the sequence mode.

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'SEQUENCE?');

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      propertyValue = lower(idn{1});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE %s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: off
    ReadOnly: never
    Description: Sets or queries the sequence mode.

  Property Segment
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'SEQUENCE?');

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the value
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % gets the mode from the instrument
      fprintf(interface,'SEQUENCE?');

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE %s,%i',idn{1},propertyValue);

      % sets the instrument
      fprintf(interface,to_interface);
    PermissibleType: Double enum [50.0, 200.0, 500.0, 2000.0]
    DefaultValue: 50
    ReadOnly: never
    Description: Sets or queries the max number of segments.

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Method loadstate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('instrument:method:invalidValue','LOCATION must be numeric.')
          elseif location ~= floor(location)
              error('instrument:method:invalidValue','LOCATION must be a scalar.');
          elseif  location >5 || location <1
              error('instrument:method:invalidValue','LOCATION must be between 1 and 5 inclusive.');
          end

      % Send memory name query command
      fprintf(interface,['*RCL ' num2str(location)])
    Description: LOADSTATE  Recall a previously stored state.

      INVOKE(OBJ, loadstate, location) restores the state of the oscilloscope from a copy of settings stores in memory.

      LOCATION must be between 1 and 5 inclusive.

  Method savestate
    MCode:
      function savestate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('instrument:method:invalidValue','LOCATION must be numeric.');
          elseif location ~= floor(location)
              error('instrument:method:invalidValue','LOCATION must be a scalar.');
          elseif  location >5 || location <1
              error('instrument:method:invalidValue','LOCATION must be between 1 and 5 inclusive.');
          end

      % Send memory name query command
      fprintf(interface,['*SAV ' num2str(location)])
    Description: SAVESTATE  Save the current state of the oscilloscope.

      INVOKE(OBJ,'savestate',location) stores an instrument configuration at the specified memory location, LOCATION.

      LOCATION must be between 1 and 5 inclusive.

Group trigger
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: TRig_CouPling
    QueryCommand: TRig_CouPling?
    PermissibleType: String enum [ac=AC, dc=DC, highFreqRejection=HFREJ, lowFreqRejection=LFREJ]
    DefaultValue: dc
    ReadOnly: never
    Description: Sets or queries the type of coupling for the main edge trigger.  This is equivalent to setting Coupling in the Trigger menu.

  Property Holdoff
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'TRig_SElect?')

      % retrieve the value from the instrument
      % the instrument returns a string with the holdoff value as well as other
      % related values
      idn = scanstr(interface);

      % finds where the holdtype is located in the string because the holdoff
      % value is located after it
      x = 1;
      while(~strcmp(idn{x},'HT'))
          x = x + 1;
      end

      % determines if the holdtype is OFF
      % The holdoff value is either the next value after holdtype if holdtype's
      % value is off, otherwise the holdoff value is 3 values latter
      if(strcmp(idn{x+1},'OFF'))
          propertyValue = sprintf('%i',idn{x+1});
      else
          propertyValue = idn{x+3};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'TRig_SElect?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the hold type
      x = 1;
      while(~strcmp(idn{x},'HT'))
          x = x + 1;
      end;

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s,HT,%s,HV,%i',idn{1},idn{x+1},propertyValue);

      % determines if the hold type is OFF
      if(strcmp(idn{x},'OFF'))
          error('instrument:property:invalidValue','Hold type is set to off, must be on to change Holdoff')
      else
      	fprintf(interface,to_interface)
      end
    PermissibleType: Double bounded [Max="10.0" Min="1.0E-8"]
    DefaultValue: 5.0E-7
    ReadOnly: never
    Description: Sets the oscilloscope's main hold off value.

  Property HoldType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'TRig_SElect?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets the hold type
      x = 1;
      while(~strcmp(idn{x},'HT'))
          x = x + 1;
      end
      value = idn{x+1};

      % converts the instrument value to the property value
      validValues = {'time', 'timeWithin', 'event', 'pulseSmaller', 'pulseLarger', 'intervalSmaller', 'intervalLarger', 'pulseWidthWindow', 'intervalWidthWindow', 'off'};
      scopeValues = {'TI', 'TL', 'EV', 'PS', 'PL', 'IS', 'IL','P2','I2', 'OFF'};
      idx = strmatch(value,scopeValues, 'exact');

      propertyValue = validValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'TRig_SElect?');

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s,HT,%s',idn{1},propertyValue);

      % sets the instrument
      fprintf(interface,to_interface);
    PermissibleType: String enum [time=TI, timeWithin=TL, event=EV, pulseSmaller=PS, pulseLarger=PL, intervalSmaller=IS, intervalLarger=IL, pulseWidthWindow=P2, intervalWidthWindow=I2, off=OFF]
    DefaultValue: OFF
    ReadOnly: never
    Description: Sets or queries the oscilloscope's hold type.

  Property Level
    Type: InstrumentCommand
    ConfigureCommand: TRig_LeVel
    QueryCommand: TRig_LeVel?
    PermissibleType: Double bounded [Max="50.0" Min="-50.0"]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets the oscilloscope main trigger level.  This command is equivalent to adjusting the front-panel TRIGGER LEVEL knob.
      Max and Min values are dependent on scale of channel type.

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: TRig_MoDe
    QueryCommand: TRig_MoDe?
    PermissibleType: String enum [auto=AUTO, run=NORM, single=SINGLE, stop=STOP]
    DefaultValue: auto
    ReadOnly: never
    Description: Sets the trigger mode for the edge trigger type.

  Property Slope
    Type: InstrumentCommand
    ConfigureCommand: TRig_SLope
    QueryCommand: TRig_SLope?
    PermissibleType: String enum [falling=NEG, rising=POS, window=WINDOW]
    DefaultValue: rising
    ReadOnly: never
    Description: Selects a rising or falling slope for the main edge trigger.  This is equivalent to setting Slope in the Trigger menu.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
       %get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'TRig_SElect?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns the just the source value
      value = idn{3};

      % converts the instrument value to the property value
      validValues = {'channel1','channel2','channel3','channel4','external','external10','PA','acline'};
      scopeValues = {'C1', 'C2', 'C3', 'C4','EX','EX10','PA','LINE'};
      idx = strmatch(value,scopeValues, 'exact');

      % returns the value
      propertyValue = validValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'TRig_SElect?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s,SR,%s',idn{1},propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String enum [channel1=C1, channel2=C2, external=EX, external10=EX10, channel3=C3, channel4=C4, acline=LINE, PA=PA]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets of the source for the main edge trigger.  This is equivalent to setting Source in the Trigger menu.

  Property TriggerType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'TRig_SElect?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % gets just the trigger type
      value = idn{1};

      % converts the instrument value to the property value
      validValues = {'edge','drop','glitch','single source','interval','stateQualified','standard ','edgeQualified'};
      scopeValues = {'EDGE', 'DROP', 'GLIT', 'SNG', 'INTV', 'SQ', 'STD', 'TEQ'};
      idx = strmatch(value,scopeValues, 'exact');

      % returns the value
      propertyValue = validValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String enum [edge=EDGE, drop=DROP, glitch=GLIT, single source=SNG, interval=INTV, stateQualified=SQ, standard =STD, edgeQualified=TEQ]
    DefaultValue: edge
    ReadOnly: never
    Description: Sets the type of oscilloscope trigger.  This is equivalent to setting Type in the Trigger menu.

  Property Window
    Type: InstrumentCommand
    ConfigureCommand: TRig_WIndow
    QueryCommand: TRig_WIndow?
    PermissibleType: Double none
    DefaultValue: 0.0
    ReadOnly: always
    Description: Queries the current window amplitude.

  Method trigger
    Type: InstrumentCommand
    Line Command="*TRG" Output="false"
    Description: TRIGGER Trigger the instrument.

      INVOKE(OBJ,'TRIGGER') performs a Group Execute trigger.

Group waveform
  Size: 1
  Mappings ChannelMap Command="Waveform1" Index="1"

  Property ByteOrder
    Type: InstrumentCommand
    ConfigureCommand: Comm_ORDer
    QueryCommand: Comm_ORDer?
    PermissibleType: String enum [bigEndian=HI, littleEndian=LO]
    DefaultValue: littleEndian
    ReadOnly: never
    Description: Sets or queries which byte of binary waveform data is transmitted first during a waveform transfer.
      ByteOrder is set to littleEndian for reading and writing waveforms, this property's value is not actualy used.

  Property EndingPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = scanstr(interface);
      endpnt = idn{6}+idn{4};

      % returns the value calculated
      propertyValue = endpnt;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = scanstr(interface);
      endpt = propertyValue - idn{6};

      % sets the instrument
      if(endpt < 0)
          warning('instrument:property:invalidValue','endpoint needs to be larger then the first point')
      else
          fprintf(interface,'WaveForm_SetUp  NP,%i',endpt)
      end
    PermissibleType: Double bounded [Max="2500.0" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the ending point for waveform data transfers.

  Property FirstPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns only the first point
      propertyValue = idn{6};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % sets the instrument
      fprintf(interface,'WaveForm_SetUp  FP,%i',propertyValue)
    PermissibleType: Double bounded [Max="2500.0" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the starting point for waveform data transfers.

  Property MaxNumberPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % queries the instrument
      fprintf(interface,'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = scanstr(interface);

      % returns only the maxnumberpoint
      % waveForm_SetUp? returns multiple values so the max number of points is
      % seperated from the rest of the numbers returned.
      value = idn{4};

      % the instrument returns 0 when it means infinite, so the the value 0 is
      % changed to 'infinite'
      if(value == 0)
          propertyValue = 'infinite';
      else
          propertyValue = value;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % the insturment can not take infinite as an input so the value is
      % converted to 0, which the instrument reads as infinite.
      if(propertyValue == 'infinite')
          propertyValue = 0;
      end

      % determines what code to send to the instrument
      to_interface = sprintf('WaveForm_SetUp  NP,%i',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: Double none
    PermissibleType: String enum [infinite=infinite]
    DefaultValue: infinite
    ReadOnly: never
    Description: The maximum number of acquisition data points.

  Property Precision
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % determines what code to send to the instrument
      to_interface = sprintf('COMM_FORMAT?');

      % queries the instrument
      fprintf(interface,to_interface)

      % retrieve the value from the instrument
      idn = scanstr(interface);
      value = sprintf('%s,%s',idn{2},idn{3});

      % converts the instrument value to the property value
      validValues = {'ASCII','int16','int8'};
      scopeValues = {'WORD,HEX', 'WORD,BIN','BYTE,BIN'};
      idx = strmatch(value,scopeValues, 'exact');

      % return the value
      propertyValue = validValues{idx};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % determines what code to send to the instrument
      to_interface = sprintf('COMM_FORMAT DEF9, %s ',propertyValue);

      % sets the instrument
      fprintf(interface,to_interface)
    PermissibleType: String enum [ASCII=WORD,HEX, int16=WORD,BIN, int8=BYTE,BIN]
    DefaultValue: ASCII
    ReadOnly: never
    Description: Sets or queries the precision for waveform data transfers.
      Precision is set to int8 for reading and writing waveforms, this property's value is not actualy used.

  Method readwaveform
    MCode:
      function [y, x, yunit, xunit, header] = readwaveform(obj, source, varargin)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % sees if there is any input
      if (nargin < 2)
          error('instrument:method:invalidValue','Not enough inputs were entered.');
      end

      % initializes every thing to empty/false/unknown
      scale = false;
      y = [];
      x = [];
      yunit = 'unknown';
      xunit = 'unknown';

      % checks to see if the source input is a valid value
      validValues = {'channel1','channel2','channel3','channel4','traceA','traceB','traceC','traceD','memory1','memory2','memory3','memory4'};
      scopeValues = {'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD', 'M1', 'M2', 'M3', 'M4',};
      idx = strmatch(source,validValues, 'exact');

      % gives error if the channel is not a valid value
      if (isempty(idx))
          error('instrument:method:invalidValue','CHANNEL must be one of: channel1, channel2, channel3, channel4,traceA, traceB, traceC, traceD, memory1, memory2, memory3 , memory4');
      end

      % sets the source to its property value
      trueSource = scopeValues{idx};

      % checks to see if the scale entered is a valid value
      if (nargin > 2)
          try
              scale = logical(varargin{1});
          catch
              error('instrument:method:invalidValue','SCALE must be a logical.');
          end
      end

      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % stores the old user setings
      oldPrecision = get(obj, 'Precision');
      oldByteOrder = get(obj, 'ByteOrder');

      % changes the prevision and byteorder so that wave form can be read
      set(obj, 'Precision','int8');
      set(obj, 'ByteOrder', 'littleEndian');

      % gets wave from the instrument
      try

          % Issue the curve transfer command.
          to_interface = sprintf('%s:WaveForm? ALL',trueSource);
          fprintf(interface,to_interface);

          % get wave from the instrument
          raw = fread(interface,21000,'int8');

          % seperates the data from the descriptor block
          endOfHeader = 361;
          startOfData = endOfHeader + 1;
          lengthD= num2str(length(raw));

          y = raw(startOfData:end);
          header = raw(1:endOfHeader);
          % saves the header for use latter
          userData.header = header;
      catch
          % returns the settings back to what the user had them and displays
          % an error that tells why the waveform did not get read in
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error(lasterr)
      end

      % makes sure that data got read in
      if (isempty(raw))
          % returns the settings back to what the user had them and displays
          % an error that the waveform did not get read in
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error('instrument:method:insturmenterror','An error occurred while reading the waveform.');
      end
      % checks to see if the user inputed a scale
      if (scale == false)
          % if there is no scale the settings are set back to what the user had
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          endl = length(y) - 1;
          x = [0 : endl];

          % the x and y units are extraced from the waveform
          if (nargout > 2)
              % gets the x unit from the header
              xunitFromHeader = raw(260);
              % converts the x unit from its ascii representation to its actual
              % value
              xunit=char(xunitFromHeader);
              xunit(xunit == '"') = [];
              % gets the y unit from the header
              yunitFromHeader = raw(212);
              % converts the y unit from its ascii representation to its actual
              % value
              yunit = char(yunitFromHeader);
              yunit(yunit == '"') = [];
          end

      % if the user did input a scale then the data is adjusted
      else

          % gets the vertical gain  and offset from the header
          % each number from the header represents one digit of the actual value
          vgainFromHeader = sprintf('%i%i%i%i',raw(172),raw(173),raw(174),raw(175));
          voffsetFromHeader = sprintf('%i%i%i%i',raw(176),raw(177),raw(178),raw(179));
          %converts the vertical gain and offset from strings to numbers
          vertical_gain = str2num(vgainFromHeader);
          vertical_offset = str2num(voffsetFromHeader);

          % calculates the y scale
          y = vertical_gain *y - vertical_offset;

          % the settings are set back to what the user had
          if (nargout > 3)
          % calculates the x scale
          number = raw(341);
          fprintf(interface,'C1:Time_DIV? ')
          time_div = fscanf(interface);
          time_div = str2num(time_div);
          endl = length(y) - 1;
          x_sub = [0:endl];
          x = x_sub * time_div;
          end

          %gets the x and y units
          if (nargout > 2)
             % gets the x unit from the header
              xunitFromHeader = raw(260)
              % converts the x unit from its ascii representation to its actual
              % value
              xunit=char(xunitFromHeader);
              xunit(xunit == '"') = [];
              % gets the y unit from the header
              yunitFromHeader = raw(212)
              % converts the y unit from its ascii representation to its actual
              % value
              yunit = char(yunitFromHeader);
              yunit(yunit == '"') = [];
          end
      end

      y = y';

      % puts the setting back to how they were origanly
      set(obj, 'Precision', oldPrecision);
      set(obj, 'ByteOrder', oldByteOrder);
      set(get(obj, 'Parent'), 'UserData', userData);
    Description: READWAVEFORM Transfer waveforms from the oscilloscope to MATLAB.

      [Y, T] = INVOKE(obj, 'readwaveform', CHANNEL) returns a waveform from the instrument,
      using channel string, CHANNEL.  Valid channel values are channel&lt;x&gt;, reference&lt;y&gt;, and
      math, where &lt;x&gt; is a number between 1 and the number of channels on the instrument and &lt;y&gt; is a letter between A and the number of reference channels on the instrument.

      [Y, T] = INVOKE(obj, 'readwaveform', CHANNEL, SCALE) returns the data scaled to real units if SCALE is true, or as raw data if SCALE is false.

      To read the waveform data points the interface object associated with the device
      object must have a sufficiently large InputBufferSize property value.  If you receive
      an error about the buffer size being to small, or have difficulty reading a waveform,
      verify that it is large enough.  The size must be greater than two times the number
      of points in the waveform, plus approximately 50 bytes for header information.

      Example:
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');
      	[y, t] = invoke(obj, 'readwaveform', 'referenceA', false);

      Example changing the buffer size:
      	% Note the device object must be closed.
      	interfaceObj = get(deviceObj, 'interface');
      	% Allow for a 10,000 point waveform with a little extra room.
      	set(interfaceObj, 'InputBufferSize', 21000);
      	connect(deviceObj);
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');

      Channel must be one of : channel1, channel2, channel3, channel4, traceA, traceB, traceC, traceD, memory1, memory2, memory3, memory4.

  Method storewaveform
    MCode:
      function storewaveform(obj,channel,location)
      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
      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');
      scopeValuesC = {'C1', 'C2', 'C3', 'C4', 'TA', 'TB', 'TC', 'TD'};
      scopeValuesM = {'M1', 'M2', 'M3', 'M4'};

      % checks to see if location is a valid value
      idxM = strmatch(lower(location), {'memory1','memory2','memory3','memory4'}, 'exact');
      if (isempty(idxM))
          error('instrument:method:invalidValue','LOCATION must be one of: memory1, memory2, memory3, memory4.');

      end
      trueLocation = scopeValuesM{idxM};

      % checks to see if channel is a valid value
      idxC = strmatch(lower(channel),{'channel1','channel2','channel3','channel4','tracea','traceb','tracec','traced'} , 'exact');
      if (isempty(idxC))
          error('instrument:method:invalidValue','CHANNEL must be one of: channel1, channel2, channel3, channel4, traceA, traceB, traceC, traceD.');
      end
      trueChannel = scopeValuesC{idxC};

      % determines what code to send to the instrument
      to_interface = sprintf('STOre %s,%s',trueChannel,trueLocation);

      % sets the instrument
      fprintf(interface,to_interface)
    Description: STOREWAVEFORM Save a waveform to oscilloscope memory.

      INVOKE(OBJ, 'storewaveform', CHANNEL, LOCATION) saves the waveform from CHANNEL to memory location, LOCATION.

      Example:
      	invoke(obj, 'storewaveform', 'channel1','memory1');

      Channel must be one of : channel1, channel2, channel3, channel4, traceA, traceB, traceC, traceD. 
      Location must be one of :memory1, memory2, memory3, memory4	.

  Method writewaveform
    MCode:
      function writewaveform(obj,memory,data,header)
      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
      % get the userData
      userData = get(get(obj, 'Parent'), 'UserData');

      % get the device
      device = get(obj,'Parent');

      % get the interface
      interface = get(device,'Interface');

      % Validate destination
      validValues = {'memory1','memory2','memory3','memory4'};
      scopeValues = {'M1', 'M2', 'M3', 'M4'};
      idx = strmatch(lower(memory), {'memory1','memory2','memory3','memory4'}, 'exact');
      true_value = scopeValues{idx};
      if (isempty(idx))
          error('Invalid value. MEMORY must be one of: memory1, memory2, memory3, memory4');

      end
      % Check that the array contains only numeric data
      if ~isnumeric(data) || length(size(data)) > 2 || min(size(data)) > 1
          error('DATA must be a 1 x n numeric array');
      end

      % makes sure that data is an apropriate length
      if (numel(data) > 20000)
           error('DATA must be less than 20000 points');
      end

      % saves old settings
      oldPrecision = get(obj, 'Precision');
      set(obj, 'Precision','int8')
      set(obj, 'ByteOrder', 'littleEndian');
      % calculates the length of the data block
      headerNumber = length(data) + 345;

      % puts the length of the data in a format so that it can be compared with
      % the header
      head = sprintf('%i',headerNumber);
      l = length(head);
      while(l < 9)
          head = cat(2,'0',head);
          l = l + 1;
      end
      d(1:11) = cat(2,'#9',head);
      d = double(d');

      % gets the length of the data from the header
      headerCheck = header(5:15);

      % figures out if the header matches the data by comparing what the header
      % thinks the length of the data is and the actual length of the data
      if(isequal(headerCheck,d))
          % puts the header with the data
          header = double(header');
          data = [header data];
          fullData = data(5:end);
          % combinds the scpi comand and the data
          command = sprintf('%s:WAVEFORM ALL, ',true_value);
          commandAndData = [double(command) fullData];
          % writes the binary data A to the instrument connected to obj.
          fwrite(interface, commandAndData, 'int8');
      else
          % returns an error if the header and the data dont match
          error('Header did not match up with points. Make sure header and points are from the same call to readwaveform.')
      end
    Description: writeWAVEFORM Transfer waveforms to the oscilloscope from the computer.

      INVOKE(OBJ, 'writewaveform', POINTS) downloads the numeric data POINTS to the oscilloscope. 

      Warning: This operation can be very slow
